# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Acqiris U1084A Digitizer

# The version string should be updated whenever changes are made to this config file
version: 1.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Acqiris_U1084A

# default interface and address
interface: Other
address: PCI::INSTR0
use_32bit_mode: True

# Define if the instrument can be hardware triggered
support_arm: True
support_hardware_loop: True

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False


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
[Acquisition type]
datatype: COMBO
def_value: Normal
combo_def_1: Normal
combo_def_2: Average
cmd_def_1: 0
cmd_def_2: 2
show_in_measurement_dlg: True

[Number of samples]
datatype: DOUBLE
def_value: 1000
show_in_measurement_dlg: True

[Number of averages]
datatype: DOUBLE
def_value: 1000
show_in_measurement_dlg: True

[Number of segments]
datatype: DOUBLE
def_value: 1

[Sample interval]
datatype: DOUBLE
def_value: 1.0E-9
unit: s
group: Timebase
show_in_measurement_dlg: True

[Delay time]
datatype: DOUBLE
def_value: 0.0
unit: s
group: Timebase

[10 MHz Reference]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
cmd_def_1: 0
cmd_def_2: 2
group: Timebase

[Trig source]
datatype: COMBO
def_value: External
combo_def_1: Channel 1
combo_def_2: Channel 2
combo_def_3: External
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: -1
group: Trigger

[Trig coupling]
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
combo_def_3: HF Reject
combo_def_4: DC, 50 Ohm
combo_def_5: AC, 50 Ohm
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
group: Trigger

[Trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: 0
cmd_def_2: 1
group: Trigger

[Trig level]
datatype: DOUBLE
def_value: 0.0
unit: V
group: Trigger

[Ch1 - Enabled]
datatype: BOOLEAN
def_value: True
group: Channel 1
section: Channels

[Ch1 - Coupling]
datatype: COMBO
def_value: DC, 50 Ohm
combo_def_1: Ground
combo_def_2: DC
combo_def_3: AC
combo_def_4: DC, 50 Ohm
combo_def_5: AC, 50 Ohm
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
group: Channel 1
section: Channels

[Ch1 - Bandwidth]
datatype: COMBO
def_value: Full
combo_def_1: Full
combo_def_2: 700 MHz
combo_def_3: 200 MHz
combo_def_4: 20 MHz
cmd_def_1: 0
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
group: Channel 1
section: Channels

[Ch1 - Range]
datatype: COMBO
def_value: 5 V
combo_def_1: 5 V
combo_def_2: 2 V
combo_def_3: 1 V
combo_def_4: 500 mV
combo_def_5: 200 mV
combo_def_6: 100 mV
combo_def_7: 50 mV
cmd_def_1: 5.00
cmd_def_2: 2.00
cmd_def_3: 1.00
cmd_def_4: 0.50
cmd_def_5: 0.20
cmd_def_6: 0.10
cmd_def_7: 0.05
group: Channel 1
section: Channels

[Ch1 - Offset]
datatype: DOUBLE
def_value: 0.0
low_lim: -5.0  
high_lim: 5.0
unit: V
group: Channel 1
section: Channels

[Ch2 - Enabled]
datatype: BOOLEAN
def_value: True
group: Channel 2
section: Channels

[Ch2 - Coupling]
datatype: COMBO
def_value: DC, 50 Ohm
combo_def_1: Ground
combo_def_2: DC
combo_def_3: AC
combo_def_4: DC, 50 Ohm
combo_def_5: AC, 50 Ohm
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
group: Channel 2
section: Channels

[Ch2 - Bandwidth]
datatype: COMBO
def_value: Full
combo_def_1: Full
combo_def_2: 700 MHz
combo_def_3: 200 MHz
combo_def_4: 20 MHz
cmd_def_1: 0
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
group: Channel 2
section: Channels

[Ch2 - Range]
datatype: COMBO
def_value: 5 V
combo_def_1: 5 V
combo_def_2: 2 V
combo_def_3: 1 V
combo_def_4: 500 mV
combo_def_5: 200 mV
combo_def_6: 100 mV
combo_def_7: 50 mV
cmd_def_1: 5.00
cmd_def_2: 2.00
cmd_def_3: 1.00
cmd_def_4: 0.50
cmd_def_5: 0.20
cmd_def_6: 0.10
cmd_def_7: 0.05
group: Channel 2
section: Channels

[Ch2 - Offset]
datatype: DOUBLE
def_value: 0.0
low_lim: -5.0  
high_lim: 5.0
unit: V
group: Channel 2
section: Channels

[Enable demodulation]
datatype: BOOLEAN
def_value: False
group: IQ Amplitudes
section: Demodulation

[Modulation frequency]
datatype: DOUBLE
def_value: 100E6
unit: Hz
group: IQ Amplitudes
section: Demodulation
state_quant: Enable demodulation
state_value_1: 1

[Skip start]
datatype: DOUBLE
def_value: 0.0
unit: s
group: IQ Amplitudes
section: Demodulation
state_quant: Enable demodulation
state_value_1: 1

[Length]
datatype: DOUBLE
def_value: 1E-6
unit: s
group: IQ Amplitudes
section: Demodulation
state_quant: Enable demodulation
state_value_1: 1

[Use Ch2 as reference]
datatype: BOOLEAN
def_value: True
group: IQ Amplitudes
section: Demodulation
state_quant: Enable demodulation
state_value_1: 1

[Signal]
datatype: COMPLEX
permission: READ
unit: V
group: IQ Amplitudes
section: Demodulation
state_quant: Enable demodulation
state_value_1: 1

[Ch1 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Output
show_in_measurement_dlg: True

[Ch2 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Output
show_in_measurement_dlg: True

[Signal - Single shot]
datatype: VECTOR_COMPLEX
unit: V
permission: READ
x_name: Repetition
x_unit: 
group: Output
state_quant: Enable demodulation
state_value_1: 1
