# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Advantest Resistance Meter

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Advantest_R8340



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: True

# List of models supported by this driver
model_str_1: R8340

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Default termination character
term_char: CR+LF

# conversion string when sending values
str_value_out: %.5E

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: OM1

# Final commands sent to the instrument when closing the driver
final: 


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
[Function]
datatype: COMBO
def_value: Current
combo_def_1: Current
combo_def_2: Resistance
combo_def_3: Volume resistivity
combo_def_4: Surface resistivity
cmd_def_1: RI0
cmd_def_2: RI1
cmd_def_3: RI2
cmd_def_4: RI3
set_cmd: <*>
get_cmd: RIX?

[Voltage]
datatype: DOUBLE
def_value: 0.0
low_lim: 0.0
high_lim: 1000.0
unit: V
set_cmd: PVS<*>
get_cmd: PVS?

[Discharge/charge before measuring]
datatype: BOOLEAN
def_value: False
permission: WRITE

[Delay between charging/measuring]
datatype: DOUBLE
def_value: 0.01
unit: s
permission: WRITE
state_quant: Discharge/charge before measuring
state_value_1: True

[Current]
datatype: DOUBLE
unit: A
permission: READ
get_cmd: GET
state_quant: Function
state_value_1: Current

[Resistance]
datatype: DOUBLE
unit: Ohm
permission: READ
get_cmd: GET
state_quant: Function
state_value_1: Resistance
