# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Agilent 5313xA Counter

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path:

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 10

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: True 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: :SYST:ERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: :INIT:CONT 0;

# Final commands sent to the instrument when closing the driver
final: 

[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: 53132A

# Check instrument model id at startup (True or False). Default is False
check_model: True


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
[Function]
datatype: COMBO
def_value: Totalize
combo_def_1: Frequency 1
combo_def_2: Frequency 2
combo_def_3: Frequency 3
combo_def_4: Frequency ratio 1 to 2
combo_def_5: Frequency ratio 1 to 3
combo_def_6: Phase ratio 1 to 2
combo_def_7: Period 1
combo_def_8: Period 2
combo_def_9: Period 3
combo_def_10: Rise time
combo_def_11: Fall time
combo_def_12: Positive pulse width
combo_def_13: Negative pulse width
combo_def_14: Duty cycle
combo_def_15: Time interval 1 to 2
combo_def_16: Totalize
combo_def_17: Peak-to-peak voltage 1
combo_def_18: Peak-to-peak voltage 2
combo_def_19: Max voltage 1
combo_def_20: Max voltage 2
combo_def_21: Min voltage 1
combo_def_22: Min voltage 2
cmd_def_1: "FREQ"
cmd_def_2: "FREQ 2"
cmd_def_3: "FREQ 3"
cmd_def_4: "FREQ:RAT"
cmd_def_5: "FREQ:RAT 1,3"
cmd_def_6: "PHAS"
cmd_def_7: "PER"
cmd_def_8: "PER 2"
cmd_def_9: "PER 3"
cmd_def_10: "RTIM"
cmd_def_11: "FTIM"
cmd_def_12: "PWID"
cmd_def_13: "NWID"
cmd_def_14: "DCYC"
cmd_def_15: "TINT"
cmd_def_16: "TOT"
cmd_def_17: "VOLT:PTP"
cmd_def_18: "VOLT:PTP 2"
cmd_def_19: "VOLT:MAX"
cmd_def_20: "VOLT:MAX 2"
cmd_def_21: "VOLT:MIN"
cmd_def_22: "VOLT:MIN 2"
set_cmd: :FUNC

[Freq - Trig start]
datatype: COMBO
def_value: Immediate
combo_def_1: Immediate
combo_def_2: External
cmd_def_1: IMM
cmd_def_2: EXT
set_cmd: :FREQ:ARM:SOUR
state_quant: Function
state_value_1: Frequency 1
state_value_2: Frequency 2
state_value_3: Frequency 3
state_value_4: Frequency ratio 1 to 2
state_value_5: Frequency ratio 1 to 3
state_value_6: Period 1
state_value_7: Period 2
state_value_8: Period 3
[Freq - Trig start slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: :FREQ:ARM:SLOP
state_quant: Freq - Trig start
state_value_1: External
[Freq - Trig stop]
datatype: COMBO
def_value: Immediate
combo_def_1: Immediate
combo_def_2: External
combo_def_3: Timer
combo_def_4: Digits
cmd_def_1: IMM
cmd_def_2: EXT
cmd_def_3: TIM
cmd_def_4: DIG
set_cmd: :FREQ:ARM:STOP:SOUR
state_quant: Function
state_value_1: Frequency 1
state_value_2: Frequency 2
state_value_3: Frequency 3
state_value_4: Frequency ratio 1 to 2
state_value_5: Frequency ratio 1 to 3
state_value_6: Period 1
state_value_7: Period 2
state_value_8: Period 3
[Freq - Trig stop slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: :FREQ:ARM:STOP:SLOP
state_quant: Freq - Trig stop
state_value_1: External
[Freq - Trig stop timer]
datatype: DOUBLE
def_value: 0.1
set_cmd: :FREQ:ARM:STOP:TIM
state_quant: Freq - Trig stop
state_value_1: Timer
[Freq - Trig stop digits]
datatype: DOUBLE
def_value: 4
set_cmd: :FREQ:ARM:STOP:DIG
state_quant: Freq - Trig stop
state_value_1: Digits

[Phase - Trig start]
datatype: COMBO
def_value: Immediate
combo_def_1: Immediate
combo_def_2: External
cmd_def_1: IMM
cmd_def_2: EXT
set_cmd: :PHAS:ARM:SOUR
state_quant: Function
state_value_1: Phase ratio 1 to 2
[Phase - Trig start slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: :PHAS:ARM:SLOP
state_quant: Phase - Trig start
state_value_1: External

[Time - Trig start]
datatype: COMBO
def_value: Immediate
combo_def_1: Immediate
combo_def_2: External
cmd_def_1: IMM
cmd_def_2: EXT
set_cmd: :TINT:ARM:SOUR
state_quant: Function
state_value_1: Rise time
state_value_2: Fall time
state_value_3: Positive pulse width
state_value_4: Negative pulse width
state_value_5: Duty cycle
state_value_6: Time interval 1 to 2
[Time - Trig start slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: :TINT:ARM:SLOP
state_quant: Time - Trig start
state_value_1: External
[Time - Trig stop]
datatype: COMBO
def_value: Immediate
combo_def_1: Immediate
combo_def_2: Timer
cmd_def_1: IMM
cmd_def_2: TIM
set_cmd: :TINT:ARM:STOP:SOUR
state_quant: Function
state_value_1: Rise time
state_value_2: Fall time
state_value_3: Positive pulse width
state_value_4: Negative pulse width
state_value_5: Duty cycle
state_value_6: Time interval 1 to 2
[Time - Trig stop timer]
datatype: DOUBLE
def_value: 0.1
set_cmd: :TINT:ARM:STOP:TIM
state_quant: Time - Trig stop
state_value_1: Timer

[Totalize - Trig start]
datatype: COMBO
def_value: Immediate
combo_def_1: Immediate
combo_def_2: External
cmd_def_1: IMM
cmd_def_2: EXT
set_cmd: :TOT:ARM:SOUR
state_quant: Function
state_value_1: Totalize
[Totalize - Trig start slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: :TOT:ARM:SLOP
state_quant: Totalize - Trig start
state_value_1: External
[Totalize - Trig stop]
datatype: COMBO
def_value: Immediate
combo_def_1: Immediate
combo_def_2: External
combo_def_3: Timer
cmd_def_1: IMM
cmd_def_2: EXT
cmd_def_3: TIM
set_cmd: :TOT:ARM:STOP:SOUR
state_quant: Function
state_value_1: Totalize
[Totalize - Trig stop slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: :TOT:ARM:STOP:SLOP
state_quant: Totalize - Trig stop
state_value_1: External
[Totalize - Trig stop timer]
datatype: DOUBLE
def_value: 0.1
set_cmd: :TOT:ARM:STOP:TIM
state_quant: Totalize - Trig stop
state_value_1: Timer

[Trigger feed]
datatype: COMBO
def_value: Separate
combo_def_1: Common
combo_def_2: Separate
cmd_def_1: "INP"
cmd_def_2: "INP2"
set_cmd: :EVEN2:FEED
state_quant: Function
state_value_1: Time interval 1 to 2

[Value]
name: Value
datatype: DOUBLE
permission: READ
get_cmd: :READ?

[Ch1 - Impedance]
datatype: COMBO
def_value: 1 MOhm
combo_def_1: 50 Ohm
combo_def_2: 1 MOhm
cmd_def_1: +5.00000E+001
cmd_def_2: +1.00000E+006
set_cmd: :INP1:IMP
group: Channel 1
section: Channels
[Ch1 - Coupling]
datatype: COMBO
def_value: DC
combo_def_1: AC
combo_def_2: DC
cmd_def_1: AC
cmd_def_2: DC
set_cmd: :INP1:COUP
group: Channel 1
section: Channels
[Ch1 - Input attenuation]
datatype: COMBO
def_value: 1
combo_def_1: 1
combo_def_2: 10
cmd_def_1: +1
cmd_def_2: +10
set_cmd: :INP1:ATT
group: Channel 1
section: Channels
[Ch1 - Low-pass filter]
datatype: BOOLEAN
def_value: 0
set_cmd: :INP1:FILT
group: Channel 1
section: Channels
[Ch1 - Trig type]
datatype: COMBO
def_value: Absolute
combo_def_1: Absolute
combo_def_2: Relative
cmd_def_1: 0
cmd_def_2: 1
set_cmd: :EVEN1:LEV:AUTO
group: Channel 1
section: Channels
[Ch1 - Trig level]
datatype: DOUBLE
def_value: 0.5
unit: V
set_cmd: :EVEN1:LEV
state_quant: Ch1 - Trig type
state_value_1: Absolute
group: Channel 1
section: Channels
[Ch1 - Relative trig level]
datatype: DOUBLE
def_value: 50
unit: %%
set_cmd: :EVEN1:LEV:REL
state_quant: Ch1 - Trig type
state_value_1: Relative
group: Channel 1
section: Channels
[Ch1 - Trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: :EVEN1:SLOP
group: Channel 1
section: Channels
[Ch1 - Trig sensitivity]
datatype: COMBO
def_value: Medium
combo_def_1: High
combo_def_2: Medium
combo_def_3: Low
cmd_def_1: +0
cmd_def_2: +50
cmd_def_3: +100
set_cmd: :EVEN1:HYST:REL
group: Channel 1
section: Channels

[Ch2 - Impedance]
datatype: COMBO
def_value: 1 MOhm
combo_def_1: 50 Ohm
combo_def_2: 1 MOhm
cmd_def_1: +5.00000E+001
cmd_def_2: +1.00000E+006
set_cmd: :INP2:IMP
group: Channel 2
section: Channels
[Ch2 - Coupling]
datatype: COMBO
def_value: DC
combo_def_1: AC
combo_def_2: DC
cmd_def_1: AC
cmd_def_2: DC
set_cmd: :INP2:COUP
group: Channel 2
section: Channels
[Ch2 - Input attenuation]
datatype: COMBO
def_value: 1
combo_def_1: 1
combo_def_2: 10
cmd_def_1: +1
cmd_def_2: +10
set_cmd: :INP2:ATT
group: Channel 2
section: Channels
[Ch2 - Low-pass filter]
datatype: BOOLEAN
def_value: 0
set_cmd: :INP2:FILT
group: Channel 2
section: Channels
[Ch2 - Trig type]
datatype: COMBO
def_value: Absolute
combo_def_1: Absolute
combo_def_2: Relative
cmd_def_1: 0
cmd_def_2: 1
set_cmd: :EVEN2:LEV:AUTO
group: Channel 2
section: Channels
[Ch2 - Trig level]
datatype: DOUBLE
def_value: 0.5
unit: V
set_cmd: :EVEN2:LEV
state_quant: Ch2 - Trig type
state_value_1: Absolute
group: Channel 2
section: Channels
[Ch2 - Relative trig level]
datatype: DOUBLE
def_value: 50
unit: %%
set_cmd: :EVEN2:LEV:REL
state_quant: Ch2 - Trig type
state_value_1: Relative
group: Channel 2
section: Channels
[Ch2 - Trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: :EVEN2:SLOP
group: Channel 2
section: Channels
[Ch2 - Trig sensitivity]
datatype: COMBO
def_value: Medium
combo_def_1: High
combo_def_2: Medium
combo_def_3: Low
cmd_def_1: +0
cmd_def_2: +50
cmd_def_3: +100
set_cmd: :EVEN2:HYST:REL
group: Channel 2
section: Channels
 
