# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: BlueFors Logging

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: BlueForsLogging

interface: None

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
[BlueFors Log Folder]
datatype: PATH
permission: WRITE
group: Data

[P1]
datatype: DOUBLE
unit: bar
permission: READ
group: Maxi Gauge

[P2]
datatype: DOUBLE
unit: bar
permission: READ
group: Maxi Gauge

[P3]
datatype: DOUBLE
unit: bar
permission: READ
group: Maxi Gauge

[P4]
datatype: DOUBLE
unit: bar
permission: READ
group: Maxi Gauge

[P5]
datatype: DOUBLE
unit: bar
permission: READ
group: Maxi Gauge

[P6]
datatype: DOUBLE
unit: bar
permission: READ
group: Maxi Gauge

[CH1]
datatype: DOUBLE
unit: K
permission: READ
group: LakeShore

[CH2]
datatype: DOUBLE
unit: K
permission: READ
group: LakeShore

[CH5]
datatype: DOUBLE
unit: K
permission: READ
group: LakeShore

[CH6]
datatype: DOUBLE
unit: K
permission: READ
group: LakeShore
