# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: BlueFors Temperature

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: BlueForsTemperature

interface: None

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
[BlueFors Log Folder]
datatype: PATH
permission: WRITE
group: Data

[CH1]
datatype: DOUBLE
unit: K
permission: READ
group: LakeShor

[CH2]
datatype: DOUBLE
unit: K
permission: READ
group: LakeShor

[CH5]
datatype: DOUBLE
unit: K
permission: READ
group: LakeShor

[CH6]
datatype: DOUBLE
unit: K
permission: READ
group: LakeShor
