# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Simple Signal Generator

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SimpleSignalGenerator

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
[Frequency]
datatype: DOUBLE
unit: Hz
def_value: 10.0

[Amplitude]
datatype: DOUBLE
unit: V
def_value: 1.0

[Phase]
datatype: DOUBLE
unit: deg
def_value: 0.0

[Add noise]
datatype: BOOLEAN
def_value: False

[Noise amplitude]
datatype: DOUBLE
unit: V
def_value: 0.1
state_quant: Add noise
state_value_1: True

[Signal]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s
