# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: HP 3478 Multimeter
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: 


[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: 3478


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: :SYST:ERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: T1

# Send Go-to-local over GPIB interface after closing instrument
gpib_go_to_local: True

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
[Function]
datatype: COMBO
def_value: Voltage DC
combo_def_1: Voltage DC
combo_def_2: Voltage AC
combo_def_3: Current DC
combo_def_4: Current AC
combo_def_5: Resistance (2-wire)
combo_def_6: Resistance (4-wire)
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 5
cmd_def_4: 6
cmd_def_5: 3
cmd_def_6: 4
set_cmd: F<*>
permission: WRITE

[Voltage]
datatype: DOUBLE
unit: V
permission: READ
get_cmd: T3
state_quant: Function
state_value_1: Voltage DC
state_value_2: Voltage AC

[Current]
datatype: DOUBLE
unit: A
permission: READ
get_cmd: T3
state_quant: Function
state_value_1: Current DC
state_value_2: Current AC

[Resistance]
datatype: DOUBLE
unit: Ohm
permission: READ
get_cmd: T3
state_quant: Function
state_value_1: Resistance (2-wire)
state_value_2: Resistance (4-wire)

[Auto-zero]
datatype: BOOLEAN
def_value: True
set_cmd: Z<*>
permission: WRITE

[Integration time]
datatype: COMBO
def_value: 20 ms
combo_def_1: 200 ms
combo_def_2: 20 ms
combo_def_3: 2 ms
cmd_def_1: 5
cmd_def_2: 4
cmd_def_3: 3
set_cmd: N<*>
permission: WRITE

[Range (V_dc)]
datatype: COMBO
def_value: Autorange
combo_def_1: Autorange
combo_def_2: 300 V
combo_def_3: 30 V
combo_def_4: 3 V
combo_def_5: 300 mV
combo_def_6: 30 mV
cmd_def_1: A
cmd_def_2: 2
cmd_def_3: 1
cmd_def_4: 0
cmd_def_5: -1
cmd_def_6: -2
set_cmd: R<*>
state_quant: Function
state_value_1: Voltage DC
permission: WRITE

[Range (V_ac)]
datatype: COMBO
def_value: Autorange
combo_def_1: Autorange
combo_def_2: 300 V
combo_def_3: 30 V
combo_def_4: 3 V
combo_def_5: 300 mV
cmd_def_1: A
cmd_def_2: 2
cmd_def_3: 1
cmd_def_4: 0
cmd_def_5: -1
set_cmd: R<*>
state_quant: Function
state_value_1: Voltage AC
permission: WRITE

[Range (I)]
datatype: COMBO
def_value: Autorange
combo_def_1: Autorange
combo_def_2: 3 A
combo_def_3: 300 mA
cmd_def_1: A
cmd_def_2: 0
cmd_def_3: -1
set_cmd: R<*>
state_quant: Function
state_value_1: Current DC
state_value_2: Current AC
permission: WRITE

[Range (R)]
datatype: COMBO
def_value: Autorange
combo_def_1: Autorange
combo_def_2: 30 MOhm
combo_def_3: 3 MOhm
combo_def_4: 300 kOhm
combo_def_5: 30 kOhm
combo_def_6: 3 kOhm
combo_def_7: 300 Ohm
combo_def_8: 30 Ohm
cmd_def_1: A
cmd_def_2: 7
cmd_def_3: 6
cmd_def_4: 5
cmd_def_5: 4
cmd_def_6: 3
cmd_def_7: 2
cmd_def_8: 1
set_cmd: R<*>
state_quant: Function
state_value_1: Resistance (2-wire)
state_value_2: Resistance (4-wire)
permission: WRITE

