[General settings]
name: Keithley 6430 Source Measurement Unit
version: 0.5
driver_path: Keithley_6430_SMU
[Model and options]
model_str_1: 6430
check_model: True
model_id_1: MODEL 6430
[VISA settings]
use_visa = True
reset: True
query_instr_errors: False
error_bit_mask: 255
error_cmd: STAT:QUE:NEXT?
init: *CLS
str_true: 1
str_false: 0
timeout: 100
[Source on_off]
datatype: COMBO
label: Source status
def_value: On
combo_def_1: On
combo_def_2: Off
section: Source
permission: BOTH
show_in_measurement_dlg: False
set_cmd: OUTP:STAT <*>
get_cmd: OUTP?
cmd_def_1: 1
cmd_def_2: 0
[Source function]
datatype: COMBO
label: Source function
def_value: Voltage
combo_def_1: Voltage
combo_def_2: Current
section: Source
state_quant: Source on_off
state_value_1: On
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SOUR:FUNC <*>
get_cmd: SOUR:FUNC?
cmd_def_1: VOLT
cmd_def_2: CURR
[Voltage Amplitude]
datatype: DOUBLE
label: Source voltage
unit: V
def_value: 0
low_lim: -210
high_lim: 210
section: Source
state_quant: Source function
state_value_1: Voltage
permission: BOTH
show_in_measurement_dlg: True
set_cmd: SOUR:VOLT <*>
get_cmd: SOUR:VOLT?
sweep_cmd: ***REPEAT SET*** 0.1
sweep_rate: 0.002
sweep_rate_low: 0.001
sweep_rate_high: 0.03
[Current Amplitude]
datatype: DOUBLE
label: Source current
unit: A
def_value: 0
low_lim: -0.105
high_lim: 0.105
section: Source
state_quant: Source function
state_value_1: Current
permission: BOTH
show_in_measurement_dlg: True
set_cmd: SOUR:CURR <*>
get_cmd: SOUR:CURR?
sweep_cmd: ***REPEAT SET*** 0.1
sweep_rate: 4E-10
sweep_rate_low: 1E-10
sweep_rate_high: 1E-6
[Measure Current]
datatype: BOOLEAN
label: Measure current?
def_value: True
section: Measurement
permission: BOTH
show_in_measurement_dlg: False
set_cmd: python
get_cmd: python
[Current variable]
datatype: DOUBLE
label: Measured current
unit: A
section: Measurement
state_quant: Measure Current
state_value_1: True
permission: READ
show_in_measurement_dlg: True
get_cmd: python
[Measure Voltage]
datatype: BOOLEAN
label: Measure voltage?
def_value: True
section: Measurement
permission: BOTH
show_in_measurement_dlg: False
set_cmd: python
get_cmd: python
[Voltage variable]
datatype: DOUBLE
label: Measured voltage
unit: V
section: Measurement
state_quant: Measure Voltage
state_value_1: True
permission: READ
show_in_measurement_dlg: True
get_cmd: python
[Measure Resistance]
datatype: BOOLEAN
label: Measure resistance?
def_value: True
section: Measurement
permission: BOTH
show_in_measurement_dlg: False
set_cmd: python
get_cmd: python
[Resistance Measurement Mode]
datatype: COMBO
label: Resistance measurement mode
def_value: Manual
tooltip: If set to auto, source functions overridden!
combo_def_1: Manual
combo_def_2: Automatic
section: Measurement
state_quant: Measure Resistance
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SENS:RES:MODE <*>
get_cmd: SENS:RES:MODE?
cmd_def_1: MAN
cmd_def_2: AUTO
[Resistance Offset Compensation]
datatype: BOOLEAN
label: Enable offset-compensated ohms
def_value: False
section: Measurement
state_quant: Measure Resistance
state_value_1: True
set_cmd: SENS:RES:OCOM <*>
get_cmd: SENS:RES:OCOM?
[Resistance variable]
datatype: DOUBLE
label: Measured resistance
unit: Ohms
section: Measurement
state_quant: Measure Resistance
state_value_1: True
permission: READ
show_in_measurement_dlg: True
get_cmd: python
[Voltage Range Mode]
datatype: COMBO
label: Select voltage range mode
def_value: Manual
combo_def_1: Manual
combo_def_2: Automatic
section: Ranges
permission: BOTH
show_in_measurement_dlg: False
set_cmd: python
get_cmd: python
[Voltage Manual Range]
datatype: DOUBLE
label: Specify expected highest voltage
unit: V
def_value: 0.21
tooltip: Instrument sets lowest range compatible with  value
low_lim: -210
high_lim: 210
section: Ranges
state_quant: Voltage Range Mode
state_value_1: Manual
permission: BOTH
show_in_measurement_dlg: False
set_cmd: python
get_cmd: python
[Current Range Mode]
datatype: COMBO
label: Select current range mode
def_value: Manual
combo_def_1: Manual
combo_def_2: Automatic
section: Ranges
permission: BOTH
show_in_measurement_dlg: False
set_cmd: python
get_cmd: python
[Current Manual Range]
datatype: DOUBLE
label: Specify expected highest current
unit: A
def_value: 1e-07
tooltip: Instrument sets lowest range compatible with  value
low_lim: -0.105
high_lim: 0.105
section: Ranges
state_quant: Current Range Mode
state_value_1: Manual
permission: BOTH
show_in_measurement_dlg: False
set_cmd: python
get_cmd: python
[Resistance Range Mode]
datatype: COMBO
label: Select current range mode
def_value: Manual
combo_def_1: Manual
combo_def_2: Automatic
section: Ranges
state_quant: Resistance Measurement Mode
state_value_1: Automatic
permission: BOTH
show_in_measurement_dlg: False
set_cmd: python
get_cmd: python
[Resistance Manual Range]
datatype: DOUBLE
label: Specify expected highest current
unit: A
def_value: 210000
tooltip: Instrument sets lowest range compatible with  value
low_lim: 0
high_lim: 21000000000000
section: Ranges
state_quant: Resistance Range Mode
state_value_1: Manual
permission: BOTH
show_in_measurement_dlg: 0
set_cmd: SENS:RES:RANG <*>
get_cmd: SENS:RES:RANG?
[NPLC]
datatype: DOUBLE
label: Integration period
unit: NPLC
def_value: 10
tooltip: Number of powerline cycles over which to take measurement
low_lim: 0.01
high_lim: 10
section: Measurement Speed
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SENS:CURR:NPLC <*>
get_cmd: SENS:CURR:NPLC?
[Auto Zero]
datatype: COMBO
label: Set auto zero
def_value: On
combo_def_1: On
combo_def_2: Off
combo_def_3: Once
section: Measurement Speed
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SYST:AZER:STAT <*>
get_cmd: SYST:AZER:STAT?
cmd_def_1: 1
cmd_def_2: 0
cmd_def_3: ONCE
[Auto Filter]
datatype: BOOLEAN
label: Enable auto filter
def_value: False
group: Filters
section: Measurement Speed
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SENS:AVER:AUTO <*>
get_cmd: SENS:AVER:AUTO?
[Repeat Filter]
datatype: DOUBLE
label: Repeat count filter
def_value: 1
low_lim: 1
high_lim: 100
group: Filters
section: Measurement Speed
state_quant: Auto Filter
state_value_1: False
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SENS:AVER:REP:COUN <*>
get_cmd: SENS:AVER:REP:COUN?
[Median Filter]
datatype: DOUBLE
label: Median filter
def_value: 5
low_lim: 0
high_lim: 5
group: Filters
section: Measurement Speed
state_quant: Auto Filter
state_value_1: 0
permission: BOTH
show_in_measurement_dlg: 0
set_cmd: SENS:MED:RANK <*>
get_cmd: SENS:MED:RANK?
[Moving Filter]
datatype: DOUBLE
label: Moving average filter
def_value: 34
low_lim: 1
high_lim: 100
group: Filters
section: Measurement Speed
state_quant: Auto Filter
state_value_1: False
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SENS:AVER:COUN <*>
get_cmd: SENS:AVER:COUN?
[Advanced Moving Filter]
datatype: BOOLEAN
label: Use advanced moving filter
def_value: False
group: Filters
section: Measurement Speed
state_quant: Auto Filter
state_value_1: False
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SENS:AVER:ADV:STAT <*>
get_cmd: SENS:AVER:ADV:STAT?
[Advanced MA Window]
datatype: DOUBLE
label: Advanced moving filter window
unit: PCT
def_value: 5
low_lim: 0
high_lim: 105
group: Filters
section: Measurement Speed
state_quant: Advanced Moving Filter
state_value_1: True
permission: BOTH
show_in_measurement_dlg: 0
set_cmd: SENS:AVER:ADV:NTOL <*>
get_cmd: SENS:AVER:ADV:NTOL?
[Averaging Time]
datatype: DOUBLE
label: Estimated measure time
unit: s
section: Measurement Speed
permission: BOTH
show_in_measurement_dlg: False
set_cmd: Python
get_cmd: Python