# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Keysight 33622A Waveform Generator

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Keysight_33622A_WaveformGenerator


[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: True

# List of models supported by this driver
model_str_1: 33622A


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication.
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: :SYST:ERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: *ESE 60;:SOUR:VOLT:UNIT VPP;:FORM:BORD SWAP;

# Final commands sent to the instrument when closing the driver
final:


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
# Channel 1

[Channel 1 Function]
datatype: COMBO
def_value: Sinusoid
combo_def_1: Sinusoid
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Pulse
combo_def_5: Noise
combo_def_6: DC
combo_def_7: ARB
cmd_def_1: SIN
cmd_def_2: SQU
cmd_def_3: RAMP
cmd_def_4: PULS
cmd_def_5: NOIS
cmd_def_6: DC
cmd_def_7: ARB
set_cmd: :SOUR1:FUNC
group: Channel 1

[Channel 1 Frequency]
datatype: DOUBLE
def_value: 1E3
unit: Hz
set_cmd: :SOUR1:FREQ
group: Channel 1
state_quant: Channel 1 Function
state_value_1: Sinusoid
state_value_2: Square
state_value_3: Ramp

[Channel 1 Voltage]
datatype: DOUBLE
def_value: 0.1
unit: V
set_cmd: :SOUR1:VOLT
group: Channel 1
state_quant: Channel 1 Function
state_value_1: Sinusoid
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
state_value_5: Noise
state_value_6: ARB

[Channel 1 Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: :SOUR1:VOLT:OFFS
group: Channel 1

[Channel 1 Sample rate]
datatype: DOUBLE
def_value: 1E9
unit: Hz
set_cmd: :SOUR1:FUNC:ARB:SRAT
state_quant: Channel 1 Function
state_value_1: ARB
group: Channel 1

[Channel 1 Filter]
datatype: COMBO
def_value: Step
combo_def_1: Normal
combo_def_2: Step
combo_def_3: Off
cmd_def_1: NORM
cmd_def_2: STEP
cmd_def_3: OFF
set_cmd: :SOUR1:FUNC:ARB:FILT
state_quant: Channel 1 Function
state_value_1: ARB
group: Channel 1

[Channel 1 Duty cycle]
datatype: DOUBLE
def_value: 50
unit: %
set_cmd: :SOUR1:FUNC:SQU:DCYC
state_quant: Channel 1 Function
state_value_1: Square
group: Channel 1

[Channel 1 Ramp symmetry]
datatype: DOUBLE
def_value: 50
unit: %
set_cmd: :SOUR1:FUNC:RAMP:SYMM
state_quant: Channel 1 Function
state_value_1: Ramp
group: Channel 1

[Channel 1 Pulse period]
datatype: DOUBLE
def_value: 1E-3
unit: s
set_cmd: :SOUR1:PULS:PER
state_quant: Channel 1 Function
state_value_1: Pulse
group: Channel 1

[Channel 1 Pulse width]
datatype: DOUBLE
def_value: 1E-4
unit: s
set_cmd: :SOUR1:PULS:WIDT
state_quant: Channel 1 Function
state_value_1: Pulse
group: Channel 1

[Channel 1 Pulse transition]
datatype: DOUBLE
def_value: 5E-9
unit: s
set_cmd: :SOUR1:FUNC:PULS:TRAN
state_quant: Channel 1 Function
state_value_1: Pulse
group: Channel 1

# Channel 2
[Channel 2 Function]
datatype: COMBO
def_value: Sinusoid
combo_def_1: Sinusoid
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: Pulse
combo_def_5: Noise
combo_def_6: DC
combo_def_7: ARB
cmd_def_1: SIN
cmd_def_2: SQU
cmd_def_3: RAMP
cmd_def_4: PULS
cmd_def_5: NOIS
cmd_def_6: DC
cmd_def_7: ARB
set_cmd: :SOUR2:FUNC
group: Channel 2

[Channel 2 Frequency]
datatype: DOUBLE
def_value: 1E3
unit: Hz
set_cmd: :SOUR2:FREQ
group: Channel 2
state_quant: Channel 2 Function
state_value_1: Sinusoid
state_value_2: Square
state_value_3: Ramp

[Channel 2 Voltage]
datatype: DOUBLE
def_value: 0.1
unit: V
set_cmd: :SOUR2:VOLT
group: Channel 2
state_quant: Channel 1 Function
state_value_1: Sinusoid
state_value_2: Square
state_value_3: Ramp
state_value_4: Pulse
state_value_5: Noise
state_value_6: ARB

[Channel 2 Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: :SOUR2:VOLT:OFFS
group: Channel 2

[Channel 2 Sample rate]
datatype: DOUBLE
def_value: 1E9
unit: Hz
set_cmd: :SOUR2:FUNC:ARB:SRAT
state_quant: Channel 2 Function
state_value_1: ARB
group: Channel 2

[Channel 2 Filter]
datatype: COMBO
def_value: Step
combo_def_1: Normal
combo_def_2: Step
combo_def_3: Off
cmd_def_1: NORM
cmd_def_2: STEP
cmd_def_3: OFF
set_cmd: :SOUR2:FUNC:ARB:FILT
state_quant: Channel 2 Function
state_value_1: ARB
group: Channel 2

[Channel 2 Duty cycle]
datatype: DOUBLE
def_value: 50
unit: %
set_cmd: :SOUR2:FUNC:SQU:DCYC
state_quant: Channel 2 Function
state_value_1: Square
group: Channel 2

[Channel 2 Ramp symmetry]
datatype: DOUBLE
def_value: 50
unit: %
set_cmd: :SOUR2:FUNC:RAMP:SYMM
state_quant: Channel 2 Function
state_value_1: Ramp
group: Channel 2

[Channel 2 Pulse period]
datatype: DOUBLE
def_value: 1E-3
unit: s
set_cmd: :SOUR2:PULS:PER
state_quant: Channel 2 Function
state_value_1: Pulse
group: Channel 2

[Channel 2 Pulse width]
datatype: DOUBLE
def_value: 1E-4
unit: s
set_cmd: :SOUR2:PULS:WIDT
state_quant: Channel 2 Function
state_value_1: Pulse
group: Channel 2

[Channel 2 Pulse transition]
datatype: DOUBLE
def_value: 5E-9
unit: s
set_cmd: :SOUR2:FUNC:PULS:TRAN
state_quant: Channel 2 Function
state_value_1: Pulse
group: Channel 2

[Channel 1 Output enabled]
datatype: BOOLEAN
def_value: 1
set_cmd: :OUTP1
group: Output

[Channel 1 Output load]
datatype: COMBO
def_value: 50 Ohm
combo_def_1: 50 Ohm
combo_def_2: 10 kOhm
cmd_def_1: +5.0000000000000E+01
cmd_def_2: +1.0000000000000E+04
set_cmd: :OUTP1:LOAD
group: Output

[Channel 1 Output polarity]
datatype: COMBO
def_value: Normal
combo_def_1: Normal
combo_def_2: Inverted
cmd_def_1: NORM
cmd_def_2: INV
set_cmd: :OUTP1:POL
group: Output

[Channel 2 Output enabled]
datatype: BOOLEAN
def_value: 1
set_cmd: :OUTP2
group: Output

[Channel 2 Output load]
datatype: COMBO
def_value: 50 Ohm
combo_def_1: 50 Ohm
combo_def_2: 10 kOhm
cmd_def_1: +5.0000000000000E+01
cmd_def_2: +1.0000000000000E+04
set_cmd: :OUTP2:LOAD
group: Output

[Channel 2 Output polarity]
datatype: COMBO
def_value: Normal
combo_def_1: Normal
combo_def_2: Inverted
cmd_def_1: NORM
cmd_def_2: INV
set_cmd: :OUTP2:POL
group: Output

[Output sync]
datatype: BOOLEAN
def_value: 1
set_cmd: :OUTP:SYNC
group: Output

[Output trigger]
datatype: BOOLEAN
def_value: 0
set_cmd: :OUTP:TRIG
group: Output


[Output trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: :OUTP:TRIG:SLOP
group: Output


[Channel 1 Arb. Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s

[Channel 2 Arb. Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s

# Channel 1 modulation
[Channel 1 Burst - Enabled]
datatype: BOOLEAN
def_value: 0
set_cmd: SOUR1:BURS:STAT
group: Burst mode
section: Modulation channel 1

[Channel 1 Burst - Phase]
datatype: DOUBLE
def_value: 0.0
unit: deg
set_cmd: UNIT:ANGLE DEG;:SOUR1:BURS:PHAS
state_quant: Channel 1 Burst - Enabled
state_value_1: 1
group: Burst mode
section: Modulation channel 1

[Channel 1 Burst - Mode]
datatype: COMBO
def_value: Triggered
combo_def_1: Triggered
combo_def_2: Gated
cmd_def_1: TRIG
cmd_def_2: GAT
set_cmd: SOUR1:BURS:MODE
state_quant: Channel 1 Burst - Enabled
state_value_1: 1
group: Burst mode
section: Modulation channel 1

[Channel 1 Burst - Gate polarity]
datatype: COMBO
def_value: Normal
combo_def_1: Normal
combo_def_2: Inverted
cmd_def_1: NORM
cmd_def_2: INV
set_cmd: SOUR1:BURS:GATE:POL
state_quant: Channel 1 Burst - Mode
state_value_1: Gated
group: Burst mode
section: Modulation channel 1

[Channel 1 Burst - # of cycles]
datatype: DOUBLE
def_value: 1
set_cmd: SOUR1:BURS:NCYC
state_quant: Channel 1 Burst - Mode
state_value_1: Triggered
group: Burst mode
section: Modulation channel 1

[Channel 1 Trig source]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
combo_def_3: Manual
combo_def_4: Timer
cmd_def_1: IMM
cmd_def_2: EXT
cmd_def_3: BUS
cmd_def_4: TIM
set_cmd: :TRIG1:SOUR
state_quant: Channel 1 Burst - Mode
state_value_1: Triggered
group: Burst mode
section: Modulation channel 1

[Channel 1 Trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: :TRIG1:SLOP
state_quant: Channel 1 Trig source
state_value_1: External
group: Burst mode
section: Modulation channel 1

[Channel 1 Trig interval]
datatype: DOUBLE
def_value: 0.0
unit: s
set_cmd: SOUR1:BURS:INT:PER
state_quant: Channel 1 Trig source
state_value_1: Internal
group: Burst mode
section: Modulation channel 1

[Channel 1 Trig delay]
datatype: DOUBLE
def_value: 0.0
unit: s
set_cmd: :TRIG1:DELAY
state_quant: Channel 1 Burst - Mode
state_value_1: Triggered
group: Burst mode
section: Modulation channel 1

[Channel 1 Timer]
datatype: DOUBLE
low_lim: 1E-6
high_lim: 8
def_value: 10E-6
unit: s
set_cmd: :TRIG1:TIM
state_quant: Channel 1 Trig source
state_value_1: Timer
group: Burst mode
section: Modulation channel 1

[Channel 1 AM - Enabled]
datatype: BOOLEAN
def_value: 0
set_cmd: SOUR1:AM:STAT
group: AM
section: Modulation channel 1

[Channel 1 AM - Depth]
datatype: DOUBLE
def_value: 100
unit: %
set_cmd: SOUR1:AM:DEPT
state_quant: Channel 1 AM - Enabled
state_value_1: 1
group: AM
section: Modulation channel 1

[Channel 1 AM - Source]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
cmd_def_1: INT
cmd_def_2: EXT
set_cmd: SOUR1:AM:SOUR
state_quant: Channel 1 AM - Enabled
state_value_1: 1
group: AM
section: Modulation channel 1

[Channel 1 AM - Internal]
datatype: COMBO
def_value: Sinusoid
combo_def_1: Sinusoid
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: NRamp
combo_def_5: Triangle
combo_def_6: Noise
combo_def_7: User
cmd_def_1: SIN
cmd_def_2: SQU
cmd_def_3: RAMP
cmd_def_4: NRAM
cmd_def_5: TRI
cmd_def_6: NOIS
cmd_def_7: USER
set_cmd: SOUR1:AM:INT:FUNC
state_quant: Channel 1 AM - Source
state_value_1: Internal
group: AM
section: Modulation channel 1

[Channel 1 AM - Frequency]
datatype: DOUBLE
def_value: 1E2
unit: Hz
set_cmd: SOUR1:AM:INT:FREQ
state_quant: Channel 1 AM - Source
state_value_1: Internal
group: AM
section: Modulation channel 1

[Channel 1 FM - Enabled]
datatype: BOOLEAN
def_value: 0
set_cmd: SOUR1:FM:STAT
group: FM
section: Modulation channel 1

[Channel 1 FM - Deviation]
datatype: DOUBLE
def_value: 100
unit: Hz
set_cmd: SOUR1:FM:DEV
state_quant: Channel 1 FM - Enabled
state_value_1: 1
group: FM
section: Modulation channel 1

[Channel 1 FM - Source]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
cmd_def_1: INT
cmd_def_2: EXT
set_cmd: SOUR1:FM:SOUR
state_quant: Channel 1 FM - Enabled
state_value_1: 1
group: FM
section: Modulation channel 1

[Channel 1 FM - Internal]
datatype: COMBO
def_value: Sinusoid
combo_def_1: Sinusoid
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: NRamp
combo_def_5: Triangle
combo_def_6: Noise
combo_def_7: User
cmd_def_1: SIN
cmd_def_2: SQU
cmd_def_3: RAMP
cmd_def_4: NRAM
cmd_def_5: TRI
cmd_def_6: NOIS
cmd_def_7: USER
set_cmd: SOUR1:FM:INT:FUNC
state_quant: Channel 1 FM - Source
state_value_1: Internal
group: FM
section: Modulation channel 1

[Channel 1 FM - Frequency]
datatype: DOUBLE
def_value: 10
unit: Hz
set_cmd: SOUR1:FM:INT:FREQ
state_quant: Channel 1 FM - Source
state_value_1: Internal
group: FM
section: Modulation channel 1

# Channel 2 modulation
[Channel 2 Burst - Enabled]
datatype: BOOLEAN
def_value: 0
set_cmd: SOUR2:BURS:STAT
group: Burst mode
section: Modulation channel 2

[Channel 2 Burst - Phase]
datatype: DOUBLE
def_value: 0.0
unit: deg
set_cmd: UNIT:ANGLE DEG;:SOUR2:BURS:PHAS
state_quant: Channel 2 Burst - Enabled
state_value_1: 1
group: Burst mode
section: Modulation channel 2

[Channel 2 Burst - Mode]
datatype: COMBO
def_value: Triggered
combo_def_1: Triggered
combo_def_2: Gated
cmd_def_1: TRIG
cmd_def_2: GAT
set_cmd: SOUR2:BURS:MODE
state_quant: Channel 2 Burst - Enabled
state_value_1: 1
group: Burst mode
section: Modulation channel 2

[Channel 2 Burst - Gate polarity]
datatype: COMBO
def_value: Normal
combo_def_1: Normal
combo_def_2: Inverted
cmd_def_1: NORM
cmd_def_2: INV
set_cmd: SOUR2:BURS:GATE:POL
state_quant: Channel 2 Burst - Mode
state_value_1: Gated
group: Burst mode
section: Modulation channel 2

[Channel 2 Burst - # of cycles]
datatype: DOUBLE
def_value: 1
set_cmd: SOUR2:BURS:NCYC
state_quant: Channel 2 Burst - Mode
state_value_1: Triggered
group: Burst mode
section: Modulation channel 2

[Channel 2 Trig source]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
combo_def_3: Manual
combo_def_4: Timer
cmd_def_1: IMM
cmd_def_2: EXT
cmd_def_3: BUS
cmd_def_4: TIM
set_cmd: :TRIG2:SOUR
state_quant: Channel 2 Burst - Mode
state_value_1: Triggered
group: Burst mode
section: Modulation channel 2

[Channel 2 Trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: :TRIG2:SLOP
state_quant: Channel 2 Trig source
state_value_1: External
group: Burst mode
section: Modulation channel 2

[Channel 2 Trig interval]
datatype: DOUBLE
def_value: 0.0
unit: s
set_cmd: SOUR2:BURS:INT:PER
state_quant: Channel 2 Trig source
state_value_1: Internal
group: Burst mode
section: Modulation channel 2


[Channel 2 Trig delay]
datatype: DOUBLE
def_value: 0.0
unit: s
set_cmd: :TRIG2:DELAY
state_quant: Channel 2 Burst - Mode
state_value_1: Triggered
group: Burst mode
section: Modulation channel 2

[Channel 2 Timer]
datatype: DOUBLE
low_lim: 1E-6
high_lim: 8
def_value: 10E-6
unit: s
set_cmd: :TRIG2:TIM
state_quant: Channel 2 Trig source
state_value_1: Timer
group: Burst mode
section: Modulation channel 2

[Channel 2 AM - Enabled]
datatype: BOOLEAN
def_value: 0
set_cmd: SOUR2:AM:STAT
group: AM
section: Modulation channel 2

[Channel 2 AM - Depth]
datatype: DOUBLE
def_value: 100
unit: %
set_cmd: SOUR2:AM:DEPT
state_quant: Channel 2 AM - Enabled
state_value_1: 1
group: AM
section: Modulation channel 2

[Channel 2 AM - Source]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
cmd_def_1: INT
cmd_def_2: EXT
set_cmd: SOUR2:AM:SOUR
state_quant: Channel 2 AM - Enabled
state_value_1: 1
group: AM
section: Modulation channel 2

[Channel 2 AM - Internal]
datatype: COMBO
def_value: Sinusoid
combo_def_1: Sinusoid
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: NRamp
combo_def_5: Triangle
combo_def_6: Noise
combo_def_7: User
cmd_def_1: SIN
cmd_def_2: SQU
cmd_def_3: RAMP
cmd_def_4: NRAM
cmd_def_5: TRI
cmd_def_6: NOIS
cmd_def_7: USER
set_cmd: SOUR2:AM:INT:FUNC
state_quant: Channel 2 AM - Source
state_value_1: Internal
group: AM
section: Modulation channel 2

[Channel 2 AM - Frequency]
datatype: DOUBLE
def_value: 1E2
unit: Hz
set_cmd: SOUR2:AM:INT:FREQ
state_quant: Channel 2 AM - Source
state_value_1: Internal
group: AM
section: Modulation channel 2

[Channel 2 FM - Enabled]
datatype: BOOLEAN
def_value: 0
set_cmd: SOUR2:FM:STAT
group: FM
section: Modulation channel 2

[Channel 2 FM - Deviation]
datatype: DOUBLE
def_value: 100
unit: Hz
set_cmd: SOUR2:FM:DEV
state_quant: Channel 2 FM - Enabled
state_value_1: 1
group: FM
section: Modulation channel 2

[Channel 2 FM - Source]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
cmd_def_1: INT
cmd_def_2: EXT
set_cmd: SOUR2:FM:SOUR
state_quant: Channel 2 FM - Enabled
state_value_1: 1
group: FM
section: Modulation channel 2

[Channel 2 FM - Internal]
datatype: COMBO
def_value: Sinusoid
combo_def_1: Sinusoid
combo_def_2: Square
combo_def_3: Ramp
combo_def_4: NRamp
combo_def_5: Triangle
combo_def_6: Noise
combo_def_7: User
cmd_def_1: SIN
cmd_def_2: SQU
cmd_def_3: RAMP
cmd_def_4: NRAM
cmd_def_5: TRI
cmd_def_6: NOIS
cmd_def_7: USER
set_cmd: SOUR2:FM:INT:FUNC
state_quant: Channel 2 FM - Source
state_value_1: Internal
group: FM
section: Modulation channel 2

[Channel 2 FM - Frequency]
datatype: DOUBLE
def_value: 10
unit: Hz
set_cmd: SOUR2:FM:INT:FREQ
state_quant: Channel 2 FM - Source
state_value_1: Internal
group: FM
section: Modulation channel 2
