# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Keysight 3458A Multimeter
version: 1.0
interface: GPIB

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: 


[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: True

model_cmd: ID?
# List of models supported by this driver
model_str_1: 3458


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True
term_char = CR+LF

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: :SYST:ERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: TARM HOLD

# Final commands sent to the instrument when closing the driver
final: TARM AUTO

# Send Go-to-local over GPIB interface after closing instrument
gpib_go_to_local: True

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
[Function]
datatype: COMBO
def_value: Voltage DC
combo_def_1: Voltage DC
combo_def_2: Voltage AC
combo_def_3: Current DC
combo_def_4: Current AC
combo_def_5: Resistance (2-wire)
combo_def_6: Resistance (4-wire)
cmd_def_1: DCV
cmd_def_2: ACV
cmd_def_3: DCI
cmd_def_4: ACI
cmd_def_5: OHM
cmd_def_6: OHMF
set_cmd: FUNC
permission: WRITE

[Voltage]
datatype: DOUBLE
unit: V
permission: READ
get_cmd: TARM SGL
state_quant: Function
state_value_1: Voltage DC
state_value_2: Voltage AC

[Current]
datatype: DOUBLE
unit: A
permission: READ
get_cmd: TARM SGL
state_quant: Function
state_value_1: Current DC
state_value_2: Current AC

[Resistance]
datatype: DOUBLE
unit: Ohm
permission: READ
get_cmd: TARM SGL
state_quant: Function
state_value_1: Resistance (2-wire)
state_value_2: Resistance (4-wire)

[Auto-zero]
datatype: BOOLEAN
def_value: True
set_cmd: AZERO
state_quant: Function
state_value_1: Voltage DC
state_value_2: Current DC
state_value_3: Resistance (2-wire)

[Integration time (V_dc)]
datatype: COMBO
def_value: 10 ms
combo_def_1: 1 s
combo_def_2: 500 ms
combo_def_3: 100 ms
combo_def_4: 50 ms
combo_def_5: 10 ms
combo_def_6: 5 ms
combo_def_7: 1 ms
combo_def_8: 0.5 ms
combo_def_9: 0.1 ms
cmd_def_1: +6.00000000E+01
cmd_def_2: +3.00000000E+01
cmd_def_3: +6.00000000E+00
cmd_def_4: +3.00000000E+00
cmd_def_5: +599.998800E-03
cmd_def_6: +299.999400E-03
cmd_def_7: +59.9998800E-03
cmd_def_8: +29.9999400E-03
cmd_def_9: +5.99998800E-03
set_cmd: NPLC
state_quant: Function
state_value_1: Voltage DC

[Auto-range (V_dc)]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: ARANGE
group: Input config
state_quant: Function
state_value_1: Voltage DC

[Range (V_dc)]
datatype: COMBO
def_value: 10 V
combo_def_1: 1000 V
combo_def_2: 100 V
combo_def_3: 10 V
combo_def_4: 1 V
combo_def_5: 100 mV
cmd_def_1: +1.00000000E+03
cmd_def_2: +1.00000000E+02
cmd_def_3: +1.00000000E+01
cmd_def_4: +1.00000000E+00
cmd_def_5: +1.00000000E-01
set_cmd: RANGE
group: Input config
state_quant: Auto-range (V_dc)
state_value_1: Off



[Auto-range (V_ac)]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: ARANGE
group: Input config
state_quant: Function
state_value_1: Voltage AC

[Range (V_ac)]
datatype: COMBO
def_value: 10 V
combo_def_1: 1000 V
combo_def_2: 100 V
combo_def_3: 10 V
combo_def_4: 1 V
combo_def_5: 100 mV
combo_def_6: 10 mV
cmd_def_1: +1.00000000E+03
cmd_def_2: +1.00000000E+02
cmd_def_3: +1.00000000E+01
cmd_def_4: +1.00000000E+00
cmd_def_5: +1.00000000E-01
cmd_def_6: +1.00000000E-02
set_cmd: RANGE
group: Input config
state_quant: Auto-range (V_ac)
state_value_1: Off



# I DC
[Integration time (I_dc)]
datatype: COMBO
def_value: 10 ms
combo_def_1: 1 s
combo_def_2: 500 ms
combo_def_3: 100 ms
combo_def_4: 50 ms
combo_def_5: 10 ms
combo_def_6: 5 ms
combo_def_7: 1 ms
combo_def_8: 0.5 ms
combo_def_9: 0.1 ms
cmd_def_1: +6.00000000E+01
cmd_def_2: +3.00000000E+01
cmd_def_3: +6.00000000E+00
cmd_def_4: +3.00000000E+00
cmd_def_5: +599.998800E-03
cmd_def_6: +299.999400E-03
cmd_def_7: +59.9998800E-03
cmd_def_8: +29.9999400E-03
cmd_def_9: +5.99998800E-03
set_cmd: NPLC
state_quant: Function
state_value_1: Current DC

[Auto-range (I_dc)]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: ARANGE
group: Input config
state_quant: Function
state_value_1: Current DC

[Range (I_dc)]
datatype: COMBO
def_value: 100 mA
combo_def_1: 1 A
combo_def_2: 100 mA
combo_def_3: 10 mA
combo_def_4: 1 mA
combo_def_5: 100 uA
combo_def_6: 10 uA
combo_def_7: 1 uA
combo_def_8: 100 nA
cmd_def_1: +1.00000000E+00
cmd_def_2: +1.00000000E-01
cmd_def_3: +1.00000000E-02
cmd_def_4: +1.00000000E-03
cmd_def_5: +1.00000000E-04
cmd_def_6: +1.00000000E-05
cmd_def_7: +1.00000000E-06
cmd_def_8: +1.00000000E-07
set_cmd: RANGE
group: Input config
state_quant: Auto-range (I_dc)
state_value_1: Off


# I AC

[Auto-range (I_ac)]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: ARANGE
group: Input config
state_quant: Function
state_value_1: Current AC

[Range (I_ac)]
datatype: COMBO
def_value: 100 mA
combo_def_1: 1 A
combo_def_2: 100 mA
combo_def_3: 10 mA
combo_def_4: 1 mA
combo_def_5: 100 uA
cmd_def_1: +1.00000000E+00
cmd_def_2: +1.00000000E-01
cmd_def_3: +1.00000000E-02
cmd_def_4: +1.00000000E-03
cmd_def_5: +1.00000000E-04
set_cmd: RANGE
group: Input config
state_quant: Auto-range (I_ac)
state_value_1: Off



# R 2-wire
[Integration time (R-2w)]
datatype: COMBO
def_value: 10 ms
combo_def_1: 1 s
combo_def_2: 500 ms
combo_def_3: 100 ms
combo_def_4: 50 ms
combo_def_5: 10 ms
combo_def_6: 5 ms
combo_def_7: 1 ms
combo_def_8: 0.5 ms
combo_def_9: 0.1 ms
cmd_def_1: +6.00000000E+01
cmd_def_2: +3.00000000E+01
cmd_def_3: +6.00000000E+00
cmd_def_4: +3.00000000E+00
cmd_def_5: +599.998800E-03
cmd_def_6: +299.999400E-03
cmd_def_7: +59.9998800E-03
cmd_def_8: +29.9999400E-03
cmd_def_9: +5.99998800E-03
set_cmd: NPLC
state_quant: Function
state_value_1: Resistance (2-wire)

[Auto-range (R-2w)]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: ARANGE
group: Input config
state_quant: Function
state_value_1: Resistance (2-wire)

[Range (R-2w)]
datatype: COMBO
def_value: 1 MOhm
combo_def_1: 1 GOhm
combo_def_2: 100 MOhm
combo_def_3: 10 MOhm
combo_def_4: 1 MOhm
combo_def_5: 100 kOhm
combo_def_6: 10 kOhm
combo_def_7: 1 kOhm
combo_def_8: 100 Ohm
combo_def_9: 10 Ohm
cmd_def_1: +1.00000000E+09
cmd_def_2: +1.00000000E+08
cmd_def_3: +1.00000000E+07
cmd_def_4: +1.00000000E+06
cmd_def_5: +1.00000000E+05
cmd_def_6: +1.00000000E+04
cmd_def_7: +1.00000000E+03
cmd_def_8: +1.00000000E+02
cmd_def_9: +1.00000000E+01
set_cmd: RANGE
group: Input config
state_quant: Auto-range (R-2w)
state_value_1: Off

# R 4-wire
[Integration time (R-4w)]
datatype: COMBO
def_value: 10 ms
combo_def_1: 1 s
combo_def_2: 500 ms
combo_def_3: 100 ms
combo_def_4: 50 ms
combo_def_5: 10 ms
combo_def_6: 5 ms
combo_def_7: 1 ms
combo_def_8: 0.5 ms
combo_def_9: 0.1 ms
cmd_def_1: +6.00000000E+01
cmd_def_2: +3.00000000E+01
cmd_def_3: +6.00000000E+00
cmd_def_4: +3.00000000E+00
cmd_def_5: +599.998800E-03
cmd_def_6: +299.999400E-03
cmd_def_7: +59.9998800E-03
cmd_def_8: +29.9999400E-03
cmd_def_9: +5.99998800E-03
set_cmd: NPLC
state_quant: Function
state_value_1: Resistance (4-wire)

[Auto-range (R-4w)]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
set_cmd: ARANGE
group: Input config
state_quant: Function
state_value_1: Resistance (4-wire)

[Range (R-4w)]
datatype: COMBO
def_value: 1 MOhm
combo_def_1: 1 GOhm
combo_def_2: 100 MOhm
combo_def_3: 10 MOhm
combo_def_4: 1 MOhm
combo_def_5: 100 kOhm
combo_def_6: 10 kOhm
combo_def_7: 1 kOhm
combo_def_8: 100 Ohm
combo_def_9: 10 Ohm
cmd_def_1: +1.00000000E+09
cmd_def_2: +1.00000000E+08
cmd_def_3: +1.00000000E+07
cmd_def_4: +1.00000000E+06
cmd_def_5: +1.00000000E+05
cmd_def_6: +1.00000000E+04
cmd_def_7: +1.00000000E+03
cmd_def_8: +1.00000000E+02
cmd_def_9: +1.00000000E+01
set_cmd: RANGE
group: Input config
state_quant: Auto-range (R-4w)
state_value_1: Off

