[General settings]
name: Keysight B2961A Low Noise Power Source
version: 0.5
driver_path: Keysight_B2961A
[VISA settings]
use_visa: True
reset: True
query_instr_errors: False
error_bit_mask: 255
error_cmd: SYST:ERR:ALL?
init: *CLS
str_true: 1
str_false: 0
timeout: 5
[Output State]
datatype: COMBO
label: Output status
def_value: Off
combo_def_1: On
combo_def_2: Off
section: Source
permission: BOTH
show_in_measurement_dlg: False
set_cmd: OUTP <*>
get_cmd: OUTP?
cmd_def_1: 1
cmd_def_2: 0
[Source Function]
datatype: COMBO
label: Source function
def_value: Voltage
combo_def_1: Voltage
combo_def_2: Current
section: Source
state_quant: Output State
state_value_1: On
permission: BOTH
show_in_measurement_dlg: False
set_cmd: FUNC:MODE <*>
get_cmd: FUNC:MODE?
cmd_def_1: VOLT
cmd_def_2: CURR
[Source Function Shape]
datatype: COMBO
label: Source output type
def_value: DC (constant)
combo_def_1: DC (constant)
combo_def_2: Pulsed
section: Source
state_quant: Output State
state_value_1: On
permission: BOTH
show_in_measurement_dlg: False
set_cmd: FUNC <*>
get_cmd: FUNC?
cmd_def_1: DC
cmd_def_2: PULS
[Voltage Amplitude]
datatype: DOUBLE
label: Source Voltage
unit: V
def_value: 0
low_lim: -200
high_lim: 200
section: Source
state_quant: Source Function
state_value_1: Voltage
permission: BOTH
show_in_measurement_dlg: True
get_cmd: VOLT?
sweep_cmd: ***REPEAT SET*** 0.1
sweep_rate: 0.001
sweep_rate_low: 0
sweep_rate_high: 0.001
[Current Amplitude]
datatype: DOUBLE
label: Source Current
unit: A
def_value: 0
low_lim: -10.5
high_lim: 10.5
section: Source
state_quant: Source Function
state_value_1: Current
permission: BOTH
show_in_measurement_dlg: True
get_cmd: CURR?
sweep_cmd: ***REPEAT SET*** 0.1
sweep_rate: 0.001
sweep_rate_low: 0
sweep_rate_high: 0.001
[Measure Current]
datatype: BOOLEAN
label: Measure current?
def_value: True
section: Measurement
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SENS:FUNC:ON|OFF "CURR"
get_cmd: SENS:FUNC?
[Current Variable]
datatype: DOUBLE
label: Measured Current
unit: A
section: Measurement
state_quant: Measure Current
state_value_1: True
permission: READ
show_in_measurement_dlg: True
get_cmd: READ?
[Measure Voltage]
datatype: BOOLEAN
label: Measure Voltage?
def_value: True
section: Measurement
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SENS:FUNC:ON|OFF "VOLT"
get_cmd: SENS:FUNC?
[Voltage Variable]
datatype: DOUBLE
label: Measured Voltage
unit: V
section: Measurement
state_quant: Measure Voltage
state_value_1: True
permission: READ
show_in_measurement_dlg: True
get_cmd: READ?
[Measure Resistance]
datatype: BOOLEAN
label: Measure Resistance?
def_value: True
section: Measurement
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SENS:FUNC:ON|OFF "RES"
get_cmd: SENS:FUNC?
[Offset compensation]
datatype: BOOLEAN
label: Enable offset compensated resistance measurement?
def_value: False
section: Measurement
state_quant: Measure Resistance
state_value_1: True
permission: BOTH
[Resistance Variable]
datatype: DOUBLE
label: Measured Resistance
unit: Ohms
section: Measurement
state_quant: Measure Resistance
state_value_1: True
permission: READ
show_in_measurement_dlg: True
get_cmd: READ?
[Voltage Range Mode]
datatype: COMBO
label: Select voltage range mode
def_value: Manual
combo_def_1: Manual
combo_def_2: Automatic
section: Ranges
permission: BOTH
show_in_measurement_dlg: False
set_cmd: VOLT:RANG:AUTO <*>
get_cmd: VOLT:RANG:AUTO?
cmd_def_1: False
cmd_def_2: 1
[Voltage Manual Range]
datatype: DOUBLE
label: Specify expected highest voltage
unit: V
def_value: 0.21
tooltip: Instrument sets lowest range compatible with  value
low_lim: -210
high_lim: 210
section: Ranges
state_quant: Voltage Range Mode
state_value_1: Manual
permission: BOTH
show_in_measurement_dlg: False
set_cmd: VOLT:RANG <*>
get_cmd: VOLT:RANG?
[Current Range Mode]
datatype: COMBO
label: Select current range mode
def_value: Manual
combo_def_1: Manual
combo_def_2: Automatic
section: Ranges
permission: BOTH
show_in_measurement_dlg: False
set_cmd: CURR:RANG:AUTO <*>
get_cmd: CURR:RANG:AUTO?
cmd_def_1: 0
cmd_def_2: 1
[Current Manual Range]
datatype: DOUBLE
label: Specify expected highest current
unit: A
def_value: 1.05
tooltip: Instrument sets lowest range compatible with  value
low_lim: -10.5
high_lim: 10.5
section: Ranges
state_quant: Current Range Mode
state_value_1: Manual
permission: BOTH
show_in_measurement_dlg: False
set_cmd: CURR:RANG <*>
get_cmd: CURR:RANG?
[Measurement Speed Method]
datatype: COMBO
label: Specify how to set measurement speed
def_value: Aperture
combo_def_1: NPLC
combo_def_2: Aperture
group: Measurement Speed
section: Measurement
permission: WRITE
show_in_measurement_dlg: False
[Auto Aperture]
datatype: BOOLEAN
label: Automatically set measurement aperture?
def_value: False
group: Measurement Speed
section: Measurement
state_quant: Measurement Speed Method
state_value_1: Aperture
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SENS:CURR:APER:AUTO <*>
get_cmd: SENS:CURR:APER:AUTO?
[Manual Aperture]
datatype: DOUBLE
label: Measurement aperture time
unit: s
def_value: 0.1
low_lim: 8e-06
high_lim: 2
group: Measurement Speed
section: Measurement
state_quant: Auto Aperture
state_value_1: False
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SENS:CURR:APER <*>
get_cmd: SENS:CURR:APER?
[Auto NPLC]
datatype: BOOLEAN
label: Automatically set measurement speed?
def_value: False
group: Measurement Speed
section: Measurement
state_quant: Measurement Speed Method
state_value_1: NPLC
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SENS:CURR:NPLC:AUTO <*>
get_cmd: SENS:CURR:NPLC:AUTO?
[Manual NPLC]
datatype: DOUBLE
label: Number of powerline cycles to measure
unit: s
def_value: 0.1
low_lim: 0.0004
high_lim: 100
group: Measurement Speed
section: Measurement
state_quant: Auto NPLC
state_value_1: False
permission: BOTH
show_in_measurement_dlg: False
set_cmd: SENS:CURR:NPLC <*>
get_cmd: SENS:CURR:NPLC?
