# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Keysight PXI AWG

# The version string should be updated whenever changes are made to this config file
version: 1.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Keysight_PXI_AWG

# default interface and address
interface: PXI

# Define if the instrument can be hardware triggered
support_arm: True
support_hardware_loop: True


[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: M3201
model_str_2: M3202
model_str_3: M3300
model_str_4: M3302

# Check instrument model id at startup (True or False). Default is False
check_model: True




# General VISA settings for the instrument.
[VISA settings]

timeout = 1.0

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False


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
[Ch1 - Enabled]
label: Enabled
datatype: BOOLEAN
def_value: True
group: Channel 1
section: Channels
[Ch2 - Enabled]
label: Enabled
datatype: BOOLEAN
def_value: True
group: Channel 2
section: Channels
[Ch3 - Enabled]
label: Enabled
datatype: BOOLEAN
def_value: True
group: Channel 3
section: Channels
[Ch4 - Enabled]
label: Enabled
datatype: BOOLEAN
def_value: True
group: Channel 4
section: Channels

[Run]
datatype: BUTTON
show_in_measurement_dlg: True
group: Trigger
section: Trigger

[Trig I/O]
datatype: COMBO
def_value: Input
combo_def_1: Input
combo_def_2: Output
cmd_def_1: 1
cmd_def_2: 0
show_in_measurement_dlg: False
group: Trig I/O port
section: Trigger
[Trig Sync Mode]
datatype: COMBO
def_value: None
combo_def_1: None
combo_def_2: Ext/PXI 10 MHz
cmd_def_1: 0
cmd_def_2: 1
state_quant: Trig I/O
state_value_1: Input
show_in_measurement_dlg: False
group: Trig I/O port
section: Trigger

[Generate internal trigger]
datatype: BOOLEAN
def_value: False
group: Trigger
section: Trigger
show_in_measurement_dlg: False
tooltip: Use software trigger on the AWG channels

[Internal trigger time]
datatype: DOUBLE
def_value: 1E-3
low_lim: 800E-9
unit: s
state_quant: Generate internal trigger
state_value_1: True
group: Trigger
section: Trigger
show_in_measurement_dlg: False
tooltip: In step of 10 ns


[Ch1 - Marker Mode]
label: Marker Mode
datatype: COMBO
def_value: Disabled
combo_def_1: Disabled
combo_def_2: Waveform start
combo_def_3: Waveform start after waveform delay
combo_def_4: Every cycle
combo_def_5: End (not implemented)
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
section: Marker
group: Channel 1
show_in_measurement_dlg: False
[Ch1 - Marker External]
label: Marker External
datatype: BOOLEAN
def_value: False
section: Marker
group: Channel 1
state_quant: Ch1 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
show_in_measurement_dlg: False
[Ch1 - Marker Sync Mode]
label: Marker Sync Mode
datatype: COMBO
def_value: None
combo_def_1: None
combo_def_2: Ext/PXI 10 MHz
cmd_def_1: 0
cmd_def_2: 1
state_quant: Ch1 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
show_in_measurement_dlg: False
section: Marker
group: Channel 1
[Ch1 - Marker Value]
label: Marker Value
datatype: COMBO
def_value: Low
combo_def_1: Low
combo_def_2: High
cmd_def_1: 0
cmd_def_2: 1
state_quant: Ch1 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
show_in_measurement_dlg: False
section: Marker
group: Channel 1
[Ch1 - Marker Length]
label: Marker Length
datatype: DOUBLE
def_value: 100e-9
low_lim: 20e-9
unit: s
state_quant: Ch1 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
tooltip: Rounded to nearest multiple of 10ns
show_in_measurement_dlg: False
section: Marker
group: Channel 1
[Ch1 - Marker Delay]
label: Marker Delay
datatype: DOUBLE
def_value: 0
low_lim: 0
unit: s
state_quant: Ch1 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
tooltip: Rounded to nearest multiple of 10ns
show_in_measurement_dlg: False
section: Marker
group: Channel 1
[Ch1 - Marker PXI0]
label: Marker PXI0
datatype: BOOLEAN
def_value: False
state_quant: Ch1 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 1
show_in_measurement_dlg: False
[Ch1 - Marker PXI1]
label: Marker PXI1
datatype: BOOLEAN
def_value: False
state_quant: Ch1 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 1
show_in_measurement_dlg: False
[Ch1 - Marker PXI2]
label: Marker PXI2
datatype: BOOLEAN
def_value: False
state_quant: Ch1 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 1
show_in_measurement_dlg: False
[Ch1 - Marker PXI3]
label: Marker PXI3
datatype: BOOLEAN
def_value: False
state_quant: Ch1 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 1
show_in_measurement_dlg: False
[Ch1 - Marker PXI4]
label: Marker PXI4
datatype: BOOLEAN
def_value: False
state_quant: Ch1 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 1
show_in_measurement_dlg: False
[Ch1 - Marker PXI5]
label: Marker PXI5
datatype: BOOLEAN
def_value: False
state_quant: Ch1 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 1
show_in_measurement_dlg: False
[Ch1 - Marker PXI6]
label: Marker PXI6
datatype: BOOLEAN
def_value: False
state_quant: Ch1 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 1
show_in_measurement_dlg: False
[Ch1 - Marker PXI7]
label: Marker PXI7
datatype: BOOLEAN
def_value: False
state_quant: Ch1 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 1
show_in_measurement_dlg: False

[Ch2 - Marker Mode]
label: Marker Mode
datatype: COMBO
def_value: Disabled
combo_def_1: Disabled
combo_def_2: Waveform start
combo_def_3: Waveform start after waveform delay
combo_def_4: Every cycle
combo_def_5: End (not implemented)
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
section: Marker
group: Channel 2
show_in_measurement_dlg: False
[Ch2 - Marker External]
label: Marker External
datatype: BOOLEAN
def_value: False
section: Marker
group: Channel 2
state_quant: Ch2 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
show_in_measurement_dlg: False
[Ch2 - Marker Sync Mode]
label: Marker Sync Mode
datatype: COMBO
def_value: None
combo_def_1: None
combo_def_2: Ext/PXI 10 MHz
cmd_def_1: 0
cmd_def_2: 1
state_quant: Ch2 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
show_in_measurement_dlg: False
section: Marker
group: Channel 2
[Ch2 - Marker Value]
label: Marker Value
datatype: COMBO
def_value: Low
combo_def_1: Low
combo_def_2: High
cmd_def_1: 0
cmd_def_2: 1
state_quant: Ch2 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
show_in_measurement_dlg: False
section: Marker
group: Channel 2
[Ch2 - Marker Length]
label: Marker Length
datatype: DOUBLE
def_value: 100e-9
low_lim: 20e-9
unit: s
state_quant: Ch2 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
tooltip: Rounded to nearest multiple of 10ns
show_in_measurement_dlg: False
section: Marker
group: Channel 2
[Ch2 - Marker Delay]
label: Marker Delay
datatype: DOUBLE
def_value: 0
low_lim: 0
unit: s
state_quant: Ch2 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
tooltip: Rounded to nearest multiple of 10ns
show_in_measurement_dlg: False
section: Marker
group: Channel 2
[Ch2 - Marker PXI0]
label: Marker PXI0
datatype: BOOLEAN
def_value: False
state_quant: Ch2 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 2
show_in_measurement_dlg: False
[Ch2 - Marker PXI1]
label: Marker PXI1
datatype: BOOLEAN
def_value: False
state_quant: Ch2 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 2
show_in_measurement_dlg: False
[Ch2 - Marker PXI2]
label: Marker PXI2
datatype: BOOLEAN
def_value: False
state_quant: Ch2 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 2
show_in_measurement_dlg: False
[Ch2 - Marker PXI3]
label: Marker PXI3
datatype: BOOLEAN
def_value: False
state_quant: Ch2 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 2
show_in_measurement_dlg: False
[Ch2 - Marker PXI4]
label: Marker PXI4
datatype: BOOLEAN
def_value: False
state_quant: Ch2 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 2
show_in_measurement_dlg: False
[Ch2 - Marker PXI5]
label: Marker PXI5
datatype: BOOLEAN
def_value: False
state_quant: Ch2 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 2
show_in_measurement_dlg: False
[Ch2 - Marker PXI6]
label: Marker PXI6
datatype: BOOLEAN
def_value: False
state_quant: Ch2 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 2
show_in_measurement_dlg: False
[Ch2 - Marker PXI7]
label: Marker PXI7
datatype: BOOLEAN
def_value: False
state_quant: Ch2 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 2
show_in_measurement_dlg: False


[Ch3 - Marker Mode]
label: Marker Mode
datatype: COMBO
def_value: Disabled
combo_def_1: Disabled
combo_def_2: Waveform start
combo_def_3: Waveform start after waveform delay
combo_def_4: Every cycle
combo_def_5: End (not implemented)
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
section: Marker
group: Channel 3
show_in_measurement_dlg: False
[Ch3 - Marker External]
label: Marker External
datatype: BOOLEAN
def_value: False
section: Marker
group: Channel 3
state_quant: Ch3 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
show_in_measurement_dlg: False
[Ch3 - Marker Sync Mode]
label: Marker Sync Mode
datatype: COMBO
def_value: None
combo_def_1: None
combo_def_2: Ext/PXI 10 MHz
cmd_def_1: 0
cmd_def_2: 1
state_quant: Ch3 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
show_in_measurement_dlg: False
section: Marker
group: Channel 3
[Ch3 - Marker Value]
label: Marker Value
datatype: COMBO
def_value: Low
combo_def_1: Low
combo_def_2: High
cmd_def_1: 0
cmd_def_2: 1
state_quant: Ch3 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
show_in_measurement_dlg: False
section: Marker
group: Channel 3
[Ch3 - Marker Length]
label: Marker Length
datatype: DOUBLE
def_value: 100e-9
low_lim: 20e-9
unit: s
state_quant: Ch3 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
tooltip: Rounded to nearest multiple of 10ns
show_in_measurement_dlg: False
section: Marker
group: Channel 3
[Ch3 - Marker Delay]
label: Marker Delay
datatype: DOUBLE
def_value: 0
low_lim: 0
unit: s
state_quant: Ch3 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
tooltip: Rounded to nearest multiple of 10ns
show_in_measurement_dlg: False
section: Marker
group: Channel 3
[Ch3 - Marker PXI0]
label: Marker PXI0
datatype: BOOLEAN
def_value: False
state_quant: Ch3 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 3
show_in_measurement_dlg: False
[Ch3 - Marker PXI1]
label: Marker PXI1
datatype: BOOLEAN
def_value: False
state_quant: Ch3 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 3
show_in_measurement_dlg: False
[Ch3 - Marker PXI2]
label: Marker PXI2
datatype: BOOLEAN
def_value: False
state_quant: Ch3 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 3
show_in_measurement_dlg: False
[Ch3 - Marker PXI3]
label: Marker PXI3
datatype: BOOLEAN
def_value: False
state_quant: Ch3 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 3
show_in_measurement_dlg: False
[Ch3 - Marker PXI4]
label: Marker PXI4
datatype: BOOLEAN
def_value: False
state_quant: Ch3 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 3
show_in_measurement_dlg: False
[Ch3 - Marker PXI5]
label: Marker PXI5
datatype: BOOLEAN
def_value: False
state_quant: Ch3 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 3
show_in_measurement_dlg: False
[Ch3 - Marker PXI6]
label: Marker PXI6
datatype: BOOLEAN
def_value: False
state_quant: Ch3 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 3
show_in_measurement_dlg: False
[Ch3 - Marker PXI7]
label: Marker PXI7
datatype: BOOLEAN
def_value: False
state_quant: Ch3 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 3
show_in_measurement_dlg: False

[Ch4 - Marker Mode]
label: Marker Mode
datatype: COMBO
def_value: Disabled
combo_def_1: Disabled
combo_def_2: Waveform start
combo_def_3: Waveform start after waveform delay
combo_def_4: Every cycle
combo_def_5: End (not implemented)
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
section: Marker
group: Channel 4
show_in_measurement_dlg: False
[Ch4 - Marker External]
label: Marker External
datatype: BOOLEAN
def_value: False
section: Marker
group: Channel 4
state_quant: Ch4 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
show_in_measurement_dlg: False
[Ch4 - Marker Sync Mode]
label: Marker Sync Mode
datatype: COMBO
def_value: None
combo_def_1: None
combo_def_2: Ext/PXI 10 MHz
cmd_def_1: 0
cmd_def_2: 1
state_quant: Ch4 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
show_in_measurement_dlg: False
section: Marker
group: Channel 4
[Ch4 - Marker Value]
label: Marker Value
datatype: COMBO
def_value: Low
combo_def_1: Low
combo_def_2: High
cmd_def_1: 0
cmd_def_2: 1
state_quant: Ch4 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
show_in_measurement_dlg: False
section: Marker
group: Channel 4
[Ch4 - Marker Length]
label: Marker Length
datatype: DOUBLE
def_value: 100e-9
low_lim: 20e-9
unit: s
state_quant: Ch4 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
tooltip: Rounded to nearest multiple of 10ns
show_in_measurement_dlg: False
section: Marker
group: Channel 4
[Ch4 - Marker Delay]
label: Marker Delay
datatype: DOUBLE
def_value: 0
low_lim: 0
unit: s
state_quant: Ch4 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
tooltip: Rounded to nearest multiple of 10ns
show_in_measurement_dlg: False
section: Marker
group: Channel 4
[Ch4 - Marker PXI0]
label: Marker PXI0
datatype: BOOLEAN
def_value: False
state_quant: Ch4 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 4
show_in_measurement_dlg: False
[Ch4 - Marker PXI1]
label: Marker PXI1
datatype: BOOLEAN
def_value: False
state_quant: Ch4 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 4
show_in_measurement_dlg: False
[Ch4 - Marker PXI2]
label: Marker PXI2
datatype: BOOLEAN
def_value: False
state_quant: Ch4 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 4
show_in_measurement_dlg: False
[Ch4 - Marker PXI3]
label: Marker PXI3
datatype: BOOLEAN
def_value: False
state_quant: Ch4 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 4
show_in_measurement_dlg: False
[Ch4 - Marker PXI4]
label: Marker PXI4
datatype: BOOLEAN
def_value: False
state_quant: Ch4 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 4
show_in_measurement_dlg: False
[Ch4 - Marker PXI5]
label: Marker PXI5
datatype: BOOLEAN
def_value: False
state_quant: Ch4 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 4
show_in_measurement_dlg: False
[Ch4 - Marker PXI6]
label: Marker PXI6
datatype: BOOLEAN
def_value: False
state_quant: Ch4 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 4
show_in_measurement_dlg: False
[Ch4 - Marker PXI7]
label: Marker PXI7
datatype: BOOLEAN
def_value: False
state_quant: Ch4 - Marker Mode
state_value_1: Waveform start
state_value_2: Waveform start after waveform delay
state_value_3: Every cycle
state_value_4: End (not implemented)
section: Marker
group: Channel 4
show_in_measurement_dlg: False



[Ch1 - Function]
label: Function
datatype: COMBO
def_value: Sinusoid
combo_def_1: Sinusoid
combo_def_2: Triangle
combo_def_3: Square
combo_def_4: DC
combo_def_5: AWG
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 4
cmd_def_4: 5
cmd_def_5: 6
group: Channel 1
section: Channels
show_in_measurement_dlg: True
[Ch1 - Amplitude]
label: Amplitude
datatype: DOUBLE
def_value: 1.0
low_lim: -1.5
high_lim: 1.5
unit: V
state_quant: Ch1 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
state_value_4: AWG
state_value_5: DC
group: Channel 1
section: Channels
show_in_measurement_dlg: True
[Ch1 - Frequency]
label: Frequency
datatype: DOUBLE
def_value: 1E6
low_lim: 0
high_lim: 400E6
unit: Hz
state_quant: Ch1 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
group: Channel 1
section: Channels
show_in_measurement_dlg: True
[Ch1 - Phase]
label: Phase
datatype: DOUBLE
def_value: 0
low_lim: -360
high_lim: 360
unit: deg
state_quant: Ch1 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
group: Channel 1
section: Channels
show_in_measurement_dlg: False
[Ch1 - Offset]
label: Offset
datatype: DOUBLE
unit: V
state_quant: Ch1 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
state_value_4: AWG
state_value_5: DC
group: Channel 1
section: Channels
show_in_measurement_dlg: True
[Ch1 - Trig mode]
label: Trig mode
datatype: COMBO
def_value: Continuous
combo_def_1: Continuous
combo_def_2: Software
combo_def_3: External
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
state_quant: Ch1 - Function
state_value_1: AWG
group: Channel 1
section: Channels
show_in_measurement_dlg: False
[Ch1 - Cycles]
label: Cycles
def_value: 1
tooltip: Set number of cycles to zero to run infinitely
datatype: DOUBLE
group: Channel 1
section: Channels
state_quant: Ch1 - Trig mode
state_value_1: Software
state_value_2: External
show_in_measurement_dlg: False


[Ch2 - Function]
label: Function
datatype: COMBO
def_value: Sinusoid
combo_def_1: Sinusoid
combo_def_2: Triangle
combo_def_3: Square
combo_def_4: DC
combo_def_5: AWG
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 4
cmd_def_4: 5
cmd_def_5: 6
group: Channel 2
section: Channels
show_in_measurement_dlg: True
[Ch2 - Amplitude]
label: Amplitude
datatype: DOUBLE
def_value: 1.0
low_lim: -1.5
high_lim: 1.5
unit: V
state_quant: Ch2 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
state_value_4: AWG
state_value_5: DC
group: Channel 2
section: Channels
show_in_measurement_dlg: True
[Ch2 - Frequency]
label: Frequency
datatype: DOUBLE
def_value: 1E6
low_lim: 0
high_lim: 400E6
unit: Hz
state_quant: Ch2 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
group: Channel 2
section: Channels
show_in_measurement_dlg: True
[Ch2 - Phase]
label: Phase
datatype: DOUBLE
def_value: 0
low_lim: -360
high_lim: 360
unit: deg
state_quant: Ch2 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
group: Channel 2
section: Channels
show_in_measurement_dlg: False
[Ch2 - Offset]
label: Offset
datatype: DOUBLE
unit: V
state_quant: Ch2 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
state_value_4: AWG
state_value_5: DC
group: Channel 2
section: Channels
show_in_measurement_dlg: True
[Ch2 - Trig mode]
label: Trig mode
datatype: COMBO
def_value: Continuous
combo_def_1: Continuous
combo_def_2: Software
combo_def_3: External
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
state_quant: Ch2 - Function
state_value_1: AWG
group: Channel 2
section: Channels
show_in_measurement_dlg: False
[Ch2 - Cycles]
label: Cycles
def_value: 1
tooltip: Set number of cycles to zero to run infinitely
datatype: DOUBLE
group: Channel 2
section: Channels
state_quant: Ch2 - Trig mode
state_value_1: Software
state_value_2: External
show_in_measurement_dlg: False


[Ch3 - Function]
label: Function
datatype: COMBO
def_value: Sinusoid
combo_def_1: Sinusoid
combo_def_2: Triangle
combo_def_3: Square
combo_def_4: DC
combo_def_5: AWG
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 4
cmd_def_4: 5
cmd_def_5: 6
group: Channel 3
section: Channels
show_in_measurement_dlg: True
[Ch3 - Amplitude]
label: Amplitude
datatype: DOUBLE
def_value: 1.0
low_lim: -1.5
high_lim: 1.5
unit: V
state_quant: Ch3 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
state_value_4: AWG
state_value_5: DC
group: Channel 3
section: Channels
show_in_measurement_dlg: True
[Ch3 - Frequency]
label: Frequency
datatype: DOUBLE
def_value: 1E6
low_lim: 0
high_lim: 400E6
unit: Hz
state_quant: Ch3 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
group: Channel 3
section: Channels
show_in_measurement_dlg: True
[Ch3 - Phase]
label: Phase
datatype: DOUBLE
def_value: 0
low_lim: -360
high_lim: 360
unit: deg
state_quant: Ch3 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
group: Channel 3
section: Channels
show_in_measurement_dlg: False
[Ch3 - Offset]
label: Offset
datatype: DOUBLE
unit: V
state_quant: Ch3 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
state_value_4: AWG
state_value_5: DC
group: Channel 3
section: Channels
show_in_measurement_dlg: True
[Ch3 - Trig mode]
label: Trig mode
datatype: COMBO
def_value: Continuous
combo_def_1: Continuous
combo_def_2: Software
combo_def_3: External
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
state_quant: Ch3 - Function
state_value_1: AWG
group: Channel 3
section: Channels
show_in_measurement_dlg: False
[Ch3 - Cycles]
label: Cycles
def_value: 1
tooltip: Set number of cycles to zero to run infinitely
datatype: DOUBLE
group: Channel 3
section: Channels
state_quant: Ch3 - Trig mode
state_value_1: Software
state_value_2: External
show_in_measurement_dlg: False

[Ch4 - Function]
label: Function
datatype: COMBO
def_value: Sinusoid
combo_def_1: Sinusoid
combo_def_2: Triangle
combo_def_3: Square
combo_def_4: DC
combo_def_5: AWG
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 4
cmd_def_4: 5
cmd_def_5: 6
group: Channel 4
section: Channels
show_in_measurement_dlg: True
[Ch4 - Amplitude]
label: Amplitude
datatype: DOUBLE
def_value: 1.0
low_lim: -1.5
high_lim: 1.5
unit: V
state_quant: Ch4 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
state_value_4: AWG
state_value_5: DC
group: Channel 4
section: Channels
show_in_measurement_dlg: True
[Ch4 - Frequency]
label: Frequency
datatype: DOUBLE
def_value: 1E6
low_lim: 0
high_lim: 400E6
unit: Hz
state_quant: Ch4 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
group: Channel 4
section: Channels
show_in_measurement_dlg: True
[Ch4 - Phase]
label: Phase
datatype: DOUBLE
def_value: 0
low_lim: -360
high_lim: 360
unit: deg
state_quant: Ch4 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
group: Channel 4
section: Channels
show_in_measurement_dlg: False
[Ch4 - Offset]
label: Offset
datatype: DOUBLE
unit: V
state_quant: Ch4 - Function
state_value_1: Sinusoid
state_value_2: Triangle
state_value_3: Square
state_value_4: AWG
state_value_5: DC
group: Channel 4
section: Channels
show_in_measurement_dlg: True
[Ch4 - Trig mode]
label: Trig mode
datatype: COMBO
def_value: Continuous
combo_def_1: Continuous
combo_def_2: Software
combo_def_3: External
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
state_quant: Ch4 - Function
state_value_1: AWG
group: Channel 1
section: Channels
show_in_measurement_dlg: False
[Ch4 - Cycles]
label: Cycles
def_value: 1
tooltip: Set number of cycles to zero to run infinitely
datatype: DOUBLE
group: Channel 4
section: Channels
state_quant: Ch4 - Trig mode
state_value_1: Software
state_value_2: External
show_in_measurement_dlg: False


[Ch1 - External Trig Source]
label: External Trig Source
datatype: COMBO
def_value: External
combo_def_1: External
combo_def_2: PXI0
combo_def_3: PXI1
combo_def_4: PXI2
combo_def_5: PXI3
combo_def_6: PXI4
combo_def_7: PXI5
combo_def_8: PXI6
combo_def_9: PXI7
cmd_def_1: 0
cmd_def_2: 4000
cmd_def_3: 4001
cmd_def_4: 4002
cmd_def_5: 4003
cmd_def_6: 4004
cmd_def_7: 4005
cmd_def_8: 4006
cmd_def_9: 4007
group: Channel 1
section: Channels
state_quant: Ch1 - Trig mode
state_value_1: External
state_value_2: External (per cycle)
show_in_measurement_dlg: False
[Ch1 - External Trig Config]
label: External Trig Config
datatype: COMBO
def_value: Rise
combo_def_1: High
combo_def_2: Low
combo_def_3: Rise
combo_def_4: Fall
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
group: Channel 1
section: Channels
state_quant: Ch1 - Trig mode
state_value_1: External
state_value_2: External (per cycle)
show_in_measurement_dlg: False

[Ch2 - External Trig Source]
label: External Trig Source
datatype: COMBO
def_value: External
combo_def_1: External
combo_def_2: PXI0
combo_def_3: PXI1
combo_def_4: PXI2
combo_def_5: PXI3
combo_def_6: PXI4
combo_def_7: PXI5
combo_def_8: PXI6
combo_def_9: PXI7
cmd_def_1: 0
cmd_def_2: 4000
cmd_def_3: 4001
cmd_def_4: 4002
cmd_def_5: 4003
cmd_def_6: 4004
cmd_def_7: 4005
cmd_def_8: 4006
cmd_def_9: 4007
group: Channel 2
section: Channels
state_quant: Ch2 - Trig mode
state_value_1: External
state_value_2: External (per cycle)
show_in_measurement_dlg: False
[Ch2 - External Trig Config]
label: External Trig Config
datatype: COMBO
def_value: Rise
combo_def_1: High
combo_def_2: Low
combo_def_3: Rise
combo_def_4: Fall
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
group: Channel 2
section: Channels
state_quant: Ch2 - Trig mode
state_value_1: External
state_value_2: External (per cycle)
show_in_measurement_dlg: False

[Ch3 - External Trig Source]
label: External Trig Source
datatype: COMBO
def_value: External
combo_def_1: External
combo_def_2: PXI0
combo_def_3: PXI1
combo_def_4: PXI2
combo_def_5: PXI3
combo_def_6: PXI4
combo_def_7: PXI5
combo_def_8: PXI6
combo_def_9: PXI7
cmd_def_1: 0
cmd_def_2: 4000
cmd_def_3: 4001
cmd_def_4: 4002
cmd_def_5: 4003
cmd_def_6: 4004
cmd_def_7: 4005
cmd_def_8: 4006
cmd_def_9: 4007
group: Channel 3
section: Channels
state_quant: Ch3 - Trig mode
state_value_1: External
state_value_2: External (per cycle)
show_in_measurement_dlg: False
[Ch3 - External Trig Config]
label: External Trig Config
datatype: COMBO
def_value: Rise
combo_def_1: High
combo_def_2: Low
combo_def_3: Rise
combo_def_4: Fall
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
group: Channel 3
section: Channels
state_quant: Ch3 - Trig mode
state_value_1: External
state_value_2: External (per cycle)
show_in_measurement_dlg: False

[Ch4 - External Trig Source]
label: External Trig Source
datatype: COMBO
def_value: External
combo_def_1: External
combo_def_2: PXI0
combo_def_3: PXI1
combo_def_4: PXI2
combo_def_5: PXI3
combo_def_6: PXI4
combo_def_7: PXI5
combo_def_8: PXI6
combo_def_9: PXI7
cmd_def_1: 0
cmd_def_2: 4000
cmd_def_3: 4001
cmd_def_4: 4002
cmd_def_5: 4003
cmd_def_6: 4004
cmd_def_7: 4005
cmd_def_8: 4006
cmd_def_9: 4007
group: Channel 4
section: Channels
state_quant: Ch4 - Trig mode
state_value_1: External
state_value_2: External (per cycle)
show_in_measurement_dlg: False
[Ch4 - External Trig Config]
label: External Trig Config
datatype: COMBO
def_value: Rise
combo_def_1: High
combo_def_2: Low
combo_def_3: Rise
combo_def_4: Fall
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
group: Channel 4
section: Channels
state_quant: Ch4 - Trig mode
state_value_1: External
state_value_2: External (per cycle)
show_in_measurement_dlg: False

[Ch1 - Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
show_in_measurement_dlg: True

[Ch2 - Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms

[Ch3 - Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms

[Ch4 - Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
