# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Keysight PXI Digitizer FPGA Demod

# The version string should be updated whenever changes are made to this config file
version: 5

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Keysight_PXI_Digitizer_FPGA_Demod

# default interface and address
interface: PXI

# Define if the instrument can be hardware triggered
support_arm: True
support_hardware_loop: True


[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: M3100
model_str_2: M3102
model_str_3: M3300
model_str_4: M3302

# Check instrument model id at startup (True or False). Default is False
check_model: True




# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

timeout = 1.0

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
[FPGA Hardware]
label: FPGA output configuration 
datatype: COMBO
def_value: FPGA I/Q and signals
combo_def_1: Only signals
combo_def_2: FPGA I/Q and signals
combo_def_3: Only FPGA I/Q
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
group: Output configuration (need driver restart to take effect)
section: Acquisition
tooltip: If FPGA I/Q is enabled, provide I/Q signals on channel 1 and 2.

[Number of samples]
state_quant: FPGA Hardware
state_value_1: Only signals
state_value_2: FPGA I/Q and signals
datatype: DOUBLE
def_value: 1000
low_lim: 1
group: Acquisition
section: Acquisition
show_in_measurement_dlg: True

[Number of records]
datatype: DOUBLE
def_value: 1
low_lim: 1
#high_lim: 1024
group: Acquisition
section: Acquisition
show_in_measurement_dlg: True

[Number of averages]
datatype: DOUBLE
def_value: 1
low_lim: 1
group: Acquisition
section: Acquisition
show_in_measurement_dlg: True

[Trig I/O]
datatype: COMBO
def_value: Input
combo_def_1: Input
combo_def_2: Output
cmd_def_1: 1
cmd_def_2: 0
show_in_measurement_dlg: False
group: Trig I/O port
section: Trigger

[Trig Sync Mode]
datatype: COMBO
def_value: None
combo_def_1: None
combo_def_2: Ext/PXI 10 MHz
cmd_def_1: 0
cmd_def_2: 1
state_quant: Trig I/O
state_value_1: Input
show_in_measurement_dlg: False
group: Trig I/O port
section: Trigger

[Trig Mode]
datatype: COMBO
def_value: Immediate
combo_def_1: Immediate
combo_def_2: Software/HVI
combo_def_3: Digital trigger
combo_def_4: Analog channel
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
show_in_measurement_dlg: False
group: Trigger
section: Trigger

[External Trig Source]
datatype: COMBO
def_value: External
combo_def_1: External
combo_def_2: PXI0
combo_def_3: PXI1
combo_def_4: PXI2
combo_def_5: PXI3
combo_def_6: PXI4
combo_def_7: PXI5
combo_def_8: PXI6
combo_def_9: PXI7
cmd_def_1: 0
cmd_def_2: 4000
cmd_def_3: 4001
cmd_def_4: 4002
cmd_def_5: 4003
cmd_def_6: 4004
cmd_def_7: 4005
cmd_def_8: 4006
cmd_def_9: 4007
state_quant: Trig Mode
state_value_1: Digital trigger
group: Trigger
section: Trigger
show_in_measurement_dlg: False

[External Trig Config]
datatype: COMBO
def_value: Rise
combo_def_1: High
combo_def_2: Low
combo_def_3: Rise
combo_def_4: Fall
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
state_quant: Trig Mode
state_value_1: Digital trigger
group: Trigger
section: Trigger
show_in_measurement_dlg: False

[Analog Trig Channel]
datatype: COMBO
def_value: Channel 1
combo_def_1: Channel 1
combo_def_2: Channel 2
combo_def_3: Channel 3
combo_def_4: Channel 4
combo_def_5: Channel 5
combo_def_6: Channel 6
combo_def_7: Channel 7
combo_def_8: Channel 8
state_quant: Trig Mode
state_value_1: Analog channel
group: Trigger
section: Trigger
show_in_measurement_dlg: False

[Analog Trig Config]
datatype: COMBO
def_value: Rise
combo_def_1: Rise
combo_def_2: Fall
combo_def_3: Both
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
state_quant: Trig Mode
state_value_1: Analog channel
group: Trigger
section: Trigger
show_in_measurement_dlg: False

[Trig Threshold]
datatype: DOUBLE
unit: V
def_value: 0.1
low_lim: -10.0
high_lim: 10.0
state_quant: Trig Mode
state_value_1: Analog channel
group: Trigger
section: Trigger
show_in_measurement_dlg: False


[Trig Delay]
datatype: DOUBLE
unit: s
def_value: 0.0
low_lim: 0.0
high_lim: 10.0
group: Trigger
section: Trigger
show_in_measurement_dlg: False
state_quant: FPGA Hardware
state_value_1: Only signals


[Ch1 - Enabled]
label: Enabled
datatype: BOOLEAN
def_value: True
group: Channel 1
section: Channels
[Ch1 - Coupling]
label: Coupling
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
cmd_def_1: 0
cmd_def_2: 1
group: Channel 1
section: Channels
show_in_measurement_dlg: False
[Ch1 - Impedance]
label: Impedance
datatype: COMBO
def_value: 50 Ohm
combo_def_1: 50 Ohm
combo_def_2: High
cmd_def_1: 1
cmd_def_2: 0
group: Channel 1
section: Channels
show_in_measurement_dlg: False
[Ch1 - Range]
label: Range
datatype: COMBO
def_value: 2 V
combo_def_1: 4 V
combo_def_2: 2 V
combo_def_3: 1 V
combo_def_4: 500 mV
combo_def_5: 250 mV
combo_def_6: 125 mV
combo_def_7: 62.5 mV
cmd_def_1: 4.0
cmd_def_2: 2.0
cmd_def_3: 1.0
cmd_def_4: 0.5
cmd_def_5: 0.25
cmd_def_6: 0.125
cmd_def_7: 0.0625
group: Channel 1
section: Channels
show_in_measurement_dlg: True

[Ch2 - Enabled]
label: Enabled
datatype: BOOLEAN
def_value: True
group: Channel 2
section: Channels
[Ch2 - Coupling]
label: Coupling
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
cmd_def_1: 0
cmd_def_2: 1
group: Channel 2
section: Channels
show_in_measurement_dlg: False
[Ch2 - Impedance]
label: Impedance
datatype: COMBO
def_value: 50 Ohm
combo_def_1: 50 Ohm
combo_def_2: High
cmd_def_1: 1
cmd_def_2: 0
group: Channel 2
section: Channels
show_in_measurement_dlg: False
[Ch2 - Range]
label: Range
datatype: COMBO
def_value: 2 V
combo_def_1: 4 V
combo_def_2: 2 V
combo_def_3: 1 V
combo_def_4: 500 mV
combo_def_5: 250 mV
combo_def_6: 125 mV
combo_def_7: 62.5 mV
cmd_def_1: 4.0
cmd_def_2: 2.0
cmd_def_3: 1.0
cmd_def_4: 0.5
cmd_def_5: 0.25
cmd_def_6: 0.125
cmd_def_7: 0.0625
group: Channel 2
section: Channels
show_in_measurement_dlg: True

[Ch3 - Enabled]
label: Enabled
datatype: BOOLEAN
def_value: True
group: Channel 3
section: Channels
[Ch3 - Coupling]
label: Coupling
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
cmd_def_1: 0
cmd_def_2: 1
group: Channel 3
section: Channels
show_in_measurement_dlg: False
[Ch3 - Impedance]
label: Impedance
datatype: COMBO
def_value: 50 Ohm
combo_def_1: 50 Ohm
combo_def_2: High
cmd_def_1: 1
cmd_def_2: 0
group: Channel 3
section: Channels
show_in_measurement_dlg: False
[Ch3 - Range]
label: Range
datatype: COMBO
def_value: 2 V
combo_def_1: 4 V
combo_def_2: 2 V
combo_def_3: 1 V
combo_def_4: 500 mV
combo_def_5: 250 mV
combo_def_6: 125 mV
combo_def_7: 62.5 mV
cmd_def_1: 4.0
cmd_def_2: 2.0
cmd_def_3: 1.0
cmd_def_4: 0.5
cmd_def_5: 0.25
cmd_def_6: 0.125
cmd_def_7: 0.0625
group: Channel 3
section: Channels
show_in_measurement_dlg: True

[Ch4 - Enabled]
label: Enabled
datatype: BOOLEAN
def_value: True
group: Channel 4
section: Channels
[Ch4 - Coupling]
label: Coupling
datatype: COMBO
def_value: DC
combo_def_1: DC
combo_def_2: AC
cmd_def_1: 0
cmd_def_2: 1
group: Channel 4
section: Channels
show_in_measurement_dlg: False
[Ch4 - Impedance]
label: Impedance
datatype: COMBO
def_value: 50 Ohm
combo_def_1: 50 Ohm
combo_def_2: High
cmd_def_1: 1
cmd_def_2: 0
group: Channel 4
section: Channels
show_in_measurement_dlg: False
[Ch4 - Range]
label: Range
datatype: COMBO
def_value: 2 V
combo_def_1: 4 V
combo_def_2: 2 V
combo_def_3: 1 V
combo_def_4: 500 mV
combo_def_5: 250 mV
combo_def_6: 125 mV
combo_def_7: 62.5 mV
cmd_def_1: 4.0
cmd_def_2: 2.0
cmd_def_3: 1.0
cmd_def_4: 0.5
cmd_def_5: 0.25
cmd_def_6: 0.125
cmd_def_7: 0.0625
group: Channel 4
section: Channels
show_in_measurement_dlg: True


[Skip time]
datatype: DOUBLE
unit: s
def_value: 40e-9
low_lim: 40e-9
group: Trigger
section: Demod control
show_in_measurement_dlg: True

[Integration time]
datatype: DOUBLE
unit: s
def_value: 2000e-9
low_lim: 0
group: Trigger
section: Demod control
show_in_measurement_dlg: True

[Use phase reference signal]
datatype: BOOLEAN
def_value: False
section: Demod control
group: Reference
tooltip: Use channel 3 as phase reference

[Hide I/Q]
label: Hide I/Q/REF values
datatype: BOOLEAN
def_value: True
section: Demod control
group: Advanced
tooltip: Showing diagnostic data will slow down the acquisition

[Convert data while streaming]
datatype: BOOLEAN
def_value: False
section: Demod control
group: Advanced
tooltip: If checked, conversion to floats will happen while acquiring data. Uncheck to maximize streaming speed.
state_quant: Hide I/Q
state_value_1: True

[LO freq 1]
datatype: DOUBLE
unit: Hz
def_value: 10e6
low_lim: -250e6
high_lim: 250e6
group: Demod 1
section: Demod control
show_in_measurement_dlg: True

[FPGA Voltage I, QB1]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 1
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot I, QB1]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 1
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage Q, QB1]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 1
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot Q, QB1]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 1
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage, QB1]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 1
section: Demod control
show_in_measurement_dlg: False
state_quant: FPGA Hardware
state_value_1: FPGA I/Q and signals
state_value_2: Only FPGA I/Q

[FPGA Single-shot, QB1]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 1
section: Demod control
show_in_measurement_dlg: False
state_quant: FPGA Hardware
state_value_1: FPGA I/Q and signals
state_value_2: Only FPGA I/Q

[FPGA Single-shot REF, QB1]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 1
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage NP, QB1]
datatype: DOUBLE
permission: READ
unit: V
group: Demod 1
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot NP, QB1]
datatype: VECTOR
permission: READ
unit: V
group: Demod 1
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[LO freq 2]
datatype: DOUBLE
unit: Hz
def_value: 10e6
low_lim: -200e6
high_lim: 200e6
group: Demod 2
section: Demod control
show_in_measurement_dlg: True

[FPGA Voltage I, QB2]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 2
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot I, QB2]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 2
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage Q, QB2]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 2
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot Q, QB2]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 2
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage, QB2]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 2
section: Demod control
show_in_measurement_dlg: False
state_quant: FPGA Hardware
state_value_1: FPGA I/Q and signals
state_value_2: Only FPGA I/Q


[FPGA Single-shot, QB2]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 2
section: Demod control
show_in_measurement_dlg: False
state_quant: FPGA Hardware
state_value_1: FPGA I/Q and signals
state_value_2: Only FPGA I/Q


[FPGA Single-shot REF, QB2]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 2
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage NP, QB2]
datatype: DOUBLE
permission: READ
unit: V
group: Demod 2
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot NP, QB2]
datatype: VECTOR
permission: READ
unit: V
group: Demod 2
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[LO freq 3]
datatype: DOUBLE
unit: Hz
def_value: 10e6
low_lim: -200e6
high_lim: 200e6
group: Demod 3
section: Demod control
show_in_measurement_dlg: True

[FPGA Voltage I, QB3]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 3
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot I, QB3]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 3
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage Q, QB3]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 3
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot Q, QB3]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 3
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage, QB3]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 3
section: Demod control
show_in_measurement_dlg: True
state_quant: FPGA Hardware
state_value_1: FPGA I/Q and signals
state_value_2: Only FPGA I/Q


[FPGA Single-shot, QB3]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 3
section: Demod control
show_in_measurement_dlg: False
state_quant: FPGA Hardware
state_value_1: FPGA I/Q and signals
state_value_2: Only FPGA I/Q

[FPGA Single-shot REF, QB3]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 1
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage NP, QB3]
datatype: DOUBLE
permission: READ
unit: V
group: Demod 3
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot NP, QB3]
datatype: VECTOR
permission: READ
unit: V
group: Demod 3
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[LO freq 4]
datatype: DOUBLE
unit: Hz
def_value: 10e6
low_lim: -200e6
high_lim: 200e6
group: Demod 4
section: Demod control
show_in_measurement_dlg: True

[FPGA Voltage I, QB4]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 4
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot I, QB4]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 4
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage Q, QB4]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 4
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot Q, QB4]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 4
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage, QB4]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 4
section: Demod control
show_in_measurement_dlg: False
state_quant: FPGA Hardware
state_value_1: FPGA I/Q and signals
state_value_2: Only FPGA I/Q


[FPGA Single-shot, QB4]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 4
section: Demod control
show_in_measurement_dlg: False
state_quant: FPGA Hardware
state_value_1: FPGA I/Q and signals
state_value_2: Only FPGA I/Q

[FPGA Single-shot REF, QB4]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 1
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage NP, QB4]
datatype: DOUBLE
permission: READ
unit: V
group: Demod 4
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot NP, QB4]
datatype: VECTOR
permission: READ
unit: V
group: Demod 4
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[LO freq 5]
datatype: DOUBLE
unit: Hz
def_value: 10e6
low_lim: -200e6
high_lim: 200e6
group: Demod 5
section: Demod control
show_in_measurement_dlg: True

[FPGA Voltage I, QB5]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 5
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot I, QB5]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 5
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage Q, QB5]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 5
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot Q, QB5]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 5
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage, QB5]
datatype: COMPLEX
permission: READ
unit: V
group: Demod 5
section: Demod control
show_in_measurement_dlg: False
state_quant: FPGA Hardware
state_value_1: FPGA I/Q and signals
state_value_2: Only FPGA I/Q


[FPGA Single-shot, QB5]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 5
section: Demod control
show_in_measurement_dlg: False
state_quant: FPGA Hardware
state_value_1: FPGA I/Q and signals
state_value_2: Only FPGA I/Q

[FPGA Single-shot REF, QB5]
datatype: VECTOR_COMPLEX
permission: READ
unit: V
group: Demod 1
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Voltage NP, QB5]
datatype: DOUBLE
permission: READ
unit: V
group: Demod 5
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False

[FPGA Single-shot NP, QB5]
datatype: VECTOR
permission: READ
unit: V
group: Demod 5
section: Demod control
show_in_measurement_dlg: False
state_quant: Hide I/Q
state_value_1: False



[Ch1 - Signal]
datatype: VECTOR
permission: READ
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
show_in_measurement_dlg: True
state_quant: Ch1 - Enabled
state_value_1: True

[Ch2 - Signal]
datatype: VECTOR
permission: READ
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
state_quant: Ch2 - Enabled
state_value_1: True

[Ch3 - Signal]
datatype: VECTOR
permission: READ
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
show_in_measurement_dlg: True
state_quant: Ch3 - Enabled
state_value_1: True

[Ch4 - Signal]
datatype: VECTOR
permission: READ
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
state_quant: Ch4 - Enabled
state_value_1: True


[Records per Buffer]
datatype: DOUBLE
tooltip: Number of traces transfered in one go from DAQ to computer
def_value: 500
low_lim: 1
section: Advanced
group: Advanced

