# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Keysight PXI LO

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Keysight_PXI_LO

# default interface and address
interface: PXI


[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: M9347A

# Check instrument model id at startup (True or False). Default is False
check_model: False

# Valid model strings returned by the instrument. Default value = model_str
# model_id_1:

# Check instrument options at startup (True or False). Default is False
check_options: False



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: :SYST:ERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: :SYST:ERR:SCPI ON;

# Final commands sent to the instrument when closing the driver
final: 


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
[Clock source]
datatype: COMBO
def_value: 19.2 GHz Clock
combo_def_1: 19.2 GHz Clock
combo_def_2: 4.8 GHz Clock
combo_def_3: 100 MHz Ref
cmd_def_1: CLKIN
cmd_def_2: CLKIN4800MHZ
cmd_def_3: REFIN100MHZ
set_cmd: :CLK:SOUR
group: Clock

[Reference out 1]
label: Reference out
datatype: COMBO
def_value: 19.2 GHz
combo_def_1: 19.2 GHz
combo_def_2: Off
cmd_def_1: REFOUT19200MHZ
cmd_def_2: OFF
set_cmd: :CLK:OUT
state_quant: Clock source
state_value_1: 19.2 GHz Clock
group: Clock

[Reference out 2]
label: Reference out
datatype: COMBO
def_value: 19.2 GHz
combo_def_1: 19.2 GHz
combo_def_2: 4.8 GHz
combo_def_3: Off
cmd_def_1: REFOUT19200MHZ
cmd_def_2: REFOUT4800MHZ
cmd_def_3: OFF
set_cmd: :CLK:OUT
state_quant: Clock source
state_value_1: 4.8 GHz Clock
group: Clock

[Reference out 3]
label: Reference out
datatype: COMBO
def_value: 19.2 GHz
combo_def_1: 19.2 GHz
combo_def_2: 4.8 GHz
combo_def_3: 100 MHz
combo_def_4: Off
cmd_def_1: REFOUT19200MHZ
cmd_def_2: REFOUT4800MHZ
cmd_def_3: REFOUT100MHZ
cmd_def_4: OFF
state_quant: Clock source
state_value_1: 100 MHz Ref
set_cmd: :CLK:OUT
group: Clock

[Frequency 1]
label: Frequency
unit: Hz
datatype: DOUBLE
def_value: 5.0E9
low_lim: 1E6
high_lim: 20E9
set_cmd: :DDS1:FREQ
group: Channel 1

[Power 1]
label: Power
unit: dBm
datatype: DOUBLE
low_lim: -10
high_lim: 0
def_value: 0
set_cmd: :DDS1:POW
group: Channel 1

[Phase 1]
label: Phase
unit: deg
datatype: DOUBLE
def_value: 0
set_cmd: :DDS1:PHAS
group: Channel 1

[Output 1]
label: Output
datatype: BOOLEAN
def_value: False
set_cmd: :DDS1:OUTP
group: Channel 1


[Output 2]
label: Output
datatype: BOOLEAN
def_value: False
set_cmd: :DDS2:OUTP
group: Channel 2

[Frequency 2]
label: Frequency
unit: Hz
datatype: DOUBLE
def_value: 5.0E9
low_lim: 1E6
high_lim: 20E9
set_cmd: :DDS2:FREQ
group: Channel 2

[Power 2]
label: Power
unit: dBm
datatype: DOUBLE
low_lim: -10
high_lim: 0
def_value: 0
set_cmd: :DDS2:POW
group: Channel 2

[Phase 2]
label: Phase
unit: deg
datatype: DOUBLE
def_value: 0
set_cmd: :DDS2:PHAS
group: Channel 2
