# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Lab Brick LMS Signal Synthesizer

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: LabBrick_LMS_Synthesizer
use_32bit_mode: True



[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: LMS

# Check instrument model id at startup (True or False). Default is False
check_model: False


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
[Frequency]
unit: Hz
datatype: DOUBLE
def_value: 5.0E9

[Power]
unit: dBm
datatype: DOUBLE
def_value: -30

[Output]
datatype: BOOLEAN
def_value: False

[Use internal reference]
datatype: BOOLEAN
def_value: True

[Internal pulse modulation]
datatype: BOOLEAN
def_value: False
group: Pulse modulation

[Pulse time]
unit: s
datatype: DOUBLE
def_value: 2E-3
state_quant: Internal pulse modulation
state_value_1: True
group: Pulse modulation

[Pulse period]
unit: s
datatype: DOUBLE
def_value: 10E-3
state_quant: Internal pulse modulation
state_value_1: True
group: Pulse modulation

[External pulse modulation]
datatype: BOOLEAN
def_value: False
group: Pulse modulation


