# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Lab Brick LSG Signal Generator

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: LabBrick_LSG_SignalGenerator
use_32bit_mode: True



[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: LSG

# Check instrument model id at startup (True or False). Default is False
check_model: False


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
[Frequency]
unit: Hz
datatype: DOUBLE
def_value: 5.0E9

[Power]
unit: dBm
datatype: DOUBLE
def_value: -30

[Output]
datatype: BOOLEAN
def_value: False

[Use internal reference]
datatype: BOOLEAN
def_value: True

