# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Lakeshore 475

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Lakeshore 475



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: True

# List of models supported by this driver
model_str_1: Lakeshore 475

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: MODEL475

check_options: True
option_cmd: UNIT?

option_id_1: 1
option_id_2: 2
option_id_3: 3
option_id_4: 4

option_str_1: Unit Gauss
option_str_2: Unit Tesla
option_str_3: Unit Oersted
option_str_4: Unit A/m

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init:

# Final commands sent to the instrument when closing the driver
final: 


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
[B-Field Gauss]
datatype: DOUBLE
get_cmd: RDGFIELD?
set_cmd: ANALOG 4,2,0,0,0,5;CSETP <*>
unit: G
option_value_1: Unit Gauss

[B-Field Tesla]
datatype: DOUBLE
get_cmd: RDGFIELD?
set_cmd: ANALOG 4,2,0,0,0,5;CSETP <*>
unit: T
option_value_1: Unit Tesla

[B-Field Oersted]
datatype: DOUBLE
get_cmd: RDGFIELD?
set_cmd: ANALOG 4,2,0,0,0,5;CSETP <*>
unit: Oe
option_value_1: Unit Oersted

[B-Field A/m]
datatype: DOUBLE
get_cmd: RDGFIELD?
set_cmd: ANALOG 4,2,0,0,0,5;CSETP <*>
unit: A/m
option_value_1: Unit A/m

[StopThreshold]
label: Stop when field is near setpoint
datatype: DOUBLE
def_value: 0.001
