# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Lakeshore 37xAC

# The version string should be updated whenever changes are made to this config file
version: 1.5

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: LakeShore_37xAC



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: True

model_id_1: MODEL370
model_id_2: MODEL372

model_str_1: Lakeshore 370AC
model_str_2: Lakeshore 372AC

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 3

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: 

# Use specific TCIPIP socket port
tcpip_specify_port: True

# TCPIP socket port
tcpip_port: 7777

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
# Channel 1

[Show Ch 1]
datatype: BOOLEAN
def_value: True
group: Ch 1

[Excitation Mode 1]
datatype: COMBO
def_value: Voltage
combo_def_1: Voltage
combo_def_2: Current
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 1
state_value_1: True
group: Ch 1

[Autorange 1]
datatype: COMBO
def_value: On
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 1
state_value_1: True
group: Ch 1

[Resistance Range 1]
datatype: COMBO
def_value: 200 Ohm
combo_def_1: 2.00 mOhm
combo_def_2: 6.32 mOhm
combo_def_3: 20.0 mOhm
combo_def_4: 63.2 mOhm
combo_def_5: 200 mOhm
combo_def_6: 632 mOhm
combo_def_7: 2.00 Ohm
combo_def_8: 6.32 Ohm
combo_def_9: 20.0 Ohm
combo_def_10: 63.2 Ohm
combo_def_11: 200 Ohm
combo_def_12: 632 Ohm
combo_def_13: 2.00 kOhm
combo_def_14: 6.32 kOhm
combo_def_15: 20.0 kOhm
combo_def_16: 63.2 kOhm
combo_def_17: 200 kOhm
combo_def_18: 632 kOhm
combo_def_19: 2.00 MOhm
combo_def_20: 6.32 MOhm
combo_def_21: 20.0 MOhm
combo_def_22: 63.2 MOhm
state_quant: Show Ch 1
state_value_1: True
group: Ch 1

[Current Range 1]
datatype: COMBO
def_value: 1.00 pA
combo_def_1: 1.00 pA
combo_def_2: 3.16 pA
combo_def_3: 10.0 pA
combo_def_4: 31.6 pA
combo_def_5: 100 pA
combo_def_6: 316 pA
combo_def_7: 1.00 nA
combo_def_8: 3.16 nA
combo_def_9: 10.0 nA
combo_def_10: 31.6 nA
combo_def_11: 100 nA
combo_def_12: 316 nA
combo_def_13: 1.00 uA
combo_def_14: 3.16 uA
combo_def_15: 10.0 uA
combo_def_16: 31.6 uA
combo_def_17: 100 uA
combo_def_18: 316 uA
combo_def_19: 1.00 mA
combo_def_20: 3.16 mA
combo_def_21: 10.0 mA
combo_def_22: 31.6 mA
state_quant: Excitation Mode 1
state_value_1: Current
group: Ch 1

[Voltage Range 1]
datatype: COMBO
def_value: 2.00 uV
combo_def_1: 2.00 uV
combo_def_2: 6.32 uV
combo_def_3: 20.0 uV
combo_def_4: 63.2 uV
combo_def_5: 200 uV
combo_def_6: 632 uV
combo_def_7: 2.00 mV
combo_def_8: 6.32 mV
combo_def_9: 20.0 mV
combo_def_10: 63.2 mV
combo_def_11: 200 mV
combo_def_12: 632 mV
state_quant: Excitation Mode 1
state_value_1: Voltage
group: Ch 1

[Filter 1]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 1
state_value_1: True
group: Ch 1

[Filter Settle Time 1]
datatype: DOUBLE
def_value: 6
unit: s
state_quant: Filter 1
state_value_1: On
group: Ch 1

[Filter Window 1]
datatype: DOUBLE
def_value: 10
unit: %
state_quant: Filter 1
state_value_1: On
group: Ch 1

[Temperature 1]
datatype: DOUBLE
permission: READ
unit: K
state_quant: Show Ch 1
state_value_1: True
group: Ch 1

[Resistance 1]
datatype: DOUBLE
permission: READ
unit: Ohm
state_quant: Show Ch 1
state_value_1: True
group: Ch 1

[Excitation Power 1]
datatype: DOUBLE
permission: READ
unit: W
state_quant: Show Ch 1
state_value_1: True
group: Ch 1


# Channel 2

[Show Ch 2]
datatype: BOOLEAN
def_value: True
group: Ch 2

[Excitation Mode 2]
datatype: COMBO
def_value: Voltage
combo_def_1: Voltage
combo_def_2: Current
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 2
state_value_1: True
group: Ch 2

[Autorange 2]
datatype: COMBO
def_value: On
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 2
state_value_1: True
group: Ch 2

[Resistance Range 2]
datatype: COMBO
def_value: 63.2 Ohm
combo_def_1: 2.00 mOhm
combo_def_2: 6.32 mOhm
combo_def_3: 20.0 mOhm
combo_def_4: 63.2 mOhm
combo_def_5: 200 mOhm
combo_def_6: 632 mOhm
combo_def_7: 2.00 Ohm
combo_def_8: 6.32 Ohm
combo_def_9: 20.0 Ohm
combo_def_10: 63.2 Ohm
combo_def_11: 200 Ohm
combo_def_12: 632 Ohm
combo_def_13: 2.00 kOhm
combo_def_14: 6.32 kOhm
combo_def_15: 20.0 kOhm
combo_def_16: 63.2 kOhm
combo_def_17: 200 kOhm
combo_def_18: 632 kOhm
combo_def_19: 2.00 MOhm
combo_def_20: 6.32 MOhm
combo_def_21: 20.0 MOhm
combo_def_22: 63.2 MOhm
state_quant: Show Ch 2
state_value_1: True
group: Ch 2

[Current Range 2]
datatype: COMBO
def_value: 1.00 pA
combo_def_1: 1.00 pA
combo_def_2: 3.16 pA
combo_def_3: 10.0 pA
combo_def_4: 31.6 pA
combo_def_5: 100 pA
combo_def_6: 316 pA
combo_def_7: 1.00 nA
combo_def_8: 3.16 nA
combo_def_9: 10.0 nA
combo_def_10: 31.6 nA
combo_def_11: 100 nA
combo_def_12: 316 nA
combo_def_13: 1.00 uA
combo_def_14: 3.16 uA
combo_def_15: 10.0 uA
combo_def_16: 31.6 uA
combo_def_17: 100 uA
combo_def_18: 316 uA
combo_def_19: 1.00 mA
combo_def_20: 3.16 mA
combo_def_21: 10.0 mA
combo_def_22: 31.6 mA
state_quant: Excitation Mode 2
state_value_1: Current
group: Ch 2

[Voltage Range 2]
datatype: COMBO
def_value: 2.00 uV
combo_def_1: 2.00 uV
combo_def_2: 6.32 uV
combo_def_3: 20.0 uV
combo_def_4: 63.2 uV
combo_def_5: 200 uV
combo_def_6: 632 uV
combo_def_7: 2.00 mV
combo_def_8: 6.32 mV
combo_def_9: 20.0 mV
combo_def_10: 63.2 mV
combo_def_11: 200 mV
combo_def_12: 632 mV
state_quant: Excitation Mode 2
state_value_1: Voltage
group: Ch 2

[Filter 2]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 2
state_value_1: True
group: Ch 2

[Filter Settle Time 2]
datatype: DOUBLE
def_value: 6
unit: s
state_quant: Filter 2
state_value_1: On
group: Ch 2

[Filter Window 2]
datatype: DOUBLE
def_value: 10
unit: %
state_quant: Filter 2
state_value_1: On
group: Ch 2

[Temperature 2]
datatype: DOUBLE
permission: READ
unit: K
state_quant: Show Ch 2
state_value_1: True
group: Ch 2

[Resistance 2]
datatype: DOUBLE
permission: READ
unit: Ohm
state_quant: Show Ch 2
state_value_1: True
group: Ch 2

[Excitation Power 2]
datatype: DOUBLE
permission: READ
unit: W
state_quant: Show Ch 2
state_value_1: True
group: Ch 2


# Channel 3

[Show Ch 3]
datatype: BOOLEAN
def_value: False
group: Ch 3

[Excitation Mode 3]
datatype: COMBO
def_value: Voltage
combo_def_1: Voltage
combo_def_2: Current
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 3
state_value_1: True
group: Ch 3

[Autorange 3]
datatype: COMBO
def_value: On
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 3
state_value_1: True
group: Ch 3

[Resistance Range 3]
datatype: COMBO
def_value: 63.2 Ohm
combo_def_1: 2.00 mOhm
combo_def_2: 6.32 mOhm
combo_def_3: 20.0 mOhm
combo_def_4: 63.2 mOhm
combo_def_5: 200 mOhm
combo_def_6: 632 mOhm
combo_def_7: 2.00 Ohm
combo_def_8: 6.32 Ohm
combo_def_9: 20.0 Ohm
combo_def_10: 63.2 Ohm
combo_def_11: 200 Ohm
combo_def_12: 632 Ohm
combo_def_13: 2.00 kOhm
combo_def_14: 6.32 kOhm
combo_def_15: 20.0 kOhm
combo_def_16: 63.2 kOhm
combo_def_17: 200 kOhm
combo_def_18: 632 kOhm
combo_def_19: 2.00 MOhm
combo_def_20: 6.32 MOhm
combo_def_21: 20.0 MOhm
combo_def_22: 63.2 MOhm
state_quant: Show Ch 3
state_value_1: True
group: Ch 3

[Current Range 3]
datatype: COMBO
def_value: 1.00 pA
combo_def_1: 1.00 pA
combo_def_2: 3.16 pA
combo_def_3: 10.0 pA
combo_def_4: 31.6 pA
combo_def_5: 100 pA
combo_def_6: 316 pA
combo_def_7: 1.00 nA
combo_def_8: 3.16 nA
combo_def_9: 10.0 nA
combo_def_10: 31.6 nA
combo_def_11: 100 nA
combo_def_12: 316 nA
combo_def_13: 1.00 uA
combo_def_14: 3.16 uA
combo_def_15: 10.0 uA
combo_def_16: 31.6 uA
combo_def_17: 100 uA
combo_def_18: 316 uA
combo_def_19: 1.00 mA
combo_def_20: 3.16 mA
combo_def_21: 10.0 mA
combo_def_22: 31.6 mA
state_quant: Excitation Mode 3
state_value_1: Current
group: Ch 3

[Voltage Range 3]
datatype: COMBO
def_value: 2.00 uV
combo_def_1: 2.00 uV
combo_def_2: 6.32 uV
combo_def_3: 20.0 uV
combo_def_4: 63.2 uV
combo_def_5: 200 uV
combo_def_6: 632 uV
combo_def_7: 2.00 mV
combo_def_8: 6.32 mV
combo_def_9: 20.0 mV
combo_def_10: 63.2 mV
combo_def_11: 200 mV
combo_def_12: 632 mV
state_quant: Excitation Mode 3
state_value_1: Voltage
group: Ch 3

[Filter 3]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 3
state_value_1: True
group: Ch 3

[Filter Settle Time 3]
datatype: DOUBLE
def_value: 6
unit: s
state_quant: Filter 3
state_value_1: On
group: Ch 3

[Filter Window 3]
datatype: DOUBLE
def_value: 10
unit: %
state_quant: Filter 3
state_value_1: On
group: Ch 3

[Temperature 3]
datatype: DOUBLE
permission: READ
unit: K
state_quant: Show Ch 3
state_value_1: True
group: Ch 3

[Resistance 3]
datatype: DOUBLE
permission: READ
unit: Ohm
state_quant: Show Ch 3
state_value_1: True
group: Ch 3

[Excitation Power 3]
datatype: DOUBLE
permission: READ
unit: W
state_quant: Show Ch 3
state_value_1: True
group: Ch 3


# Channel 4

[Show Ch 4]
datatype: BOOLEAN
def_value: False
group: Ch 4

[Excitation Mode 4]
datatype: COMBO
def_value: Voltage
combo_def_1: Voltage
combo_def_2: Current
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 4
state_value_1: True
group: Ch 4

[Autorange 4]
datatype: COMBO
def_value: On
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 4
state_value_1: True
group: Ch 4

[Resistance Range 4]
datatype: COMBO
def_value: 63.2 Ohm
combo_def_1: 2.00 mOhm
combo_def_2: 6.32 mOhm
combo_def_3: 20.0 mOhm
combo_def_4: 63.2 mOhm
combo_def_5: 200 mOhm
combo_def_6: 632 mOhm
combo_def_7: 2.00 Ohm
combo_def_8: 6.32 Ohm
combo_def_9: 20.0 Ohm
combo_def_10: 63.2 Ohm
combo_def_11: 200 Ohm
combo_def_12: 632 Ohm
combo_def_13: 2.00 kOhm
combo_def_14: 6.32 kOhm
combo_def_15: 20.0 kOhm
combo_def_16: 63.2 kOhm
combo_def_17: 200 kOhm
combo_def_18: 632 kOhm
combo_def_19: 2.00 MOhm
combo_def_20: 6.32 MOhm
combo_def_21: 20.0 MOhm
combo_def_22: 63.2 MOhm
state_quant: Show Ch 4
state_value_1: True
group: Ch 4

[Current Range 4]
datatype: COMBO
def_value: 1.00 pA
combo_def_1: 1.00 pA
combo_def_2: 3.16 pA
combo_def_3: 10.0 pA
combo_def_4: 31.6 pA
combo_def_5: 100 pA
combo_def_6: 316 pA
combo_def_7: 1.00 nA
combo_def_8: 3.16 nA
combo_def_9: 10.0 nA
combo_def_10: 31.6 nA
combo_def_11: 100 nA
combo_def_12: 316 nA
combo_def_13: 1.00 uA
combo_def_14: 3.16 uA
combo_def_15: 10.0 uA
combo_def_16: 31.6 uA
combo_def_17: 100 uA
combo_def_18: 316 uA
combo_def_19: 1.00 mA
combo_def_20: 3.16 mA
combo_def_21: 10.0 mA
combo_def_22: 31.6 mA
state_quant: Excitation Mode 4
state_value_1: Current
group: Ch 4

[Voltage Range 4]
datatype: COMBO
def_value: 2.00 uV
combo_def_1: 2.00 uV
combo_def_2: 6.32 uV
combo_def_3: 20.0 uV
combo_def_4: 63.2 uV
combo_def_5: 200 uV
combo_def_6: 632 uV
combo_def_7: 2.00 mV
combo_def_8: 6.32 mV
combo_def_9: 20.0 mV
combo_def_10: 63.2 mV
combo_def_11: 200 mV
combo_def_12: 632 mV
state_quant: Excitation Mode 4
state_value_1: Voltage
group: Ch 4

[Filter 4]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 4
state_value_1: True
group: Ch 4

[Filter Settle Time 4]
datatype: DOUBLE
def_value: 6
unit: s
state_quant: Filter 4
state_value_1: On
group: Ch 4

[Filter Window 4]
datatype: DOUBLE
def_value: 10
unit: %
state_quant: Filter 4
state_value_1: On
group: Ch 4

[Temperature 4]
datatype: DOUBLE
permission: READ
unit: K
state_quant: Show Ch 4
state_value_1: True
group: Ch 4

[Resistance 4]
datatype: DOUBLE
permission: READ
unit: Ohm
state_quant: Show Ch 4
state_value_1: True
group: Ch 4

[Excitation Power 4]
datatype: DOUBLE
permission: READ
unit: W
state_quant: Show Ch 4
state_value_1: True
group: Ch 4


# Channel 5

[Show Ch 5]
datatype: BOOLEAN
def_value: True
group: Ch 5

[Excitation Mode 5]
datatype: COMBO
def_value: Voltage
combo_def_1: Voltage
combo_def_2: Current
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 5
state_value_1: True
group: Ch 5

[Autorange 5]
datatype: COMBO
def_value: On
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 5
state_value_1: True
group: Ch 5

[Resistance Range 5]
datatype: COMBO
def_value: 63.2 Ohm
combo_def_1: 2.00 mOhm
combo_def_2: 6.32 mOhm
combo_def_3: 20.0 mOhm
combo_def_4: 63.2 mOhm
combo_def_5: 200 mOhm
combo_def_6: 632 mOhm
combo_def_7: 2.00 Ohm
combo_def_8: 6.32 Ohm
combo_def_9: 20.0 Ohm
combo_def_10: 63.2 Ohm
combo_def_11: 200 Ohm
combo_def_12: 632 Ohm
combo_def_13: 2.00 kOhm
combo_def_14: 6.32 kOhm
combo_def_15: 20.0 kOhm
combo_def_16: 63.2 kOhm
combo_def_17: 200 kOhm
combo_def_18: 632 kOhm
combo_def_19: 2.00 MOhm
combo_def_20: 6.32 MOhm
combo_def_21: 20.0 MOhm
combo_def_22: 63.2 MOhm
state_quant: Show Ch 5
state_value_1: True
group: Ch 5

[Current Range 5]
datatype: COMBO
def_value: 1.00 pA
combo_def_1: 1.00 pA
combo_def_2: 3.16 pA
combo_def_3: 10.0 pA
combo_def_4: 31.6 pA
combo_def_5: 100 pA
combo_def_6: 316 pA
combo_def_7: 1.00 nA
combo_def_8: 3.16 nA
combo_def_9: 10.0 nA
combo_def_10: 31.6 nA
combo_def_11: 100 nA
combo_def_12: 316 nA
combo_def_13: 1.00 uA
combo_def_14: 3.16 uA
combo_def_15: 10.0 uA
combo_def_16: 31.6 uA
combo_def_17: 100 uA
combo_def_18: 316 uA
combo_def_19: 1.00 mA
combo_def_20: 3.16 mA
combo_def_21: 10.0 mA
combo_def_22: 31.6 mA
state_quant: Excitation Mode 5
state_value_1: Current
group: Ch 5

[Voltage Range 5]
datatype: COMBO
def_value: 2.00 uV
combo_def_1: 2.00 uV
combo_def_2: 6.32 uV
combo_def_3: 20.0 uV
combo_def_4: 63.2 uV
combo_def_5: 200 uV
combo_def_6: 632 uV
combo_def_7: 2.00 mV
combo_def_8: 6.32 mV
combo_def_9: 20.0 mV
combo_def_10: 63.2 mV
combo_def_11: 200 mV
combo_def_12: 632 mV
state_quant: Excitation Mode 5
state_value_1: Voltage
group: Ch 5

[Filter 5]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 5
state_value_1: True
group: Ch 5

[Filter Settle Time 5]
datatype: DOUBLE
def_value: 6
unit: s
state_quant: Filter 5
state_value_1: On
group: Ch 5

[Filter Window 5]
datatype: DOUBLE
def_value: 10
unit: %
state_quant: Filter 5
state_value_1: On
group: Ch 5

[Temperature 5]
datatype: DOUBLE
permission: READ
unit: K
state_quant: Show Ch 5
state_value_1: True
group: Ch 5

[Resistance 5]
datatype: DOUBLE
permission: READ
unit: Ohm
state_quant: Show Ch 5
state_value_1: True
group: Ch 5

[Excitation Power 5]
datatype: DOUBLE
permission: READ
unit: W
state_quant: Show Ch 5
state_value_1: True
group: Ch 5


# Channel 6

[Show Ch 6]
datatype: BOOLEAN
def_value: True
group: Ch 6

[Excitation Mode 6]
datatype: COMBO
def_value: Voltage
combo_def_1: Voltage
combo_def_2: Current
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 6
state_value_1: True
group: Ch 6

[Autorange 6]
datatype: COMBO
def_value: On
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 6
state_value_1: True
group: Ch 6

[Resistance Range 6]
datatype: COMBO
def_value: 63.2 Ohm
combo_def_1: 2.00 mOhm
combo_def_2: 6.32 mOhm
combo_def_3: 20.0 mOhm
combo_def_4: 63.2 mOhm
combo_def_5: 200 mOhm
combo_def_6: 632 mOhm
combo_def_7: 2.00 Ohm
combo_def_8: 6.32 Ohm
combo_def_9: 20.0 Ohm
combo_def_10: 63.2 Ohm
combo_def_11: 200 Ohm
combo_def_12: 632 Ohm
combo_def_13: 2.00 kOhm
combo_def_14: 6.32 kOhm
combo_def_15: 20.0 kOhm
combo_def_16: 63.2 kOhm
combo_def_17: 200 kOhm
combo_def_18: 632 kOhm
combo_def_19: 2.00 MOhm
combo_def_20: 6.32 MOhm
combo_def_21: 20.0 MOhm
combo_def_22: 63.2 MOhm
state_quant: Show Ch 6
state_value_1: True
group: Ch 6

[Current Range 6]
datatype: COMBO
def_value: 1.00 pA
combo_def_1: 1.00 pA
combo_def_2: 3.16 pA
combo_def_3: 10.0 pA
combo_def_4: 31.6 pA
combo_def_5: 100 pA
combo_def_6: 316 pA
combo_def_7: 1.00 nA
combo_def_8: 3.16 nA
combo_def_9: 10.0 nA
combo_def_10: 31.6 nA
combo_def_11: 100 nA
combo_def_12: 316 nA
combo_def_13: 1.00 uA
combo_def_14: 3.16 uA
combo_def_15: 10.0 uA
combo_def_16: 31.6 uA
combo_def_17: 100 uA
combo_def_18: 316 uA
combo_def_19: 1.00 mA
combo_def_20: 3.16 mA
combo_def_21: 10.0 mA
combo_def_22: 31.6 mA
state_quant: Excitation Mode 6
state_value_1: Current
group: Ch 6

[Voltage Range 6]
datatype: COMBO
def_value: 2.00 uV
combo_def_1: 2.00 uV
combo_def_2: 6.32 uV
combo_def_3: 20.0 uV
combo_def_4: 63.2 uV
combo_def_5: 200 uV
combo_def_6: 632 uV
combo_def_7: 2.00 mV
combo_def_8: 6.32 mV
combo_def_9: 20.0 mV
combo_def_10: 63.2 mV
combo_def_11: 200 mV
combo_def_12: 632 mV
state_quant: Excitation Mode 6
state_value_1: Voltage
group: Ch 6

[Filter 6]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 6
state_value_1: True
group: Ch 6

[Filter Settle Time 6]
datatype: DOUBLE
def_value: 6
unit: s
state_quant: Filter 6
state_value_1: On
group: Ch 6

[Filter Window 6]
datatype: DOUBLE
def_value: 10
unit: %
state_quant: Filter 6
state_value_1: On
group: Ch 6

[Temperature 6]
datatype: DOUBLE
permission: READ
unit: K
state_quant: Show Ch 6
state_value_1: True
group: Ch 6

[Resistance 6]
datatype: DOUBLE
permission: READ
unit: Ohm
state_quant: Show Ch 6
state_value_1: True
group: Ch 6

[Excitation Power 6]
datatype: DOUBLE
permission: READ
unit: W
state_quant: Show Ch 6
state_value_1: True
group: Ch 6


# Channel 7

[Show Ch 7]
datatype: BOOLEAN
def_value: False
group: Ch 7

[Excitation Mode 7]
datatype: COMBO
def_value: Voltage
combo_def_1: Voltage
combo_def_2: Current
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 7
state_value_1: True
group: Ch 7

[Autorange 7]
datatype: COMBO
def_value: On
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 7
state_value_1: True
group: Ch 7

[Resistance Range 7]
datatype: COMBO
def_value: 63.2 Ohm
combo_def_1: 2.00 mOhm
combo_def_2: 6.32 mOhm
combo_def_3: 20.0 mOhm
combo_def_4: 63.2 mOhm
combo_def_5: 200 mOhm
combo_def_6: 632 mOhm
combo_def_7: 2.00 Ohm
combo_def_8: 6.32 Ohm
combo_def_9: 20.0 Ohm
combo_def_10: 63.2 Ohm
combo_def_11: 200 Ohm
combo_def_12: 632 Ohm
combo_def_13: 2.00 kOhm
combo_def_14: 6.32 kOhm
combo_def_15: 20.0 kOhm
combo_def_16: 63.2 kOhm
combo_def_17: 200 kOhm
combo_def_18: 632 kOhm
combo_def_19: 2.00 MOhm
combo_def_20: 6.32 MOhm
combo_def_21: 20.0 MOhm
combo_def_22: 63.2 MOhm
state_quant: Show Ch 7
state_value_1: True
group: Ch 7

[Current Range 7]
datatype: COMBO
def_value: 1.00 pA
combo_def_1: 1.00 pA
combo_def_2: 3.16 pA
combo_def_3: 10.0 pA
combo_def_4: 31.6 pA
combo_def_5: 100 pA
combo_def_6: 316 pA
combo_def_7: 1.00 nA
combo_def_8: 3.16 nA
combo_def_9: 10.0 nA
combo_def_10: 31.6 nA
combo_def_11: 100 nA
combo_def_12: 316 nA
combo_def_13: 1.00 uA
combo_def_14: 3.16 uA
combo_def_15: 10.0 uA
combo_def_16: 31.6 uA
combo_def_17: 100 uA
combo_def_18: 316 uA
combo_def_19: 1.00 mA
combo_def_20: 3.16 mA
combo_def_21: 10.0 mA
combo_def_22: 31.6 mA
state_quant: Excitation Mode 7
state_value_1: Current
group: Ch 7

[Voltage Range 7]
datatype: COMBO
def_value: 2.00 uV
combo_def_1: 2.00 uV
combo_def_2: 6.32 uV
combo_def_3: 20.0 uV
combo_def_4: 63.2 uV
combo_def_5: 200 uV
combo_def_6: 632 uV
combo_def_7: 2.00 mV
combo_def_8: 6.32 mV
combo_def_9: 20.0 mV
combo_def_10: 63.2 mV
combo_def_11: 200 mV
combo_def_12: 632 mV
state_quant: Excitation Mode 7
state_value_1: Voltage
group: Ch 7

[Filter 7]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 7
state_value_1: True
group: Ch 7

[Filter Settle Time 7]
datatype: DOUBLE
def_value: 6
unit: s
state_quant: Filter 7
state_value_1: On
group: Ch 7

[Filter Window 7]
datatype: DOUBLE
def_value: 10
unit: %
state_quant: Filter 7
state_value_1: On
group: Ch 7

[Temperature 7]
datatype: DOUBLE
permission: READ
unit: K
state_quant: Show Ch 7
state_value_1: True
group: Ch 7

[Resistance 7]
datatype: DOUBLE
permission: READ
unit: Ohm
state_quant: Show Ch 7
state_value_1: True
group: Ch 7

[Excitation Power 7]
datatype: DOUBLE
permission: READ
unit: W
state_quant: Show Ch 7
state_value_1: True
group: Ch 7


# Channel 8

[Show Ch 8]
datatype: BOOLEAN
def_value: False
group: Ch 8

[Excitation Mode 8]
datatype: COMBO
def_value: Voltage
combo_def_1: Voltage
combo_def_2: Current
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 8
state_value_1: True
group: Ch 8

[Autorange 8]
datatype: COMBO
def_value: On
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 8
state_value_1: True
group: Ch 8

[Resistance Range 8]
datatype: COMBO
def_value: 63.2 Ohm
combo_def_1: 2.00 mOhm
combo_def_2: 6.32 mOhm
combo_def_3: 20.0 mOhm
combo_def_4: 63.2 mOhm
combo_def_5: 200 mOhm
combo_def_6: 632 mOhm
combo_def_7: 2.00 Ohm
combo_def_8: 6.32 Ohm
combo_def_9: 20.0 Ohm
combo_def_10: 63.2 Ohm
combo_def_11: 200 Ohm
combo_def_12: 632 Ohm
combo_def_13: 2.00 kOhm
combo_def_14: 6.32 kOhm
combo_def_15: 20.0 kOhm
combo_def_16: 63.2 kOhm
combo_def_17: 200 kOhm
combo_def_18: 632 kOhm
combo_def_19: 2.00 MOhm
combo_def_20: 6.32 MOhm
combo_def_21: 20.0 MOhm
combo_def_22: 63.2 MOhm
state_quant: Show Ch 8
state_value_1: True
group: Ch 8

[Current Range 8]
datatype: COMBO
def_value: 1.00 pA
combo_def_1: 1.00 pA
combo_def_2: 3.16 pA
combo_def_3: 10.0 pA
combo_def_4: 31.6 pA
combo_def_5: 100 pA
combo_def_6: 316 pA
combo_def_7: 1.00 nA
combo_def_8: 3.16 nA
combo_def_9: 10.0 nA
combo_def_10: 31.6 nA
combo_def_11: 100 nA
combo_def_12: 316 nA
combo_def_13: 1.00 uA
combo_def_14: 3.16 uA
combo_def_15: 10.0 uA
combo_def_16: 31.6 uA
combo_def_17: 100 uA
combo_def_18: 316 uA
combo_def_19: 1.00 mA
combo_def_20: 3.16 mA
combo_def_21: 10.0 mA
combo_def_22: 31.6 mA
state_quant: Excitation Mode 8
state_value_1: Current
group: Ch 8

[Voltage Range 8]
datatype: COMBO
def_value: 2.00 uV
combo_def_1: 2.00 uV
combo_def_2: 6.32 uV
combo_def_3: 20.0 uV
combo_def_4: 63.2 uV
combo_def_5: 200 uV
combo_def_6: 632 uV
combo_def_7: 2.00 mV
combo_def_8: 6.32 mV
combo_def_9: 20.0 mV
combo_def_10: 63.2 mV
combo_def_11: 200 mV
combo_def_12: 632 mV
state_quant: Excitation Mode 8
state_value_1: Voltage
group: Ch 8

[Filter 8]
datatype: COMBO
def_value: Off
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
state_quant: Show Ch 8
state_value_1: True
group: Ch 8

[Filter Settle Time 8]
datatype: DOUBLE
def_value: 6
unit: s
state_quant: Filter 8
state_value_1: On
group: Ch 8

[Filter Window 8]
datatype: DOUBLE
def_value: 10
unit: %
state_quant: Filter 8
state_value_1: On
group: Ch 8

[Temperature 8]
datatype: DOUBLE
permission: READ
unit: K
state_quant: Show Ch 8
state_value_1: True
group: Ch 8

[Resistance 8]
datatype: DOUBLE
permission: READ
unit: Ohm
state_quant: Show Ch 8
state_value_1: True
group: Ch 8

[Excitation Power 8]
datatype: DOUBLE
permission: READ
unit: W
state_quant: Show Ch 8
state_value_1: True
group: Ch 8


# Configure Channel

[Apply Settings]
datatype: BUTTON
group: Configure Channel
section: Advanced settings

[Channel Number]
datatype: DOUBLE
low_lim: 1
high_lim: 8
def_value: 1
group: Configure Channel
section: Advanced settings

[Channel Enabled]
datatype: COMBO
def_value: On
combo_def_1: Off
combo_def_2: On
cmd_def_1: 0
cmd_def_2: 1
group: Configure Channel
section: Advanced settings

[Dwell Time]
datatype: DOUBLE
def_value: 7
unit: s
group: Configure Channel
section: Advanced settings

[Change Pause]
datatype: DOUBLE
def_value: 3
unit: s
group: Configure Channel
section: Advanced settings

[Curve Number (config)]
datatype: DOUBLE
low_lim: 0
high_lim: 20
def_value: 0
group: Configure Channel
section: Advanced settings

[Temperature Coefficient (config)]
datatype: COMBO
def_value: negative
combo_def_1: negative
combo_def_2: positive
cmd_def_1: 1
cmd_def_2: 2
group: Configure Channel
section: Advanced settings


# Upload Temperature Response Curve

[Upload Data]
datatype: BUTTON
group: Upload Temperature Response Curve
section: Advanced settings

[Path]
datatype: PATH
def_value: C:\Users\LD1-Log\Dropbox\Log data\Drivers\Lakeshore_37x/calib.txt
group: Upload Temperature Response Curve
section: Advanced settings

[Curve Number (upload)]
datatype: DOUBLE
low_lim: 1
high_lim: 20
def_value: 1
group: Upload Temperature Response Curve
section: Advanced settings

[Curve Name]
datatype: STRING
def_value: User Curve xx
group: Upload Temperature Response Curve
section: Advanced settings

[Sensor Serial Number]
datatype: STRING
def_value: 0
group: Upload Temperature Response Curve
section: Advanced settings

[Format]
datatype: COMBO
def_value: Ohm/K
combo_def_1: Ohm/K
combo_def_2: log(Ohm)/K
cmd_def_1: 3
cmd_def_2: 4
group: Upload Temperature Response Curve
section: Advanced settings

[Setpoint Limit]
datatype: DOUBLE
def_value: 3
unit: K
group: Upload Temperature Response Curve
section: Advanced settings

[Temperature Coefficient (upload)]
datatype: COMBO
def_value: negative
combo_def_1: negative
combo_def_2: positive
cmd_def_1: 1
cmd_def_2: 2
group: Upload Temperature Response Curve
section: Advanced settings


; # Temperature Control (to do)

; [Temperature Setpoint]
; datatype: DOUBLE
; def_value: 0
; unit: K
; set_cmd: SETP
; get_cmd: SETP?
; group: Control
; section: Advanced settings

; [Temperature Ramp]
; datatype: COMBO
; def_value: Off
; combo_def_1: Off
; combo_def_2: On
; cmd_def_1: 0
; cmd_def_2: 1
; group: Control
; section: Advanced settings

; [Temperature Ramp Rate]
; datatype: DOUBLE
; def_value: 0.001
; low_lim: 0.001
; high_lim: 10
; unit: K/min
; state_quant: Temperature Ramp
; state_value_1: On
; group: Control
; section: Advanced settings

; [Heater Output]
; name: Heater Output
; datatype: DOUBLE
; permission: READ
; get_cmd: HTR?
; unit: %
; group: Control
; section: Advanced settings

; [Heater Range]
; name: Heater Range
; datatype: COMBO
; def_value: Off
; combo_def_1: Off
; combo_def_2: 31.6 uA
; combo_def_3: 100 uA
; combo_def_4: 316 uA
; combo_def_5: 1.00 mA
; combo_def_6: 3.16 mA
; combo_def_7: 10.0 mA
; combo_def_8: 31.6 mA
; combo_def_9: 100 mA
; cmd_def_1: 0
; cmd_def_2: 1
; cmd_def_3: 2
; cmd_def_4: 3
; cmd_def_5: 4
; cmd_def_6: 5
; cmd_def_7: 6
; cmd_def_8: 7
; cmd_def_9: 8
; get_cmd: HTRRNG?
; group: Control
; section: Advanced settings

; [Temperature Control Mode]
; datatype: COMBO
; def_value: Closed loop PID
; combo_def_1: Closed loop PID
; combo_def_2: Zone Tuning
; combo_def_3: Open Loop
; combo_def_4: Off
; cmd_def_1: 1
; cmd_def_2: 2
; cmd_def_3: 3
; cmd_def_4: 4
; set_cmd: CMODE
; group: Control
; section: Advanced settings

; [Common Mode Reduction]
; datatype: COMBO
; def_value: Off
; combo_def_1: Off
; combo_def_2: On
; cmd_def_1: 0
; cmd_def_2: 1
; set_cmd: CMR
; group: Control
; section: Advanced settings

; [P - Proportional]
; datatype: DOUBLE
; low_lim: 1E-3
; high_lim: 1E3
; def_value: 10
; unit:
; state_quant: Temperature Control Mode
; state_value_1: Closed loop PID
; group: Control
; section: Advanced settings

; [I - Integral]
; datatype: DOUBLE
; low_lim: 0
; high_lim: 1E4
; def_value: 100
; unit: s
; state_quant: Temperature Control Mode
; state_value_1: Closed loop PID
; group: Control
; section: Advanced settings

; [D - Derivative]
; datatype: DOUBLE
; low_lim: 0
; high_lim: 2.5E3
; def_value: 20
; unit: s
; state_quant: Temperature Control Mode
; state_value_1: Closed loop PID
; group: Control
; section: Advanced settings