# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: LeCroy Oscilloscope

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: LeCroy_Oscilloscope

# default interface and address
interface: TCPIP


[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: True

# List of models supported by this driver
model_str_1: 204Xi
model_str_2: 3074
model_str_3: SDA

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: LECROY,WR
model_id_2: LECROY,WS
model_id_3: LECROY,SDA



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 10

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: CFMT DEF9,WORD,BIN;CORD HI;CHDR OFF

# Boolean string values (used for sending True/False to instrument), default is 1 and 0
str_true: ON
str_false: OFF

# Final commands sent to the instrument when closing the driver
final: 


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
[Ch1 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ

[Ch2 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ

[Ch3 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ

[Ch4 - Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ

[Time/div]
datatype: DOUBLE
def_value: 1.0E-9
unit: s
set_cmd: TDIV
group: Timebase

[Time delay]
datatype: DOUBLE
def_value: 0.0
unit: s
set_cmd: TRDL
group: Timebase

[# of points]
datatype: DOUBLE
def_value: 1E5
set_cmd: MSIZ
group: Timebase

[Trig source]
datatype: COMBO
def_value: Channel 1
combo_def_1: Channel 1
combo_def_2: Channel 2
combo_def_3: Channel 3
combo_def_4: Channel 4
combo_def_5: External
combo_def_6: External/10
combo_def_7: Line
cmd_def_1: C1
cmd_def_2: C2
cmd_def_3: C3
cmd_def_4: C4
cmd_def_5: EX
cmd_def_6: EX10
cmd_def_7: LINE
set_cmd: TRSE EDGE,SR,<*>,HT,OFF
group: Trigger
 
[Trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
set_cmd: TRSL
group: Trigger
 
[Trig level]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: TRLV
group: Trigger

[Ch1 - Enabled]
datatype: BOOLEAN
def_value: True
set_cmd: C1:TRA
group: Channel 1
section: Channels

[Ch1 - Coupling]
datatype: COMBO
def_value: DC, 1 MOhm
combo_def_1: DC, 1 MOhm
combo_def_2: AC, 1 MOhm
combo_def_3: DC, 50 Ohm
combo_def_4: Ground
cmd_def_1: D1M
cmd_def_2: A1M
cmd_def_3: D50
cmd_def_4: GND
set_cmd: C1:CPL
group: Channel 1
section: Channels

# [Ch1 - Bandwidth]
# datatype: COMBO
# def_value: Full
# combo_def_1: Full
# combo_def_2: 200 MHz
# combo_def_3: 20 MHz
# cmd_def_1: OFF
# cmd_def_2: 200MHZ
# cmd_def_3: ON
# set_cmd: BWL C1,
# group: Channel 1

[Ch1 - Volt/div]
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: C1:VDIV
group: Channel 1
section: Channels

[Ch1 - Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: C1:OFST
group: Channel 1
section: Channels


[Ch2 - Enabled]
datatype: BOOLEAN
def_value: True
set_cmd: C2:TRA
group: Channel 2
section: Channels

[Ch2 - Coupling]
datatype: COMBO
def_value: DC, 1 MOhm
combo_def_1: DC, 1 MOhm
combo_def_2: AC, 1 MOhm
combo_def_3: DC, 50 Ohm
combo_def_4: Ground
cmd_def_1: D1M
cmd_def_2: A1M
cmd_def_3: D50
cmd_def_4: GND
set_cmd: C2:CPL
group: Channel 2
section: Channels

[Ch2 - Volt/div]
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: C2:VDIV
group: Channel 2
section: Channels

[Ch2 - Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: C2:OFST
group: Channel 2
section: Channels

[Ch3 - Enabled]
datatype: BOOLEAN
def_value: True
set_cmd: C3:TRA
group: Channel 3
section: Channels

[Ch3 - Coupling]
datatype: COMBO
def_value: DC, 1 MOhm
combo_def_1: DC, 1 MOhm
combo_def_2: AC, 1 MOhm
combo_def_3: DC, 50 Ohm
combo_def_4: Ground
cmd_def_1: D1M
cmd_def_2: A1M
cmd_def_3: D50
cmd_def_4: GND
set_cmd: C3:CPL
group: Channel 3
section: Channels

[Ch3 - Volt/div]
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: C3:VDIV
group: Channel 3
section: Channels

[Ch3 - Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: C3:OFST
group: Channel 3
section: Channels

[Ch4 - Enabled]
datatype: BOOLEAN
def_value: True
set_cmd: C4:TRA
group: Channel 4
section: Channels

[Ch4 - Coupling]
datatype: COMBO
def_value: DC, 1 MOhm
combo_def_1: DC, 1 MOhm
combo_def_2: AC, 1 MOhm
combo_def_3: DC, 50 Ohm
combo_def_4: Ground
cmd_def_1: D1M
cmd_def_2: A1M
cmd_def_3: D50
cmd_def_4: GND
set_cmd: C4:CPL
group: Channel 4
section: Channels

[Ch4 - Volt/div]
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: C4:VDIV
group: Channel 4
section: Channels

[Ch4 - Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: C4:OFST
group: Channel 4
section: Channels
