[General settings]
# The name is shown in all the configuration windows
name: Marconi 2026 Multisource Generator
# This driver is a modified version of the Keithley 2600B driver file (Version 0.3)

# The version string should be updated whenever changes are made to this config file
version: 0.4

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Marconi_2026_multisource_generator

[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: 2026Q

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: 2026Q

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 5

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: True

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: ERROR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: *CLS

# Final commands sent to the instrument when closing the driver
final: 

# Setting the commands corresponding to BOOLEAN quantities
str_false: 0.00000E+00
str_true: 1.00000E+00

#Enabling termination character
#term_char: auto
#send_end_on_write: True

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
[Combiner Mode]
datatype: COMBO
label: Combined output mode
def_value: OFF
combo_def_1: A
combo_def_2: B
combo_def_3: C
combo_def_4: AB
combo_def_5: BC
combo_def_6: AC
combo_def_7: ABC
combo_def_8: OFF
section: General settings
permission: BOTH
show_in_measurement_dlg: False
[Impedance]
datatype: COMBO
label: Impedance adapter mode
def_value: 50 Ohms
combo_def_1: 50 Ohms
combo_def_2: 75 Ohms
cmd_def_1: Z50R
cmd_def_2: Z75R
section: General settings
permission: BOTH
set_cmd: IMPEDANCE <*>
get_cmd: IMPEDANCE?
show_in_measurement_dlg: False
[Coupling CFRQAB]
datatype: BOOLEAN
label: Enable coupling between A & B
def_value: False
group: Carrier frequency coupling
section: Coupling settings
permission: BOTH
show_in_measurement_dlg: False
[Coupling CFRQAB MODE]
datatype: COMBO
label: Harmonic or sub-harmonic coupling between A & B
tooltip: Can ignore if the harmonic/sub-harmonic parameter is zero
combo_def_1: Harmonic
combo_def_2: Sub-harmonic
group: Carrier frequency coupling
section: Coupling settings
state_quant: Coupling CFRQAB
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[Coupling CFRQAB HARM]
datatype: DOUBLE
label: Harmonic for A & B coupling relationship
group: Carrier frequency coupling
section: Coupling settings
state_quant: Coupling CFRQAB MODE
state_value_1: Harmonic
permission: BOTH
show_in_measurement_dlg: False
[Coupling CFRQAB SUBHARM]
datatype: DOUBLE
label: Sub-harmonic for A & B coupling relationship
group: Carrier frequency coupling
section: Coupling settings
state_quant: Coupling CFRQAB MODE
state_value_1: Sub-harmonic
permission: BOTH
show_in_measurement_dlg: False
[Coupling CFRQAB OFFSET]
datatype: DOUBLE
label: Frequency offset for A & B coupling relationship
group: Carrier frequency coupling
section: Coupling settings
state_quant: Coupling CFRQAB
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[Coupling CFRQAC]
datatype: BOOLEAN
label: Enable coupling between A & C
def_value: False
group: Carrier frequency coupling
section: Coupling settings
permission: BOTH
show_in_measurement_dlg: False
[Coupling CFRQAC MODE]
datatype: COMBO
label: Harmonic or sub-harmonic coupling between A & C
tooltip: Can ignore if the harmonic/sub-harmonic parameter is zero
combo_def_1: Harmonic
combo_def_2: Sub-harmonic
group: Carrier frequency coupling
section: Coupling settings
state_quant: Coupling CFRQAC
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[Coupling CFRQAC HARM]
datatype: DOUBLE
label: Harmonic for A & C coupling relationship
group: Carrier frequency coupling
section: Coupling settings
state_quant: Coupling CFRQAC MODE
state_value_1: Harmonic
permission: BOTH
show_in_measurement_dlg: False
[Coupling CFRQAC SUBHARM]
datatype: DOUBLE
label: Sub-harmonic for A & C coupling relationship
group: Carrier frequency coupling
section: Coupling settings
state_quant: Coupling CFRQAC MODE
state_value_1: Sub-harmonic
permission: BOTH
show_in_measurement_dlg: False
[Coupling CFRQAC OFFSET]
datatype: DOUBLE
label: Frequency offset for A & C coupling relationship
group: Carrier frequency coupling
section: Coupling settings
state_quant: Coupling CFRQAC
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[Coupling RFLVAB]
datatype: BOOLEAN
label: Enable coupling between A & B
def_value: False
group: RF Level coupling
section: Coupling settings
permission: BOTH
show_in_measurement_dlg: False
[Coupling RFLVAB OFFSET]
datatype: DOUBLE
label: Level offset for A & B coupling relationship
group: RF Level coupling
section: Coupling settings
state_quant: Coupling RFLVAB
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[Coupling RFLVAC]
datatype: BOOLEAN
label: Enable coupling between A & C
def_value: False
group: RF Level coupling
section: Coupling settings
permission: BOTH
show_in_measurement_dlg: False
[Coupling RFLVAC OFFSET]
datatype: DOUBLE
label: Level offset for A & C coupling relationship
group: RF Level coupling
section: Coupling settings
state_quant: Coupling RFLVAC
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[Source A Connected]
datatype: BOOLEAN
label: Is source A connected?
section: Source A
def_value: True
permission: WRITE
show_in_measurement_dlg: False
[Carrier Frequency (A)]
datatype: DOUBLE
label: Carrier frequency
unit: Hz
low_lim: 10000
high_lim: 2.4E9
sweep_cmd: Python <sr>
group: Frequency
section: Source A
permission: BOTH
state_quant: Source A Connected
state_value_1: True
show_in_measurement_dlg: True
[Carrier Phase offset (A)]
datatype: DOUBLE
label: Phase offset of Carrier
unit: degrees
group: Frequency
section: Source A
permission: WRITE
state_quant: Source A Connected
state_value_1: True
show_in_measurement_dlg: True
[RF Output On (A)]
datatype: BOOLEAN
label: Turn RF output on
group: RF Level
section: Source A
permission: WRITE
state_quant: Source A Connected
state_value_1: True
show_in_measurement_dlg: False
[RF Level (A)]
datatype: DOUBLE
label: RF output level
unit: DBM
group: RF Level
section: Source A
state_quant: RF Output On (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[RF Type (A)]
datatype: COMBO
label: EMF or PD
combo_def_1: EMF
combo_def_2: PD
group: RF Level
section: Source A
state_quant: RF Output On (A)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: False
[Modulation Control (A)]
datatype: BOOLEAN
label: Turn modulation on
group: Modulation
section: Source A
state_quant: Source A Connected
state_value_1: True
[Modulation mode (A)]
datatype: COMBO
label: Set modulation mode
combo_def_1: AM
combo_def_2: FM
combo_def_3: PM
combo_def_4: AM & FM
combo_def_5: AM & PM
combo_def_6: FSK2L
combo_def_7: FSK4L
tooltip: Internal modulation only works on one modulation channel
group: Modulation
section: Source A
state_quant: Modulation Control (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM1 Status (A)]
datatype: BOOLEAN
label: Enable FM source 1?
group: Frequency Modulation 1
section: Source A
state_quant: Modulation mode (A)
state_value_1: FM
state_value_2: AM & FM
[FM1 Deviation (A)]
datatype: DOUBLE
label: FM Deviation
unit: Hz
group: Frequency Modulation 1
section: Source A
state_quant: FM1 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[FM1 Source (A)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Frequency Modulation 1
section: Source A
state_quant: FM1 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM1 Modulation frequency (A)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Frequency Modulation 1
section: Source A
state_quant: FM1 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[FM1 Waveform (A)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Frequency Modulation 1
section: Source A
state_quant: FM1 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM1 Phase (A)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Frequency Modulation 1
section: Source A
state_quant: FM1 Status (A)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[DC FM1 Null (A)]
datatype: BUTTON
label: Perform DC FM null operation
group: Frequency Modulation 1
section: Source A
state_quant: FM1 Source (A)
state_value_1: External DC
permission: WRITE
show_in_measurement_dlg: False
[FM2 Status (A)]
datatype: BOOLEAN
label: Enable FM source 2?
group: Frequency Modulation 2
section: Source A
state_quant: Modulation mode (A)
state_value_1: FM
state_value_2: AM & FM
[FM2 Deviation (A)]
datatype: DOUBLE
label: FM Deviation
unit: Hz
group: Frequency Modulation 2
section: Source A
state_quant: FM2 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[FM2 Source (A)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Frequency Modulation 2
section: Source A
state_quant: FM2 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM2 Modulation frequency (A)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Frequency Modulation 2
section: Source A
state_quant: FM2 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[FM2 Waveform (A)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Frequency Modulation 2
section: Source A
state_quant: FM2 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM2 Phase (A)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Frequency Modulation 2
section: Source A
state_quant: FM2 Status (A)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[DC FM2 Null (A)]
datatype: BUTTON
label: Perform DC FM null operation
group: Frequency Modulation 2
section: Source A
state_quant: FM2 Source (A)
state_value_1: External DC
permission: WRITE
show_in_measurement_dlg: False
[PM1 Status (A)]
datatype: BOOLEAN
label: Enable PM source 1?
group: Phase Modulation 1
section: Source A
state_quant: Modulation mode (A)
state_value_1: PM
state_value_2: AM & PM
[PM1 Deviation (A)]
datatype: DOUBLE
label: PM Deviation
unit: Hz
group: Phase Modulation 1
section: Source A
state_quant: PM1 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[PM1 Source (A)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Phase Modulation 1
section: Source A
state_quant: PM1 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[PM1 Modulation frequency (A)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Phase Modulation 1
section: Source A
state_quant: PM1 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[PM1 Waveform (A)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Phase Modulation 1
section: Source A
state_quant: PM1 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[PM1 Phase (A)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Phase Modulation 1
section: Source A
state_quant: PM1 Status (A)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[PM2 Status (A)]
datatype: BOOLEAN
label: Enable PM source 2?
group: Phase Modulation 2
section: Source A
state_quant: Modulation mode (A)
state_value_1: PM
state_value_2: AM & PM
[PM2 Deviation (A)]
datatype: DOUBLE
label: PM Deviation
unit: Hz
group: Phase Modulation 2
section: Source A
state_quant: PM2 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[PM2 Source (A)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Phase Modulation 2
section: Source A
state_quant: PM2 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[PM2 Modulation frequency (A)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Phase Modulation 2
section: Source A
state_quant: PM2 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[PM2 Waveform (A)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Phase Modulation 2
section: Source A
state_quant: PM2 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[PM2 Phase (A)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Phase Modulation 2
section: Source A
state_quant: PM2 Status (A)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[AM1 Status (A)]
datatype: BOOLEAN
label: Enable AM source 1?
group: Amplitude Modulation 1
section: Source A
state_quant: Modulation mode (A)
state_value_1: AM
state_value_2: AM & FM
state_value_3: AM & PM
[AM1 Depth (A)]
datatype: DOUBLE
label: AM Depth
unit: PCT
low_lim: 0
high_lim: 99.9
tooltip: AM1 Depth plus AM2 Depth must be less than 99.9% combined
group: Amplitude Modulation 1
section: Source A
state_quant: AM1 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[AM1 Source (A)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Amplitude Modulation 1
section: Source A
state_quant: AM1 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[AM1 Modulation frequency (A)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Amplitude Modulation 1
section: Source A
state_quant: AM1 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[AM1 Waveform (A)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Amplitude Modulation 1
section: Source A
state_quant: AM1 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[AM1 Phase (A)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Amplitude Modulation 1
section: Source A
state_quant: AM1 Status (A)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[AM2 Status (A)]
datatype: BOOLEAN
label: Enable AM source 2?
group: Amplitude Modulation 2
section: Source A
state_quant: Modulation mode (A)
state_value_1: AM
state_value_2: AM & FM
state_value_3: AM & PM
[AM2 Depth (A)]
datatype: DOUBLE
label: AM Depth
tooltip: AM1 Depth plus AM2 Depth must be less than 99.9% combined
unit: PCT
low_lim: 0
high_lim: 99.9
group: Amplitude Modulation 2
section: Source A
state_quant: AM2 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[AM2 Source (A)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Amplitude Modulation 2
section: Source A
state_quant: AM2 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[AM2 Modulation frequency (A)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Amplitude Modulation 2
section: Source A
state_quant: AM2 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[AM2 Waveform (A)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Amplitude Modulation 2
section: Source A
state_quant: AM2 Status (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[AM2 Phase (A)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Amplitude Modulation 2
section: Source A
state_quant: AM2 Status (A)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[Pulse Modulation (A)]
datatype: BOOLEAN
label: Enable pulse modulation
tooltip: Pulse modulation works with any of the other modulation types
group: Modulation
section: Source A
state_quant: Modulation Control (A)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[Source B Connected]
datatype: BOOLEAN
label: Is source B connected?
section: Source B
def_value: True
permission: WRITE
show_in_measurement_dlg: False
[Carrier Frequency (B)]
datatype: DOUBLE
label: Carrier frequency
unit: Hz
low_lim: 10000
high_lim: 2.4E9
sweep_cmd: Python <sr>
group: Frequency
section: Source B
state_quant: Source B Connected
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[Carrier Phase offset (B)]
datatype: DOUBLE
label: Phase offset of Carrier
unit: degrees
group: Frequency
section: Source B
state_quant: Source B Connected
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[RF Output On (B)]
datatype: BOOLEAN
label: Turn RF output on
group: RF Level
section: Source B
state_quant: Source B Connected
state_value_1: True
permission: WRITE
show_in_measurement_dlg: False
[RF Level (B)]
datatype: DOUBLE
label: RF output level
unit: DBM
group: RF Level
section: Source B
state_quant: RF Output On (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[RF Type (B)]
datatype: COMBO
label: EMF or PD
combo_def_1: EMF
combo_def_2: PD
group: RF Level
section: Source B
state_quant: RF Output On (B)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: False
[Modulation Control (B)]
datatype: BOOLEAN
label: Turn modulation on
group: Modulation
section: Source B
state_quant: Source B Connected
state_value_1: True
[Modulation mode (B)]
datatype: COMBO
label: Set modulation mode
combo_def_1: AM
combo_def_2: FM
combo_def_3: PM
combo_def_4: AM & FM
combo_def_5: AM & PM
combo_def_6: FSK2L
combo_def_7: FSK4L
tooltip: Internal modulation only works on one modulation channel
group: Modulation
section: Source B
state_quant: Modulation Control (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM1 Status (B)]
datatype: BOOLEAN
label: Enable FM source 1?
group: Frequency Modulation 1
section: Source B
state_quant: Modulation mode (B)
state_value_1: FM
state_value_2: AM & FM
[FM1 Deviation (B)]
datatype: DOUBLE
label: FM Deviation
unit: Hz
group: Frequency Modulation 1
section: Source B
state_quant: FM1 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[FM1 Source (B)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Frequency Modulation 1
section: Source B
state_quant: FM1 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM1 Modulation frequency (B)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Frequency Modulation 1
section: Source B
state_quant: FM1 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[FM1 Waveform (B)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Frequency Modulation 1
section: Source B
state_quant: FM1 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM1 Phase (B)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Frequency Modulation 1
section: Source B
state_quant: FM1 Status (B)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[DC FM1 Null (B)]
datatype: BUTTON
label: Perform DC FM null operation
group: Frequency Modulation 1
section: Source B
state_quant: FM1 Source (B)
state_value_1: External DC
permission: WRITE
show_in_measurement_dlg: False
[FM2 Status (B)]
datatype: BOOLEAN
label: Enable FM source 2?
group: Frequency Modulation 2
section: Source B
state_quant: Modulation mode (B)
state_value_1: FM
state_value_2: AM & FM
[FM2 Deviation (B)]
datatype: DOUBLE
label: FM Deviation
unit: Hz
group: Frequency Modulation 2
section: Source B
state_quant: FM2 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[FM2 Source (B)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Frequency Modulation 2
section: Source B
state_quant: FM2 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM2 Modulation frequency (B)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Frequency Modulation 2
section: Source B
state_quant: FM2 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[FM2 Waveform (B)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Frequency Modulation 2
section: Source B
state_quant: FM2 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM2 Phase (B)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Frequency Modulation 2
section: Source B
state_quant: FM2 Status (B)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[DC FM2 Null (B)]
datatype: BUTTON
label: Perform DC FM null operation
group: Frequency Modulation 2
section: Source B
state_quant: FM2 Source (B)
state_value_1: External DC
permission: WRITE
show_in_measurement_dlg: False
[PM1 Status (B)]
datatype: BOOLEAN
label: Enable PM source 1?
group: Phase Modulation 1
section: Source B
state_quant: Modulation mode (B)
state_value_1: PM
state_value_2: AM & PM
[PM1 Deviation (B)]
datatype: DOUBLE
label: PM Deviation
unit: Hz
group: Phase Modulation 1
section: Source B
state_quant: PM1 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[PM1 Source (B)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Phase Modulation 1
section: Source B
state_quant: PM1 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[PM1 Modulation frequency (B)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Phase Modulation 1
section: Source B
state_quant: PM1 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[PM1 Waveform (B)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Phase Modulation 1
section: Source B
state_quant: PM1 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[PM1 Phase (B)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Phase Modulation 1
section: Source B
state_quant: PM1 Status (B)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[PM2 Status (B)]
datatype: BOOLEAN
label: Enable PM source 2?
group: Phase Modulation 2
section: Source B
state_quant: Modulation mode (B)
state_value_1: PM
state_value_2: AM & PM
[PM2 Deviation (B)]
datatype: DOUBLE
label: PM Deviation
unit: Hz
group: Phase Modulation 2
section: Source B
state_quant: PM2 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[PM2 Source (B)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Phase Modulation 2
section: Source B
state_quant: PM2 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[PM2 Modulation frequency (B)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Phase Modulation 2
section: Source B
state_quant: PM2 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[PM2 Waveform (B)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Phase Modulation 2
section: Source B
state_quant: PM2 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[PM2 Phase (B)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Phase Modulation 2
section: Source B
state_quant: PM2 Status (B)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[AM1 Status (B)]
datatype: BOOLEAN
label: Enable AM source 1?
group: Amplitude Modulation 1
section: Source B
state_quant: Modulation mode (B)
state_value_1: AM
state_value_2: AM & FM
state_value_3: AM & PM
[AM1 Depth (B)]
datatype: DOUBLE
label: AM Depth
unit: PCT
low_lim: 0
high_lim: 99.9
tooltip: AM1 Depth plus AM2 Depth must be less than 99.9% combined
group: Amplitude Modulation 1
section: Source B
state_quant: AM1 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[AM1 Source (B)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Amplitude Modulation 1
section: Source B
state_quant: AM1 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[AM1 Modulation frequency (B)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Amplitude Modulation 1
section: Source B
state_quant: AM1 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[AM1 Waveform (B)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Amplitude Modulation 1
section: Source B
state_quant: AM1 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[AM1 Phase (B)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Amplitude Modulation 1
section: Source B
state_quant: AM1 Status (B)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[AM2 Status (B)]
datatype: BOOLEAN
label: Enable AM source 2?
group: Amplitude Modulation 2
section: Source B
state_quant: Modulation mode (B)
state_value_1: AM
state_value_2: AM & FM
state_value_3: AM & PM
[AM2 Depth (B)]
datatype: DOUBLE
label: AM Depth
tooltip: AM1 Depth plus AM2 Depth must be less than 99.9% combined
unit: PCT
low_lim: 0
high_lim: 99.9
group: Amplitude Modulation 2
section: Source B
state_quant: AM2 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[AM2 Source (B)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Amplitude Modulation 2
section: Source B
state_quant: AM2 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[AM2 Modulation frequency (B)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Amplitude Modulation 2
section: Source B
state_quant: AM2 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[AM2 Waveform (B)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Amplitude Modulation 2
section: Source B
state_quant: AM2 Status (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[AM2 Phase (B)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Amplitude Modulation 2
section: Source B
state_quant: AM2 Status (B)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[Pulse Modulation (B)]
datatype: BOOLEAN
label: Enable pulse modulation
tooltip: Pulse modulation works with any of the other modulation types
group: Modulation
section: Source B
state_quant: Modulation Control (B)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[Source C Connected]
datatype: BOOLEAN
label: Is source C connected?
section: Source C
def_value: False
permission: WRITE
show_in_measurement_dlg: False
[Carrier Frequency (C)]
datatype: DOUBLE
label: Carrier frequency
unit: Hz
low_lim: 10000
high_lim: 2.4E9
sweep_cmd: Python <sr>
group: Frequency
section: Source C
state_quant: Source C Connected
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[Carrier Phase offset (C)]
datatype: DOUBLE
label: Phase offset of Carrier
unit: degrees
group: Frequency
section: Source C
state_quant: Source C Connected
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[RF Output On (C)]
datatype: BOOLEAN
label: Turn RF output on
group: RF Level
section: Source C
state_quant: Source C Connected
state_value_1: True
permission: WRITE
show_in_measurement_dlg: False
[RF Level (C)]
datatype: DOUBLE
label: RF output level
unit: DBM
group: RF Level
section: Source C
state_quant: RF Output On (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[RF Type (C)]
datatype: COMBO
label: EMF or PD
combo_def_1: EMF
combo_def_2: PD
group: RF Level
section: Source C
state_quant: RF Output On (C)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: False
[Modulation Control (C)]
datatype: BOOLEAN
label: Turn modulation on
group: Modulation
section: Source C
state_quant: Source C Connected
state_value_1: True
[Modulation mode (C)]
datatype: COMBO
label: Set modulation mode
combo_def_1: AM
combo_def_2: FM
combo_def_3: PM
combo_def_4: AM & FM
combo_def_5: AM & PM
combo_def_6: FSK2L
combo_def_7: FSK4L
tooltip: Internal modulation only works on one modulation channel
group: Modulation
section: Source C
state_quant: Modulation Control (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM1 Status (C)]
datatype: BOOLEAN
label: Enable FM source 1?
group: Frequency Modulation 1
section: Source C
state_quant: Modulation mode (C)
state_value_1: FM
state_value_2: AM & FM
[FM1 Deviation (C)]
datatype: DOUBLE
label: FM Deviation
unit: Hz
group: Frequency Modulation 1
section: Source C
state_quant: FM1 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[FM1 Source (C)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Frequency Modulation 1
section: Source C
state_quant: FM1 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM1 Modulation frequency (C)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Frequency Modulation 1
section: Source C
state_quant: FM1 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[FM1 Waveform (C)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Frequency Modulation 1
section: Source C
state_quant: FM1 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM1 Phase (C)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Frequency Modulation 1
section: Source C
state_quant: FM1 Status (C)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[DC FM1 Null (C)]
datatype: BUTTON
label: Perform DC FM null operation
group: Frequency Modulation 1
section: Source C
state_quant: FM1 Source (C)
state_value_1: External DC
permission: WRITE
show_in_measurement_dlg: False
[FM2 Status (C)]
datatype: BOOLEAN
label: Enable FM source 2?
group: Frequency Modulation 2
section: Source C
state_quant: Modulation mode (C)
state_value_1: FM
state_value_2: AM & FM
[FM2 Deviation (C)]
datatype: DOUBLE
label: FM Deviation
unit: Hz
group: Frequency Modulation 2
section: Source C
state_quant: FM2 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[FM2 Source (C)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Frequency Modulation 2
section: Source C
state_quant: FM2 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM2 Modulation frequency (C)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Frequency Modulation 2
section: Source C
state_quant: FM2 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[FM2 Waveform (C)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Frequency Modulation 2
section: Source C
state_quant: FM2 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[FM2 Phase (C)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Frequency Modulation 2
section: Source C
state_quant: FM2 Status (C)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[DC FM2 Null (C)]
datatype: BUTTON
label: Perform DC FM null operation
group: Frequency Modulation 2
section: Source C
state_quant: FM2 Source (C)
state_value_1: External DC
permission: WRITE
show_in_measurement_dlg: False
[PM1 Status (C)]
datatype: BOOLEAN
label: Enable PM source 1?
group: Phase Modulation 1
section: Source C
state_quant: Modulation mode (C)
state_value_1: PM
state_value_2: AM & PM
[PM1 Deviation (C)]
datatype: DOUBLE
label: PM Deviation
unit: Hz
group: Phase Modulation 1
section: Source C
state_quant: PM1 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[PM1 Source (C)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Phase Modulation 1
section: Source C
state_quant: PM1 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[PM1 Modulation frequency (C)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Phase Modulation 1
section: Source C
state_quant: PM1 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[PM1 Waveform (C)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Phase Modulation 1
section: Source C
state_quant: PM1 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[PM1 Phase (C)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Phase Modulation 1
section: Source C
state_quant: PM1 Status (C)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[PM2 Status (C)]
datatype: BOOLEAN
label: Enable PM source 2?
group: Phase Modulation 2
section: Source C
state_quant: Modulation mode (C)
state_value_1: PM
state_value_2: AM & PM
[PM2 Deviation (C)]
datatype: DOUBLE
label: PM Deviation
unit: Hz
group: Phase Modulation 2
section: Source C
state_quant: PM2 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[PM2 Source (C)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Phase Modulation 2
section: Source C
state_quant: PM2 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[PM2 Modulation frequency (C)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Phase Modulation 2
section: Source C
state_quant: PM2 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[PM2 Waveform (C)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Phase Modulation 2
section: Source C
state_quant: PM2 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[PM2 Phase (C)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Phase Modulation 2
section: Source C
state_quant: PM2 Status (C)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[AM1 Status (C)]
datatype: BOOLEAN
label: Enable AM source 1?
group: Amplitude Modulation 1
section: Source C
state_quant: Modulation mode (C)
state_value_1: AM
state_value_2: AM & FM
state_value_3: AM & PM
[AM1 Depth (C)]
datatype: DOUBLE
label: AM Depth
unit: PCT
low_lim: 0
high_lim: 99.9
tooltip: AM1 Depth plus AM2 Depth must be less than 99.9% combined
group: Amplitude Modulation 1
section: Source C
state_quant: AM1 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[AM1 Source (C)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Amplitude Modulation 1
section: Source C
state_quant: AM1 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[AM1 Modulation frequency (C)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Amplitude Modulation 1
section: Source C
state_quant: AM1 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[AM1 Waveform (C)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Amplitude Modulation 1
section: Source C
state_quant: AM1 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[AM1 Phase (C)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Amplitude Modulation 1
section: Source C
state_quant: AM1 Status (C)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[AM2 Status (C)]
datatype: BOOLEAN
label: Enable AM source 2?
group: Amplitude Modulation 2
section: Source C
state_quant: Modulation mode (C)
state_value_1: AM
state_value_2: AM & FM
state_value_3: AM & PM
[AM2 Depth (C)]
datatype: DOUBLE
label: AM Depth
tooltip: AM1 Depth plus AM2 Depth must be less than 99.9% combined
unit: PCT
low_lim: 0
high_lim: 99.9
group: Amplitude Modulation 2
section: Source C
state_quant: AM2 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[AM2 Source (C)]
datatype: COMBO
label: Modulation source
combo_def_1: Internal
combo_def_2: External AC
combo_def_3: External ALC
combo_def_4: External DC
group: Amplitude Modulation 2
section: Source C
state_quant: AM2 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[AM2 Modulation frequency (C)]
datatype: DOUBLE
label: Modulation oscillator frequency
unit: Hz
low_lim: 0.01
high_lim: 20E3
group: Amplitude Modulation 2
section: Source C
state_quant: AM2 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: True
[AM2 Waveform (C)]
datatype: COMBO
label: Modulation oscillator waveform
combo_def_1: SIN
combo_def_2: TRI
combo_def_3: SQR
group: Amplitude Modulation 2
section: Source C
state_quant: AM2 Status (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False
[AM2 Phase (C)]
datatype: DOUBLE
label: Moduliation oscillator phase offset
unit: Degrees
group: Amplitude Modulation 2
section: Source C
state_quant: AM2 Status (C)
state_value_1: True
permission: WRITE
show_in_measurement_dlg: True
[Pulse Modulation (C)]
datatype: BOOLEAN
label: Enable pulse modulation
tooltip: Pulse modulation works with any of the other modulation types
group: Modulation
section: Source C
state_quant: Modulation Control (C)
state_value_1: True
permission: BOTH
show_in_measurement_dlg: False