# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: MiniCircuits USB-8SPDT-A18 Switch Matrix

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: MiniCircuits_Switch
use_32bit_mode: True

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False


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
[Wiring Configuration]
datatype: COMBO
def_value: SP9T
combo_def_1: SP9T
combo_def_2: DP5T
combo_def_3: Custom
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Switch Configuration 

[SP9T Set]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 8
state_quant: Wiring Configuration
state_value_1: SP9T
group: Switch Status

[DP5T Set]
datatype: DOUBLE
def_value: 0
low_lim: 0
high_lim: 4
state_quant: Wiring Configuration
state_value_1: DP5T
group: Switch Status

[Custom State Set]
datatype: STRING
def_value: 00000000
state_quant: Wiring Configuration
state_value_1: Custom
group: Switch Status

[A]
datatype: DOUBLE
def_value = -1
permission: READ
section: Advanced
group: Switch Counter

[B]
datatype: DOUBLE
def_value = -1
permission: READ
section: Advanced
group: Switch Counter

[C]
datatype: DOUBLE
def_value = -1
permission: READ
section: Advanced
group: Switch Counter

[D]
datatype: DOUBLE
def_value = -1
permission: READ
section: Advanced
group: Switch Counter

[E]
datatype: DOUBLE
def_value = -1
permission: READ
section: Advanced
group: Switch Counter

[F]
datatype: DOUBLE
def_value = -1
permission: READ
section: Advanced
group: Switch Counter

[G]
datatype: DOUBLE
def_value = -1
permission: READ
section: Advanced
group: Switch Counter

[H]
datatype: DOUBLE
def_value = -1
permission: READ
section: Advanced
group: Switch Counter

[Current Switch State (HGFEDCBA->)]
datatype: STRING
def_value: ?
permission: READ
section: Advanced