# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: NI DAQ

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: NI_DAQ

# default interface and address
interface: Other
address: Dev1

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
[Number of samples]
datatype: DOUBLE
def_value: 1000
low_lim: 2

[Sample rate]
datatype: DOUBLE
def_value: 10E3
unit: Hz

[Trig source]
datatype: COMBO
def_value: Immediate
combo_def_1: Immediate
combo_def_2: Channel 1
combo_def_3: Channel 2
combo_def_4: Channel 3
combo_def_5: Channel 4
combo_def_6: Channel 5
combo_def_7: Channel 6
combo_def_8: Channel 7
combo_def_9: Channel 8
combo_def_10: Digital 1
combo_def_11: Digital 2
group: Trigger

[Trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
group: Trigger
state_quant: Trig source
state_value_1: Channel 1
state_value_2: Channel 2
state_value_3: Channel 3
state_value_4: Channel 4
state_value_5: Channel 5
state_value_6: Channel 6
state_value_7: Channel 7
state_value_8: Channel 8
state_value_9: Digital 1
state_value_10: Digital 2

[Trig level]
datatype: DOUBLE
def_value: 0.0
unit: V
group: Trigger
state_quant: Trig source
state_value_1: Channel 1
state_value_2: Channel 2
state_value_3: Channel 3
state_value_4: Channel 4
state_value_5: Channel 5
state_value_6: Channel 6
state_value_7: Channel 7
state_value_8: Channel 8

[Ch1: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch1
[Ch1: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch1
state_quant: Ch1: Enabled
state_value_1: True
[Ch1: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch1
state_quant: Ch1: Enabled
state_value_1: True
[Ch1: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch1
state_quant: Ch1: Enabled
state_value_1: True

[Ch2: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch2
[Ch2: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch2
state_quant: Ch2: Enabled
state_value_1: True
[Ch2: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch2
state_quant: Ch2: Enabled
state_value_1: True
[Ch2: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch2
state_quant: Ch2: Enabled
state_value_1: True

[Ch3: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch3
[Ch3: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch3
state_quant: Ch3: Enabled
state_value_1: True
[Ch3: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch3
state_quant: Ch3: Enabled
state_value_1: True
[Ch3: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch3
state_quant: Ch3: Enabled
state_value_1: True

[Ch4: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch4
[Ch4: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch4
state_quant: Ch4: Enabled
state_value_1: True
[Ch4: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch4
state_quant: Ch4: Enabled
state_value_1: True
[Ch4: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch4
state_quant: Ch4: Enabled
state_value_1: True

[Ch5: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch5
[Ch5: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch5
state_quant: Ch5: Enabled
state_value_1: True
[Ch5: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch5
state_quant: Ch5: Enabled
state_value_1: True
[Ch5: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch5
state_quant: Ch5: Enabled
state_value_1: True

[Ch6: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch6
[Ch6: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch6
state_quant: Ch6: Enabled
state_value_1: True
[Ch6: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch6
state_quant: Ch6: Enabled
state_value_1: True
[Ch6: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch6
state_quant: Ch6: Enabled
state_value_1: True

[Ch7: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch7
[Ch7: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch7
state_quant: Ch7: Enabled
state_value_1: True
[Ch7: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch7
state_quant: Ch7: Enabled
state_value_1: True
[Ch7: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch7
state_quant: Ch7: Enabled
state_value_1: True

[Ch8: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch8
[Ch8: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch8
state_quant: Ch8: Enabled
state_value_1: True
[Ch8: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch8
state_quant: Ch8: Enabled
state_value_1: True
[Ch8: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch8
state_quant: Ch8: Enabled
state_value_1: True
