# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: NI USB 6218

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: NI_USB_6218

# default interface and address
interface: Other
address: 1


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False


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
[Output 1]
datatype: DOUBLE
def_value: 0.0
unit: V
group: Output

[Output 2]
datatype: DOUBLE
def_value: 0.0
unit: V
group: Output


[Number of samples]
datatype: DOUBLE
def_value: 1000
low_lim: 2

[Sample rate]
datatype: DOUBLE
def_value: 10E3
unit: Hz

[Trig source]
datatype: COMBO
def_value: Immediate
combo_def_1: Immediate
combo_def_2: Channel 1
combo_def_3: Channel 2
combo_def_4: Channel 3
combo_def_5: Channel 4
combo_def_6: Channel 5
combo_def_7: Channel 6
combo_def_8: Channel 7
combo_def_9: Channel 8
combo_def_10: Digital 1
combo_def_11: Digital 2
group: Trigger

[Trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
group: Trigger
state_quant: Trig source
state_value_1: Channel 1
state_value_2: Channel 2
state_value_3: Channel 3
state_value_4: Channel 4
state_value_5: Channel 5
state_value_6: Channel 6
state_value_7: Channel 7
state_value_8: Channel 8
state_value_9: Digital 1
state_value_10: Digital 2

[Trig level]
datatype: DOUBLE
def_value: 0.0
unit: V
group: Trigger
state_quant: Trig source
state_value_1: Channel 1
state_value_2: Channel 2
state_value_3: Channel 3
state_value_4: Channel 4
state_value_5: Channel 5
state_value_6: Channel 6
state_value_7: Channel 7
state_value_8: Channel 8

[Ch1: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch1
[Ch1: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch1
state_quant: Ch1: Enabled
state_value_1: True
[Ch1: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch1
state_quant: Ch1: Enabled
state_value_1: True
[Ch1: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch1
state_quant: Ch1: Enabled
state_value_1: True
[Ch1: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch1
state_quant: Ch1: Enabled
state_value_1: True

[Ch2: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch2
[Ch2: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch2
state_quant: Ch2: Enabled
state_value_1: True
[Ch2: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch2
state_quant: Ch2: Enabled
state_value_1: True
[Ch2: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch2
state_quant: Ch2: Enabled
state_value_1: True
[Ch2: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch2
state_quant: Ch2: Enabled
state_value_1: True

[Ch3: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch3
[Ch3: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch3
state_quant: Ch3: Enabled
state_value_1: True
[Ch3: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch3
state_quant: Ch3: Enabled
state_value_1: True
[Ch3: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch3
state_quant: Ch3: Enabled
state_value_1: True
[Ch3: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch3
state_quant: Ch3: Enabled
state_value_1: True

[Ch4: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch4
[Ch4: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch4
state_quant: Ch4: Enabled
state_value_1: True
[Ch4: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch4
state_quant: Ch4: Enabled
state_value_1: True
[Ch4: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch4
state_quant: Ch4: Enabled
state_value_1: True
[Ch4: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch4
state_quant: Ch4: Enabled
state_value_1: True

[Ch5: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch5
[Ch5: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch5
state_quant: Ch5: Enabled
state_value_1: True
[Ch5: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch5
state_quant: Ch5: Enabled
state_value_1: True
[Ch5: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch5
state_quant: Ch5: Enabled
state_value_1: True
[Ch5: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch5
state_quant: Ch5: Enabled
state_value_1: True

[Ch6: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch6
[Ch6: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch6
state_quant: Ch6: Enabled
state_value_1: True
[Ch6: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch6
state_quant: Ch6: Enabled
state_value_1: True
[Ch6: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch6
state_quant: Ch6: Enabled
state_value_1: True
[Ch6: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch6
state_quant: Ch6: Enabled
state_value_1: True

[Ch7: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch7
[Ch7: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch7
state_quant: Ch7: Enabled
state_value_1: True
[Ch7: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch7
state_quant: Ch7: Enabled
state_value_1: True
[Ch7: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch7
state_quant: Ch7: Enabled
state_value_1: True
[Ch7: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch7
state_quant: Ch7: Enabled
state_value_1: True

[Ch8: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch8
[Ch8: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch8
state_quant: Ch8: Enabled
state_value_1: True
[Ch8: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch8
state_quant: Ch8: Enabled
state_value_1: True
[Ch8: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch8
state_quant: Ch8: Enabled
state_value_1: True
[Ch8: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch8
state_quant: Ch8: Enabled
state_value_1: True

[Ch9: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch9
[Ch9: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch9
state_quant: Ch9: Enabled
state_value_1: True
[Ch9: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch9
state_quant: Ch9: Enabled
state_value_1: True
[Ch9: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch9
state_quant: Ch9: Enabled
state_value_1: True
[Ch9: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch9
state_quant: Ch9: Enabled
state_value_1: True

[Ch10: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch10
[Ch10: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch10
state_quant: Ch10: Enabled
state_value_1: True
[Ch10: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch10
state_quant: Ch10: Enabled
state_value_1: True
[Ch10: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch10
state_quant: Ch10: Enabled
state_value_1: True
[Ch10: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch10
state_quant: Ch10: Enabled
state_value_1: True

[Ch11: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch11
[Ch11: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch11
state_quant: Ch11: Enabled
state_value_1: True
[Ch11: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch11
state_quant: Ch11: Enabled
state_value_1: True
[Ch11: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch11
state_quant: Ch11: Enabled
state_value_1: True
[Ch11: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch11
state_quant: Ch11: Enabled
state_value_1: True

[Ch12: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch12
[Ch12: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch12
state_quant: Ch12: Enabled
state_value_1: True
[Ch12: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch12
state_quant: Ch12: Enabled
state_value_1: True
[Ch12: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch12
state_quant: Ch12: Enabled
state_value_1: True
[Ch12: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch12
state_quant: Ch12: Enabled
state_value_1: True

[Ch13: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch13
[Ch13: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch13
state_quant: Ch13: Enabled
state_value_1: True
[Ch13: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch13
state_quant: Ch13: Enabled
state_value_1: True
[Ch13: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch13
state_quant: Ch13: Enabled
state_value_1: True
[Ch13: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch13
state_quant: Ch13: Enabled
state_value_1: True

[Ch14: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch14
[Ch14: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch14
state_quant: Ch14: Enabled
state_value_1: True
[Ch14: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch14
state_quant: Ch14: Enabled
state_value_1: True
[Ch14: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch14
state_quant: Ch14: Enabled
state_value_1: True
[Ch14: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch14
state_quant: Ch14: Enabled
state_value_1: True

[Ch15: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch15
[Ch15: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch15
state_quant: Ch15: Enabled
state_value_1: True
[Ch15: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch15
state_quant: Ch15: Enabled
state_value_1: True
[Ch15: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch15
state_quant: Ch15: Enabled
state_value_1: True
[Ch15: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch15
state_quant: Ch15: Enabled
state_value_1: True

[Ch16: Enabled]
datatype: BOOLEAN
def_value: True
group: Ch16
[Ch16: High range]
unit: V
datatype: DOUBLE
def_value: 10
group: Ch16
state_quant: Ch16: Enabled
state_value_1: True
[Ch16: Low range]
unit: V
datatype: DOUBLE
def_value: -10
group: Ch16
state_quant: Ch16: Enabled
state_value_1: True
[Ch16: Data]
unit: V
x_name: Time
x_unit: s
datatype: VECTOR
permission: READ
group: Ch16
state_quant: Ch16: Enabled
state_value_1: True
[Ch16: Voltage]
unit: V
datatype: DOUBLE
permission: READ
group: Ch16
state_quant: Ch16: Enabled
state_value_1: True
