# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Ocean Optics Spectrometer

# The version string should be updated whenever changes are made to this config file
version: 1.0
use_32bit_mode: True

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Ocean_Optics_Spectrometer

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
### We also want to set the integration time, from 10 ms to 15 minutes
[Integration time]
datatype: DOUBLE
def_value: 1.0
unit: s
low_lim: 0.01
high_lim: 900
permission: WRITE

[Temperature]
datatype: DOUBLE
def_value: 20.0
unit: C
permission: BOTH

[Intensity]
datatype: VECTOR
unit: Wm^-2
permission: READ
x_name: Wavelength
x_unit: m

#[Wavelength]
#datatype: VECTOR
#unit: m
#permission: READ
#x_name: Index
#x_unit: 
