# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Optimizer

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Optimizer

# Flags for defining signal generator or signal analyzer functionality
signal_analyzer: True

# Define that the driver is a Signal Generator
signal_generator: True

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False


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
[Cost]
datatype: DOUBLE
show_in_measurement_dlg: True

[Number of parameters]
datatype: DOUBLE
show_in_measurement_dlg: True

[Maximize]
datatype: BOOLEAN
def_value: False
show_in_measurement_dlg: True

[Parameter #1]
datatype: DOUBLE
show_in_measurement_dlg: True

[Start value parameter #1]
datatype: DOUBLE
show_in_measurement_dlg: True

[Step size parameter #1]
datatype: DOUBLE
def_value: 0.1
show_in_measurement_dlg: True

[Parameter #2]
datatype: DOUBLE
show_in_measurement_dlg: True

[Start value parameter #2]
datatype: DOUBLE
show_in_measurement_dlg: True

[Step size parameter #2]
datatype: DOUBLE
def_value: 0.1
show_in_measurement_dlg: True

[Parameter #3]
datatype: DOUBLE
show_in_measurement_dlg: True

[Start value parameter #3]
datatype: DOUBLE
show_in_measurement_dlg: True

[Step size parameter #3]
datatype: DOUBLE
def_value: 0.1
show_in_measurement_dlg: True

[Parameter #4]
datatype: DOUBLE
show_in_measurement_dlg: True

[Start value parameter #4]
datatype: DOUBLE
show_in_measurement_dlg: True

[Step size parameter #4]
datatype: DOUBLE
def_value: 0.1
show_in_measurement_dlg: True

[Iteration]
datatype: DOUBLE
low_lim: 0
def_value: 0
show_in_measurement_dlg: True
