# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Oxford PS 120

# The version string should be updated whenever changes are made to this config file
version: 0.3

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Oxford_PS120


[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 5

term_char: CR

baud_rate: 9600

data_bits: 8

stop_bits: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: $C3

# Final commands sent to the instrument when closing the driver
final: 


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
#[Wait time]
#datatype: DOUBLE
#label: Delay before characters sent from device
#unit: msec
#def_value: 0
#permission: WRITE
#set_cmd:
#show_in_measurement_dlg: False
[Current or Field]
datatype: COMBO
label: Control current or magnetic field
def_value: Magnetic field
combo_def_1: Magnetic field
combo_def_2: Current
get_cmd:
set_cmd:
show_in_measurement_dlg: False
[Magnetic Field]
datatype: DOUBLE
unit: T
high_lim: 1.001
get_cmd: 
sweep_cmd:
sweep_minute: True
sweep_rate: 0.05
sweep_rate_low: 0.01
sweep_rate_high: 1200
sweep_res: 0.0005
state_quant: Current or Field
state_value_1: Magnetic field
show_in_measurement_dlg: True
[Current]
datatype: DOUBLE
unit: A
high_lim: 45.8
get_cmd:
sweep_cmd:
sweep_minute: True
sweep_rate: 2.29
sweep_rate_low: 0.01
sweep_rate_high: 1200
state_quant: Current or Field
state_value_1: Current
show_in_measurement_dlg: True
[Heater status]
datatype: BOOLEAN
label: Heater on?
tooltip: Heater is only turned on if power supply = magnet current
get_cmd:
permission: READ
show_in_measurement_dlg: False
[Source Current]
datatype: DOUBLE
label: Output current
tooltip: This is adjusted as appropriate
unit: A
get_cmd:
permission: READ
state_quant: Current or Field
state_value_1: Current
show_in_measurement_dlg: False
[Source Magnetic Field]
datatype: DOUBLE
label: Output Field
tooltip: This is adjusted as appropriate
unit: T
get_cmd:
permission: READ
state_quant: Current or Field
state_value_1: Magnetic field
show_in_measurement_dlg: False