# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Aeroflex 302x Signal Generator

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: PXI_Aeroflex302x

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False

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
[Frequency]
name: Frequency
unit: Hz
datatype: DOUBLE
def_value: 5.0E9

[Power]
name: Power
unit: dBm
datatype: DOUBLE
def_value: -120

[Output]
name: Output
datatype: BOOLEAN
def_value: False

[Modulation]
name: Modulation
datatype: COMBO
def_value: CW
combo_def_1: CW
combo_def_2: LVDS
combo_def_3: ARB
combo_def_4: AM
combo_def_5: FM
combo_def_6: Ext. Analog

[Leveling mode]
name: Leveling mode
datatype: COMBO
def_value: Auto
combo_def_1: Auto
combo_def_2: Frozen
combo_def_3: Peak
combo_def_4: RMS

[Local oscillator VISA]
name: Local oscillator VISA
datatype: STRING
def_value: PXI6::14::INSTR
permission: NONE

[LO Reference Mode]
name: LO Reference Mode
datatype: COMBO
def_value: Ext Daisy
combo_def_1: OXCO
combo_def_2: Internal
combo_def_3: Ext Daisy
combo_def_4: Ext Terminated
permission: BOTH

[Trigger Source]
name: Trigger Source
datatype: COMBO
def_value: FRONT_SMB
combo_def_1: PXI_TRIG_0
combo_def_2: PXI_TRIG_1
combo_def_3: PXI_TRIG_2
combo_def_4: PXI_TRIG_3
combo_def_5: PXI_TRIG_4
combo_def_6: PXI_TRIG_5
combo_def_7: PXI_TRIG_6
combo_def_8: PXI_TRIG_7
combo_def_9: PXI_STAR
combo_def_10: PXI_LBL_0
combo_def_11: PXI_LBL_1
combo_def_12: PXI_LBL_2
combo_def_13: PXI_LBL_3
combo_def_14: PXI_LBL_4
combo_def_15: PXI_LBL_5
combo_def_16: PXI_LBL_6
combo_def_17: PXI_LBL_7
combo_def_18: PXI_LBL_8
combo_def_19: PXI_LBL_9
combo_def_20: PXI_LBL_10
combo_def_21: PXI_LBL_11
combo_def_22: PXI_LBL_12
combo_def_23: LVDS_MARKER_0
combo_def_24: LVDS_MARKER_1 
combo_def_25: LVDS_MARKER_2
combo_def_26: LVDS_MARKER_3
combo_def_27: LVDS_AUX_0
combo_def_28: LVDS_AUX_1
combo_def_29: LVDS_AUX_2
combo_def_30: LVDS_AUX_3
combo_def_31: LVDS_AUX_4
combo_def_32: LVDS_SPARE_0
combo_def_33: LVDS_SPARE_1
combo_def_34: LVDS_SPARE_2
combo_def_35: ARB_MARKER_1
combo_def_36: ARB_MARKER_2
combo_def_37: ARB_MARKER_3
combo_def_38: ARB_MARKER_4
combo_def_39: ARB_TRIG
combo_def_40: LA_OUT_0
combo_def_41: LA_OUT_1
combo_def_42: LA_OUT_2
combo_def_43: LA_OUT_3
combo_def_44: LA_OUT_4
combo_def_45: LA_OUT_5
combo_def_46: LA_OUT_6
combo_def_47: LA_OUT_7
combo_def_48: LSTB_OUT
combo_def_49: LA_IN_0
combo_def_50: LA_IN_1
combo_def_51: LA_IN_2
combo_def_52: LA_IN_3
combo_def_53: LA_IN_4
combo_def_54: LA_IN_5
combo_def_55: LA_IN_6
combo_def_56: LA_IN_7
combo_def_57: RFOFF_EXT
combo_def_58: MODOFF_EXT
combo_def_59: FREEZE_EXT
combo_def_60: GND
combo_def_61: SeqStart
combo_def_62: RfBlank
combo_def_63: LSTB_IN
combo_def_64: FRONT_SMB
combo_def_65: SW
combo_def_66: LA_SERIAL
combo_def_67: TRIG_GATE_EN
combo_def_68: TRIG_GATE_SIG
combo_def_69: TRIG_GATE_OUT
group: Trigger config