# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: QEvolver

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: QEvolver

# Define that this driver is a signal generator without hardware communication 
signal_analyzer: True


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
################# General Settings ########################

[Number of Qubits]
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
def_value: 3
section: General settings
show_in_measurement_dlg: True

[Coupling Type]
datatype: COMBO
combo_def_1: Capacitive
def_value: Capacitive
section: General settings
show_in_measurement_dlg: True

[Degree of Trunction]
datatype: DOUBLE
def_value: 4
section: General settings


################# Idling Configuration ########################

[Q1 Use Design Parameter]
datatype: BOOLEAN
def_value: 0
group: Qubit 1
section: Idling configuration
show_in_measurement_dlg: True

[Q1 Frequency]
datatype: DOUBLE
unit: Hz
def_value: 5.0E9
state_quant: Q1 Use Design Parameter
state_value_1: 0
group: Qubit 1
section: Idling configuration
show_in_measurement_dlg: True

[Q1 Anharmonicity]
datatype: DOUBLE
unit: Hz
def_value: -0.3E9
state_quant: Q1 Use Design Parameter
state_value_1: 0
group: Qubit 1
section: Idling configuration
show_in_measurement_dlg: True

[Q1 Type]
datatype: COMBO
combo_def_1: 2-JJ
def_value: 2-JJ
state_quant: Q1 Use Design Parameter
state_value_1: 1
group: Qubit 1
section: Idling configuration
show_in_measurement_dlg: True

[Q1 Ej]
datatype: DOUBLE
unit: Hz
def_value: 10.0E9
state_quant: Q1 Use Design Parameter
state_value_1: 1
group: Qubit 1
section: Idling configuration
show_in_measurement_dlg: True

[Q1 Ec]
datatype: DOUBLE
unit: Hz
def_value: 0.2E9
state_quant: Q1 Use Design Parameter
state_value_1: 1
group: Qubit 1
section: Idling configuration
show_in_measurement_dlg: True

[Q1 Asymmetry]
datatype: DOUBLE
def_value: 0.0
state_quant: Q1 Use Design Parameter
state_value_1: 1
group: Qubit 1
section: Idling configuration
show_in_measurement_dlg: True

[Q1 Flux Bias]
datatype: DOUBLE
def_value: 0.0
state_quant: Q1 Use Design Parameter
state_value_1: 1
group: Qubit 1
section: Idling configuration
show_in_measurement_dlg: True



[Q2 Use Design Parameter]
datatype: BOOLEAN
def_value: 0
group: Qubit 2
section: Idling configuration
show_in_measurement_dlg: True

[Q2 Frequency]
datatype: DOUBLE
unit: Hz
def_value: 5.0E9
state_quant: Q2 Use Design Parameter
state_value_1: 0
group: Qubit 2
section: Idling configuration
show_in_measurement_dlg: True

[Q2 Anharmonicity]
datatype: DOUBLE
unit: Hz
def_value: -0.3E9
state_quant: Q2 Use Design Parameter
state_value_1: 0
group: Qubit 2
section: Idling configuration
show_in_measurement_dlg: True

[Q2 Type]
datatype: COMBO
combo_def_1: 2-JJ
def_value: 2-JJ
state_quant: Q2 Use Design Parameter
state_value_1: 1
group: Qubit 2
section: Idling configuration
show_in_measurement_dlg: True

[Q2 Ej]
datatype: DOUBLE
unit: Hz
def_value: 10.0E9
state_quant: Q2 Use Design Parameter
state_value_1: 1
group: Qubit 2
section: Idling configuration
show_in_measurement_dlg: True

[Q2 Ec]
datatype: DOUBLE
unit: Hz
def_value: 0.2E9
state_quant: Q2 Use Design Parameter
state_value_1: 1
group: Qubit 2
section: Idling configuration
show_in_measurement_dlg: True

[Q2 Asymmetry]
datatype: DOUBLE
def_value: 0.0
state_quant: Q2 Use Design Parameter
state_value_1: 1
group: Qubit 2
section: Idling configuration
show_in_measurement_dlg: True

[Q2 Flux Bias]
datatype: DOUBLE
def_value: 0.0
state_quant: Q2 Use Design Parameter
state_value_1: 1
group: Qubit 2
section: Idling configuration
show_in_measurement_dlg: True



[Q3 Use Design Parameter]
datatype: BOOLEAN
def_value: 0
group: Qubit 3
section: Idling configuration
show_in_measurement_dlg: True

[Q3 Frequency]
datatype: DOUBLE
unit: Hz
def_value: 4.0E9
state_quant: Q3 Use Design Parameter
state_value_1: 0
group: Qubit 3
section: Idling configuration
show_in_measurement_dlg: True

[Q3 Anharmonicity]
datatype: DOUBLE
unit: Hz
def_value: -0.3E9
state_quant: Q3 Use Design Parameter
state_value_1: 0
group: Qubit 3
section: Idling configuration
show_in_measurement_dlg: True

[Q3 Type]
datatype: COMBO
combo_def_1: 2-JJ
def_value: 2-JJ
state_quant: Q3 Use Design Parameter
state_value_1: 1
group: Qubit 3
section: Idling configuration
show_in_measurement_dlg: True

[Q3 Ej]
datatype: DOUBLE
unit: Hz
def_value: 10.0E9
state_quant: Q3 Use Design Parameter
state_value_1: 1
group: Qubit 3
section: Idling configuration
show_in_measurement_dlg: True

[Q3 Ec]
datatype: DOUBLE
unit: Hz
def_value: 0.2E9
state_quant: Q3 Use Design Parameter
state_value_1: 1
group: Qubit 3
section: Idling configuration
show_in_measurement_dlg: True

[Q3 Asymmetry]
datatype: DOUBLE
def_value: 0.0
state_quant: Q3 Use Design Parameter
state_value_1: 1
group: Qubit 3
section: Idling configuration
show_in_measurement_dlg: True

[Q3 Flux Bias]
datatype: DOUBLE
def_value: 0.0
state_quant: Q3 Use Design Parameter
state_value_1: 1
group: Qubit 3
section: Idling configuration
show_in_measurement_dlg: True



[Capacitance 1]
datatype: DOUBLE
unit: F
def_value: 80.0E-15
group: Capacitance network
section: Idling configuration
show_in_measurement_dlg: True

[Capacitance 2]
datatype: DOUBLE
unit: F
def_value: 80.0E-15
group: Capacitance network
section: Idling configuration
show_in_measurement_dlg: True

[Capacitance 3]
datatype: DOUBLE
unit: F
def_value: 80.0E-15
group: Capacitance network
section: Idling configuration
show_in_measurement_dlg: True

[Capacitance 12]
datatype: DOUBLE
unit: F
def_value: 1.0E-15
group: Capacitance network
section: Idling configuration
show_in_measurement_dlg: True

[Capacitance 23]
datatype: DOUBLE
unit: F
def_value: 1.0E-15
group: Capacitance network
section: Idling configuration
show_in_measurement_dlg: True

[Capacitance 13]
datatype: DOUBLE
unit: F
def_value: 0.02E-15
group: Capacitance network
section: Idling configuration
show_in_measurement_dlg: True




################# Sequence Configuration ########################

####### Sequence Q1 Frequency #######

[Seq Q1 Frequency: Pulse Number]
label: Pulse Number
datatype: DOUBLE
unit:
def_value: 0
section: Seq Q1 Frequency

### Pulse #1
####################
[Seq Q1 Frequency: Shape #1]
label: Shape
datatype: COMBO
combo_def_1: RAMP
combo_def_2: COS
combo_def_3: GAUSS
combo_def_4: EXP
combo_def_5: EXPFLIP
def_value: 3
group: Pulse #1
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Plateau Start #1]
label: Plateau Start
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #1
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Rise #1]
label: Rise
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #1
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Plateau #1]
label: Plateau
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #1
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Fall #1]
label: Fall
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #1
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Stretch #1]
label: Stretch
datatype: DOUBLE
unit:
def_value: 1.0
group: Pulse #1
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Amplitude #1]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #1
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Frequency #1]
label: Frequency
datatype: DOUBLE
unit: Hz
def_value: 5.0E9
group: Pulse #1
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Phase #1]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0.0
group: Pulse #1
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: DRAG Coefficient #1]
label: DRAG Coeff.
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #1
section: Seq Q1 Frequency


### Pulse #2
####################
[Seq Q1 Frequency: Shape #2]
label: Shape
datatype: COMBO
combo_def_1: RAMP
combo_def_2: COS
combo_def_3: GAUSS
combo_def_4: EXP
combo_def_5: EXPFLIP
def_value: 3
group: Pulse #2
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Plateau Start #2]
label: Plateau Start
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #2
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Rise #2]
label: Rise
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #2
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Plateau #2]
label: Plateau
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #2
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Fall #2]
label: Fall
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #2
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Stretch #2]
label: Stretch
datatype: DOUBLE
unit:
def_value: 1.0
group: Pulse #2
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Amplitude #2]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #2
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Frequency #2]
label: Frequency
datatype: DOUBLE
unit: Hz
def_value: 5.0E9
group: Pulse #2
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Phase #2]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0.0
group: Pulse #2
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: DRAG Coefficient #2]
label: DRAG Coeff.
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #2
section: Seq Q1 Frequency

### Pulse #3
####################
[Seq Q1 Frequency: Shape #3]
label: Shape
datatype: COMBO
combo_def_1: RAMP
combo_def_2: COS
combo_def_3: GAUSS
combo_def_4: EXP
combo_def_5: EXPFLIP
def_value: 3
group: Pulse #3
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Plateau Start #3]
label: Plateau Start
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #3
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Rise #3]
label: Rise
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #3
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Plateau #3]
label: Plateau
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #3
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Fall #3]
label: Fall
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #3
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Stretch #3]
label: Stretch
datatype: DOUBLE
unit:
def_value: 1.0
group: Pulse #3
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Amplitude #3]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #3
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Frequency #3]
label: Frequency
datatype: DOUBLE
unit: Hz
def_value: 5.0E9
group: Pulse #3
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: Phase #3]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0.0
group: Pulse #3
section: Seq Q1 Frequency
#
[Seq Q1 Frequency: DRAG Coefficient #3]
label: DRAG Coeff.
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #3
section: Seq Q1 Frequency

### Pulse #4
####################
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####### Sequence Q1 Anharmonicity #######
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
[Seq Q1 Anharmonicity: Pulse Number]
label: Pulse Number
datatype: DOUBLE
unit:
def_value: 0
section: Seq Q1 Anharmonicity

### Pulse #1
####################
[Seq Q1 Anharmonicity: Shape #1]
label: Shape
datatype: COMBO
combo_def_1: RAMP
combo_def_2: COS
combo_def_3: GAUSS
combo_def_4: EXP
combo_def_5: EXPFLIP
def_value: 3
group: Pulse #1
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Plateau Start #1]
label: Plateau Start
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #1
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Rise #1]
label: Rise
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #1
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Plateau #1]
label: Plateau
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #1
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Fall #1]
label: Fall
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #1
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Stretch #1]
label: Stretch
datatype: DOUBLE
unit:
def_value: 1.0
group: Pulse #1
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Amplitude #1]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #1
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Frequency #1]
label: Frequency
datatype: DOUBLE
unit: Hz
def_value: 5.0E9
group: Pulse #1
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Phase #1]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0.0
group: Pulse #1
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: DRAG Coefficient #1]
label: DRAG Coeff.
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #1
section: Seq Q1 Anharmonicity


### Pulse #2
####################
[Seq Q1 Anharmonicity: Shape #2]
label: Shape
datatype: COMBO
combo_def_1: RAMP
combo_def_2: COS
combo_def_3: GAUSS
combo_def_4: EXP
combo_def_5: EXPFLIP
def_value: 3
group: Pulse #2
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Plateau Start #2]
label: Plateau Start
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #2
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Rise #2]
label: Rise
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #2
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Plateau #2]
label: Plateau
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #2
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Fall #2]
label: Fall
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #2
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Stretch #2]
label: Stretch
datatype: DOUBLE
unit:
def_value: 1.0
group: Pulse #2
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Amplitude #2]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #2
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Frequency #2]
label: Frequency
datatype: DOUBLE
unit: Hz
def_value: 5.0E9
group: Pulse #2
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Phase #2]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0.0
group: Pulse #2
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: DRAG Coefficient #2]
label: DRAG Coeff.
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #2
section: Seq Q1 Anharmonicity

### Pulse #3
####################
[Seq Q1 Anharmonicity: Shape #3]
label: Shape
datatype: COMBO
combo_def_1: RAMP
combo_def_2: COS
combo_def_3: GAUSS
combo_def_4: EXP
combo_def_5: EXPFLIP
def_value: 3
group: Pulse #3
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Plateau Start #3]
label: Plateau Start
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #3
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Rise #3]
label: Rise
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #3
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Plateau #3]
label: Plateau
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #3
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Fall #3]
label: Fall
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #3
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Stretch #3]
label: Stretch
datatype: DOUBLE
unit:
def_value: 1.0
group: Pulse #3
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Amplitude #3]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #3
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Frequency #3]
label: Frequency
datatype: DOUBLE
unit: Hz
def_value: 5.0E9
group: Pulse #3
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: Phase #3]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0.0
group: Pulse #3
section: Seq Q1 Anharmonicity
#
[Seq Q1 Anharmonicity: DRAG Coefficient #3]
label: DRAG Coeff.
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #3
section: Seq Q1 Anharmonicity

### Pulse #4
####################
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

[Seq Q2 Frequency: Pulse Number]
label: Pulse Number
datatype: DOUBLE
unit:
def_value: 0
section: Seq Q2 Frequency

### Pulse #1
####################
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

[Seq Q2 Anharmonicity: Pulse Number]
label: Pulse Number
datatype: DOUBLE
unit:
def_value: 0
section: Seq Q2 Anharmonicity

### Pulse #1
####################
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

[Seq Q3 Frequency: Pulse Number]
label: Pulse Number
datatype: DOUBLE
unit:
def_value: 0
section: Seq Q3 Frequency

### Pulse #1
####################
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

[Seq Q3 Anharmonicity: Pulse Number]
label: Pulse Number
datatype: DOUBLE
unit:
def_value: 0
section: Seq Q3 Anharmonicity

### Pulse #1
####################
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####### Sequence Q1 DriveP #######
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
[Seq Q1 DriveP: Pulse Number]
label: Pulse Number
datatype: DOUBLE
unit:
def_value: 0
section: Seq Q1 DriveP

### Pulse #1
####################
[Seq Q1 DriveP: Shape #1]
label: Shape
datatype: COMBO
combo_def_1: RAMP
combo_def_2: COS
combo_def_3: GAUSS
combo_def_4: EXP
combo_def_5: EXPFLIP
def_value: 3
group: Pulse #1
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Plateau Start #1]
label: Plateau Start
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #1
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Rise #1]
label: Rise
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #1
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Plateau #1]
label: Plateau
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #1
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Fall #1]
label: Fall
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #1
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Stretch #1]
label: Stretch
datatype: DOUBLE
unit:
def_value: 1.0
group: Pulse #1
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Amplitude #1]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #1
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Frequency #1]
label: Frequency
datatype: DOUBLE
unit: Hz
def_value: 5.0E9
group: Pulse #1
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Phase #1]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0.0
group: Pulse #1
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: DRAG Coefficient #1]
label: DRAG Coeff.
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #1
section: Seq Q1 DriveP


### Pulse #2
####################
[Seq Q1 DriveP: Shape #2]
label: Shape
datatype: COMBO
combo_def_1: RAMP
combo_def_2: COS
combo_def_3: GAUSS
combo_def_4: EXP
combo_def_5: EXPFLIP
def_value: 3
group: Pulse #2
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Plateau Start #2]
label: Plateau Start
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #2
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Rise #2]
label: Rise
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #2
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Plateau #2]
label: Plateau
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #2
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Fall #2]
label: Fall
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #2
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Stretch #2]
label: Stretch
datatype: DOUBLE
unit:
def_value: 1.0
group: Pulse #2
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Amplitude #2]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #2
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Frequency #2]
label: Frequency
datatype: DOUBLE
unit: Hz
def_value: 5.0E9
group: Pulse #2
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Phase #2]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0.0
group: Pulse #2
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: DRAG Coefficient #2]
label: DRAG Coeff.
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #2
section: Seq Q1 DriveP

### Pulse #3
####################
[Seq Q1 DriveP: Shape #3]
label: Shape
datatype: COMBO
combo_def_1: RAMP
combo_def_2: COS
combo_def_3: GAUSS
combo_def_4: EXP
combo_def_5: EXPFLIP
def_value: 3
group: Pulse #3
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Plateau Start #3]
label: Plateau Start
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #3
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Rise #3]
label: Rise
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #3
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Plateau #3]
label: Plateau
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #3
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Fall #3]
label: Fall
datatype: DOUBLE
unit: s
def_value: 5.0
group: Pulse #3
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Stretch #3]
label: Stretch
datatype: DOUBLE
unit:
def_value: 1.0
group: Pulse #3
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Amplitude #3]
label: Amplitude
datatype: DOUBLE
unit: V
def_value: 1.0
group: Pulse #3
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Frequency #3]
label: Frequency
datatype: DOUBLE
unit: Hz
def_value: 5.0E9
group: Pulse #3
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: Phase #3]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0.0
group: Pulse #3
section: Seq Q1 DriveP
#
[Seq Q1 DriveP: DRAG Coefficient #3]
label: DRAG Coeff.
datatype: DOUBLE
unit: s
def_value: 0.0
group: Pulse #3
section: Seq Q1 DriveP

### Pulse #4
####################
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

[Seq Q2 DriveP: Pulse Number]
label: Pulse Number
datatype: DOUBLE
unit:
def_value: 0
section: Seq Q2 DriveP

### Pulse #1
####################
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

[Seq Q3 DriveP: Pulse Number]
label: Pulse Number
datatype: DOUBLE
unit:
def_value: 0
section: Seq Q3 DriveP

### Pulse #1
####################
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####### Input State #######
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
[a00]
label: a00
datatype: COMPLEX
unit:
def_value: 1.0
group: a00*|00> + a01*|01> + a10*|10> + a11*|11>
section: Input State

[a01]
label: a01
datatype: COMPLEX
unit:
def_value: 0.0
group: a00*|00> + a01*|01> + a10*|10> + a11*|11>
section: Input State

[a10]
label: a10
datatype: COMPLEX
unit:
def_value: 0.0
group: a00*|00> + a01*|01> + a10*|10> + a11*|11>
section: Input State

[a11]
label: a11
datatype: COMPLEX
unit:
def_value: 0.0
group: a00*|00> + a01*|01> + a10*|10> + a11*|11>
section: Input State




####### Output #######

[Show Frequency]
datatype: BOOLEAN
def_value: 1
group: Output options
section: Output
show_in_measurement_dlg: True

[Show Drive]
datatype: BOOLEAN
def_value: 1
group: Output options
section: Output
show_in_measurement_dlg: True

[Show Measurement]
datatype: BOOLEAN
def_value: 1
group: Output options
section: Output
show_in_measurement_dlg: True



[Time Series: Q1 Frequency]
label: Q1 Frequency
datatype: VECTOR
unit: Hz
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: Q1 Anharmonicity]
label: Q1 Anharmonicity
datatype: VECTOR
unit: Hz
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: Q2 Frequency]
label: Q1 Frequency
datatype: VECTOR
unit: Hz
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: Q2 Anharmonicity]
label: Q1 Anharmonicity
datatype: VECTOR
unit: Hz
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: Q3 Frequency]
label: Q1 Frequency
datatype: VECTOR
unit: Hz
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: Q3 Anharmonicity]
label: Q1 Anharmonicity
datatype: VECTOR
unit: Hz
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: II]
label: II
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: IX]
label: IX
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: IY]
label: IY
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: IZ]
label: IZ
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: XI]
label: XI
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: XX]
label: XX
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: XY]
label: XY
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: XZ]
label: XZ
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: YI]
label: YI
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: YX]
label: YX
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: YY]
label: YY
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: YZ]
label: YZ
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: ZI]
label: ZI
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: ZX]
label: ZX
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: ZY]
label: ZY
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True

[Time Series: ZZ]
label: ZZ
datatype: VECTOR
unit:
x_name: Time
x_unit: s
permission: READ
group: Sequence
section: Output
show_in_measurement_dlg: True