# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Signal Recovery 726x

# The version string should be updated whenever changes are made to this config file
version: 1.0

driver_path: Signal Recovery 726x

[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
# 7260 and 7265 do not respond to *IDN?, so we do this in python
check_model: False


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: True


# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Default termination character
term_char: CR+LF

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status event errors (default is 60, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 16

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init:

# Final commands sent to the instrument when closing the driver
final:


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
[Value]
datatype: COMPLEX
unit: V
permission: READ
get_cmd: XY.
show_in_measurement_dlg: True

[X]
datatype: DOUBLE
unit: V
permission: READ
get_cmd: X.

[Y]
datatype: DOUBLE
unit: V
permission: READ
get_cmd: Y.

[R]
datatype: DOUBLE
unit: V
permission: READ
get_cmd: MAG.


[theta]
datatype: DOUBLE
unit: deg
permission: READ
get_cmd: PHA.

[Reference]
datatype: COMBO
get_cmd: IE
set_cmd: IE
combo_def_1: Internal
combo_def_2: External (rear TTL)
combo_def_3: External (front analog)
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2

[Reference Frequency]
datatype: DOUBLE
unit: Hz
permission: READ
get_cmd: FRQ.

[Reference Phase]
datatype: DOUBLE
unit: deg
get_cmd: REFP.
set_cmd: REFP.

[Oscillator Frequency]
datatype: DOUBLE
unit: Hz
get_cmd: OF.
set_cmd: OF

[Oscillator Amplitude]
datatype: DOUBLE
unit: V
get_cmd: OA.
set_cmd: OA.

[Lights]
datatype: COMBO
get_cmd: LTS
set_cmd: LTS
combo_def_1: on
combo_def_2: off
cmd_def_1: 1
cmd_def_2: 0
def_value: on

[Input Coupling]
datatype: COMBO
get_cmd: CP
set_cmd: CP
combo_def_1: AC
combo_def_2: DC
cmd_def_1: 0
cmd_def_2: 1

[Input Float]
datatype: COMBO
get_cmd: FLOAT
set_cmd: FLOAT
combo_def_1: Ground
combo_def_2: Float (1kOhm)
cmd_def_1: 0
cmd_def_2: 1

[Input Sensitivity]
datatype: COMBO
get_cmd: SEN
set_cmd: SEN
combo_def_1: 2nV
combo_def_2: 5nV
combo_def_3: 10nV
combo_def_4: 20nV
combo_def_5: 50nV
combo_def_6: 100nV
combo_def_7: 200nV
combo_def_8: 500nV
combo_def_9: 1uV
combo_def_10: 2uV
combo_def_11: 5uV
combo_def_12: 10uV
combo_def_13: 20uV
combo_def_14: 50uV
combo_def_15: 100uV
combo_def_16: 200uV
combo_def_17: 500uV
combo_def_18: 1mV
combo_def_19: 2mV
combo_def_20: 5mV
combo_def_21: 10mV
combo_def_22: 20mV
combo_def_23: 50mV
combo_def_24: 100mV
combo_def_25: 200mV
combo_def_26: 500mV
combo_def_27: 1V
cmd_def_1: 1
cmd_def_2: 2
cmd_def_3: 3
cmd_def_4: 4
cmd_def_5: 5
cmd_def_6: 6
cmd_def_7: 7
cmd_def_8: 8
cmd_def_9: 9
cmd_def_10: 10
cmd_def_11: 11
cmd_def_12: 12
cmd_def_13: 13
cmd_def_14: 14
cmd_def_15: 15
cmd_def_16: 16
cmd_def_17: 17
cmd_def_18: 18
cmd_def_19: 19
cmd_def_20: 20
cmd_def_21: 21
cmd_def_22: 22
cmd_def_23: 23
cmd_def_24: 24
cmd_def_25: 25
cmd_def_26: 26
cmd_def_27: 27

[Time constant]
datatype: COMBO
get_cmd: TC
set_cmd: TC
combo_def_1: 10us
combo_def_2: 20us
combo_def_3: 40us
combo_def_4: 80us
combo_def_5: 160us
combo_def_6: 320us
combo_def_7: 640us
combo_def_8: 5ms
combo_def_9: 10ms
combo_def_10: 20ms
combo_def_11: 50ms
combo_def_12: 100ms
combo_def_13: 200ms
combo_def_14: 500ms
combo_def_15: 1s
combo_def_16: 2s
combo_def_17: 5s
combo_def_18: 10s
combo_def_19: 20s
combo_def_20: 50s
combo_def_21: 100s
combo_def_22: 200s
combo_def_23: 500s
combo_def_24: 1ks
combo_def_25: 2ks
combo_def_26: 5ks
combo_def_27: 10ks
combo_def_28: 20ks
combo_def_29: 50ks
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 10
cmd_def_12: 11
cmd_def_13: 12
cmd_def_14: 13
cmd_def_15: 14
cmd_def_16: 15
cmd_def_17: 16
cmd_def_18: 17
cmd_def_19: 18
cmd_def_20: 19
cmd_def_21: 20
cmd_def_22: 21
cmd_def_23: 22
cmd_def_24: 23
cmd_def_25: 24
cmd_def_26: 25
cmd_def_27: 26
cmd_def_28: 27
cmd_def_29: 28
