# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Simple Signal Generator

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: SimpleSignalGenerator

# Define that the driver is a Signal Generator
signal_generator: True

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
[Frequency]
datatype: DOUBLE
unit: Hz
def_value: 10.0
tooltip: Frequency of the sine wave

[Amplitude]
datatype: DOUBLE
unit: V
def_value: 1.0
tooltip: Amplitude of the sine wave

[Phase]
datatype: DOUBLE
unit: deg
def_value: 0.0

[Duration]
datatype: DOUBLE
unit: s
def_value: 1.0

[Number of points]
datatype: DOUBLE
def_value: 1000

[Add noise]
datatype: BOOLEAN
def_value: False

[Noise amplitude]
datatype: DOUBLE
unit: V
def_value: 0.1
state_quant: Add noise
state_value_1: True

[Signal]
datatype: VECTOR
permission: READ
x_name: Time
x_unit: s
