# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Stanford DS345 Function Generator

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Stanford_DS345


[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: True

# List of models supported by this driver
model_str_1: DS345


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 52

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: 


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
[Function]
datatype: COMBO
def_value: Sinusoid
combo_def_1: Sinusoid
combo_def_2: Square
combo_def_3: Triangle
combo_def_4: Ramp
combo_def_5: Noise
combo_def_6: Arbitrary
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
set_cmd: FUNC

[Frequency]
datatype: DOUBLE
def_value: 1E3
unit: Hz
set_cmd: FREQ

[Amplitude]
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: AMPL <*>VP
get_cmd: AMPL? VP

[Offset]
datatype: DOUBLE
def_value: 0.0
unit: V
set_cmd: OFFS

[Phase]
datatype: DOUBLE
def_value: 0.0
unit: deg
state_quant: Function
state_value_1: Sinusoid
state_value_2: Square
state_value_3: Triangle
state_value_4: Ramp
set_cmd: PHSE

[Output polarity]
datatype: COMBO
def_value: Normal
combo_def_1: Normal
combo_def_2: Inverted
cmd_def_1: 0
cmd_def_2: 1
set_cmd: INVT



