# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Stanford Spectrum Analyzer SR785

# The version string should be updated whenever changes are made to this config file
version: 0.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Stanford_SR785

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 10

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 60

# SCPI string to be used when querying for instrument error messages
#error_cmd: :SYST:ERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 
#*CLS;*IDN?
#init: :INIT:CONT ON;:FORM:BORD NORM;:BAND:VID:AUTO 1;:SWE:TIME:AUTO 1
## OUTX command to direct SR785 to correct interface


# Boolean string values (used for sending True/False to instrument), default is 1 and 0
#str_true: ON
#str_false: OFF

# Final commands sent to the instrument when closing the driver
final: 
## reset

[Model and options]

# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: SR785

# Check instrument model id at startup (True or False). Default is False
check_model: False


# If check_model is set to True, define command for getting the model (default is *IDN?)
model_cmd: *IDN?

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: Stanford_Research_Systems,SR785


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
[Reset Device To Default]
datatype: Boolean
group: Display Setup
def_value: False

[Measurement Group]
name: Test13
datatype: COMBO
combo_def_1: 0 FFT
combo_def_2: 1 Correlation
combo_def_3: 2 Octave
combo_def_4: 3 Swept Sine
combo_def_5: 4 Order
combo_def_6: 5 Time Histogram
group: Display Setup
#set_cmd: MGRP 2, 

[FFT]
datatype: Combo
combo_def_1: 0 FFT 1
combo_def_2: 1 FFT 2
combo_def_3: 2 Power Spectrum 1
combo_def_4: 3 Power Spectrum 2
combo_def_5: 4 Time 1
combo_def_6: 5 Time 2
combo_def_7: 6 Windowed Time 1
combo_def_8: 7 Windowed Time 2
combo_def_9: 8 Orbit
combo_def_10: 9 Coherence
combo_def_11: 10 Cross Spectrum
combo_def_12: 11 Frequency Response
combo_def_13: 12 Capture Buffer 1
combo_def_14: 13 Capture Buffer 2
combo_def_15: 14 FFT User Function 1
combo_def_16: 15 FFT User Function 2
combo_def_17: 16 FFT User Function 3
combo_def_18: 17 FFT User Function 4
combo_def_19: 18 FFT User Function 5
state_quant: Measurement Group
state_value_1: 0 FFT
group: Display Setup
enabled: False

[FC Frequency Span]
unit: Hz, 2^x
datatype: Double
def_value: 102400
low_lim: 0.1953
high_lim: 102400
group: Frequency
state_quant: Measurement Group
state_value_1: 0 FFT
state_value_2: 1 Correlation

[FC Resolution]
unit: lines
datatype: Combo
combo_def_1: 0 100
combo_def_2: 1 200
combo_def_3: 2 400
combo_def_4: 3 800
group: Frequency
state_quant: Measurement Group
state_value_1: 0 FFT
state_value_2: 1 Correlation

[FC Base Frequency]
datatype: Combo
unit: Changes Other Parameters
combo_def_1: 0 100.0 kHz
combo_def_2: 1 102.4 kHz
group: Frequency
state_quant: Measurement Group
state_value_1: 0 FFT
state_value_2: 1 Correlation

[F Center Frequency]
datatype: Double
; unit: Frequency Span must fit within 0 to Base Frequency
unit: Hz
low_lim: 0
def_value: 51200
high_lim: 102400
group: Frequency
state_quant: Measurement Group
state_value_1: 0 FFT

[F Unsettle Measurement]
datatype: Boolean
def_value: False
group: Frequency
state_quant: Measurement Group
state_value_1: 0 FFT

[FC Compute Average]
datatype: Boolean
def_value: True
group: Average
state_quant: Measurement Group
state_value_1: 0 FFT
state_value_2: 1 Correlation
state_value_3: 4 Order

[FC Type Of Averaging]
datatype: Combo
combo_def_1: 0 None
combo_def_2: 1 Vector
combo_def_3: 2 RMS
combo_def_4: 3 Peak Hold
group: Average
state_quant: FC Compute Average
state_value_1: True

[FC FFT Average Type]
datatype: Combo
combo_def_1: 0 Linear/Fixed Length
combo_def_2: 1 Exponential/Continuous
group: Average
state_quant: FC Compute Average
state_value_1: True

[FC Number Of Averages]
datatype: Double
def_value: 2
low_lim: 2
high_lim: 32767
group: Average
state_quant: FC Compute Average
state_value_1: True

[F Time Record Increment]
datatype: Double
unit: Percent
low_lim: 0
high_lim: 300
def_value: 100
group: Average
state_quant: Measurement Group
state_value_1: 0 FFT

[FC Overload Reject]
datatype: Boolean
def_value: False
group: Average
state_quant: FC Compute Average
state_value_1: True

[FC Trigger Average Mode]
datatype: Combo
combo_def_1: 0 Time Records
combo_def_2: 1 Averages
group: Average
state_quant: FC Compute Average
state_value_1: True

[FC Average Preview*]
datatype: Combo
combo_def_1: 0 Off
combo_def_2: 1 Manual
combo_def_3: 2 Timed
group: Average
state_quant: FC Compute Average
state_value_1: True

[FC Preview Time*]
datatype: Double
unit: s, n*0.5
def_value: 2
low_lim: 0.5
high_lim: 1000
group: Average
state_quant: FC Compute Average
state_value_1: True


[Correlation]
datatype: Combo
combo_def_1: 19 Auto Correlation 1
combo_def_2: 20 Auto Correlation 2
combo_def_3: 21 Cross Correlation
combo_def_4: 22 Time 1
combo_def_5: 23 Time 2
combo_def_6: 24 Windowed Time 1
combo_def_7: 25 Windowed Time 2
combo_def_8: 26 Capture Buffer 1
combo_def_9: 27 Capture Buffer 2
combo_def_10: 28 Correlation Function 1
combo_def_11: 29 Correlation Function 2
combo_def_12: 30 Correlation Function 3
combo_def_13: 31 Correlation Function 4
combo_def_14: 32 Correlation Function 5
group: Display Setup
state_quant: Measurement Group
state_value_1: 1 Correlation

[Octave]
datatype: Combo
combo_def_1: 33 Octave 1
combo_def_2: 34 Octave 2
combo_def_3: 35 Capture 1
combo_def_4: 36 Capture 2
combo_def_5: 37 Octave User Function 1
combo_def_6: 38 Octave User Function 2
combo_def_7: 39 Octave User Function 3
combo_def_8: 40 Octave User Function 4
combo_def_9: 41 Octave User Function 5
group: Display Setup
state_quant: Measurement Group
state_value_1: 2 Octave

[Swept Sine]
datatype: COMBO
combo_def_1: 42 Spectrum 1
combo_def_2: 43 Spectrum 2
combo_def_3: 44 Normalized Variance 1
combo_def_4: 45 Normalized Variance 2
combo_def_5: 46 Cross Spectrum
combo_def_6: 47 Frequency Response
combo_def_7: 48 Swept Sine User Function 1
combo_def_8: 49 Swept Sine User Function 2
combo_def_9: 50 Swept Sine User Function 3
combo_def_10: 51 Swept Sine User Function 4
combo_def_11: 52 Swept Sine User Function 5
state_quant: Measurement Group
state_value_1: 3 Swept Sine
group: Display Setup

[SS Start Frequency]
name: SS Start Frequency
unit: Hz
datatype: Double
def_value: 1000
low_lim: 0.001
high_lim: 102400
group: Swept Sine
state_quant: Measurement Group
state_value_1: 3 Swept Sine

[SS Stop Frequency]
name: SS Stop Frequency
unit: Hz
datatype: Double
def_value: 10000
low_lim: 0.001
high_lim: 102400
group: Swept Sine
state_quant: Measurement Group
state_value_1: 3 Swept Sine

[SS Continuous Scan]
name: SS Continuous Scan
datatype: Boolean
group: Swept Sine
state_quant: Measurement Group
state_value_1: 3 Swept Sine

[SS Sweep Type]
name: SS Sweep Type
datatype: Combo
combo_def_1: 0 Linear
combo_def_2: 1 Logarithmic
group: Swept Sine
state_quant: Measurement Group
state_value_1: 3 Swept Sine

[SS Number Of Points]
name: SS Number Of Points
datatype: Double
low_lim: 10
high_lim: 2047
group: Swept Sine
state_quant: Measurement Group
state_value_1: 3 Swept Sine

[SS Auto Resolution]
name: SS Auto Resolution
datatype: Boolean
group: Swept Sine
state_quant: Measurement Group
state_value_1: 3 Swept Sine

[SS Maximum Skips]
name: SS Maximum Skips
datatype: Double
low_lim: 2
def_value: 8
high_lim: 200
group: Swept Sine
state_quant: SS Auto Resolution
state_value_1: True

[SS Faster Threshold]
name: SS Faster Threshold
unit: dB
datatype: Double
low_lim: 0.01
def_value: 0.1
high_lim: 3.0
group: Swept Sine
state_quant: SS Auto Resolution
state_value_1: True

[SS Lower Threshold]
name: SS Lower Threshold
unit: dB
datatype: Double
low_lim: 0.05
def_value: 0.5
high_lim: 6.0
group: Swept Sine
state_quant: SS Auto Resolution
state_value_1: True

[SS Auto Level Reference*]
name: SS Auto Level Reference
datatype: Combo
combo_def_1: 0 Off
combo_def_2: 1 Channel 1
combo_def_3: 2 Channel 2
state_quant: Measurement Group
state_value_1: 3 Swept Sine
group: Source

[SS Amplitude*]
name: SS Amplitude
unit: V
datatype: Double
low_lim: 0
def_value: 1
high_lim: 5
state_quant: SS Auto Level Reference*
state_value_1: 0 Off
group: Source

[SS Ideal Reference*]
name: SS Ideal Reference
unit: V
datatype: Double
low_lim: 0
def_value: 1
high_lim: 5
state_quant: SS Auto Level Reference*
state_value_1: 1 Channel 1
state_value_2: 2 Channel 2
group: Source

[SS Source Ramping*]
name: SS Source Ramping
datatype: Boolean
state_quant: Measurement Group
state_value_1: 3 Swept Sine
group: Source

[SS Source Ramping Rate*]
name: SS Source Ramping Rate
datatype: Double
unit: V/s
low_lim: 0.001
high_lim: 500
state_quant: Measurement Group
state_value_1: 3 Swept Sine
group: Source

[SS Reference Upper Limit*]
name: SS Reference Upper Limit
datatype: Double
unit: dB
low_lim: 0.1
high_lim: 30
state_quant: SS Auto Level Reference*
state_value_1: 1 Channel 1
state_value_2: 2 Channel 2
group: Source

[SS Reference Lower Limit*]
name: SS Reference Lower Limit
datatype: Double
unit: dB
low_lim: -30
high_lim: -0.1
state_quant: SS Auto Level Reference*
state_value_1: 1 Channel 1
state_value_2: 2 Channel 2
group: Source

[SS Maximum Level*]
name: SS Maximum Level
datatype: Double
unit: V
low_lim: 0
high_lim: 5
state_quant: SS Auto Level Reference*
state_value_1: 1 Channel 1
state_value_2: 2 Channel 2
group: Source

[SS Offset*]
name: SS Offset
datatype: Double
unit: V
low_lim: -1
def_value: 0
high_lim: 1
state_quant: Measurement Group
state_value_1: 3 Swept Sine
group: Source

[SS Settle Time]
name: SS Settle Time
datatype: Double
unit: s
low_lim: 0.008
def_value: 0.008
high_lim: 1000
state_quant: Measurement Group
state_value_1: 3 Swept Sine
group: Average

[SS Settle Cycles]
name: SS Average
datatype: Double
low_lim: 1
def_value: 1
high_lim: 32767
state_quant: Measurement Group
state_value_1: 3 Swept Sine
group: Average

[SS Integration Time]
name: SS Integration Time
datatype: Double
unit: s
low_lim: 0.016
def_value: 0.016
high_lim: 1000
state_quant: Measurement Group
state_value_1: 3 Swept Sine
group: Average

[SS Integration Cycles]
name: SS Integration Cycles
datatype: Double
low_lim: 1
def_value: 1
high_lim: 32767
state_quant: Measurement Group
state_value_1: 3 Swept Sine
group: Average

[Order]
datatype: Combo
combo_def_1: 53 Linear Spectrum 1
combo_def_2: 54 Linear Spectrum 2
combo_def_3: 55 Power Spectrum 1
combo_def_4: 56 Power Spectrum 2
combo_def_5: 57 Time 1
combo_def_6: 58 Time 2
combo_def_7: 59 Windowed Time 1
combo_def_8: 60 Windowed Time 2
combo_def_9: 61 RPM Profile
combo_def_10: 62 Orbit
combo_def_11: 63 Track 1
combo_def_12: 64 Track 2
combo_def_13: 65 Capture Buffer 1
combo_def_14: 66 Capture Buffer 2
combo_def_15: 67 Order User Function 1
combo_def_16: 68 Order User Function 2
combo_def_17: 69 Order User Function 3
combo_def_18: 70 Order User Function 4
combo_def_19: 71 Order User Function 5
state_quant: Measurement Group
state_value_1: 4 Order
group: Display Setup

[Time Histogram]
datatype: Combo
combo_def_1: 72 Histogram 1
combo_def_2: 73 Histogram 2
combo_def_3: 74 PDF 1
combo_def_4: 75 PDF 2
combo_def_5: 76 CDF 1
combo_def_6: 77 CDF 2
combo_def_7: 78 Time 1
combo_def_8: 79 Time 2
combo_def_9: 80 Capture Buffer 1
combo_def_10: 81 Capture Buffer 2
combo_def_11: 82 Histogram User Function 1
combo_def_12: 83 Histogram User Function 2
combo_def_13: 84 Histogram User Function 3
combo_def_14: 85 Histogram User Function 4
combo_def_15: 86 Histogram User Function 5
state_quant: Measurement Group
state_value_1: 5 Time Histogram
group: Display Setup

[View Type]
datatype: Combo
combo_def_1: 0 Log Magnitude
combo_def_2: 1 Linear Magnitude
combo_def_3: 2 Magnitude Squared
combo_def_4: 3 Real Part
combo_def_5: 4 Imaginary Part
combo_def_6: 5 Phase
combo_def_7: 6 Unwrapped Phase
combo_def_8: 7 Nyquist
combo_def_9: 8 Nichols
group: Display Setup
enabled: False

[Unit dB]
datatype: Combo
combo_def_1: 0 Off
combo_def_2: 1 dB
combo_def_3: 2 dBm
combo_def_4: 3 dBspl
group: Display Setup
enabled: False

[Unit pk]
datatype: Combo
combo_def_1: 0 Off
combo_def_2: 1 pk
combo_def_3: 2 rms
combo_def_4: 3 pp
group: Display Setup
enabled: False

; [Unit psd] ; need to know where applicable
; datatype: Combo
; combo_def_1: 0 Off
; combo_def_2: 1 psd
; group: Display Setup
; enabled: False

[phase units]
datatype: Combo
combo_def_1: 0 Degrees
combo_def_2: 1 Radians
group: Display Setup
enabled: False


[Signal]
x_name: Frequency
x_unit: Hz
datatype: VECTOR
get_cmd: DSPY ? 0
permission: READ


[Source On/Off]
datatype: Boolean
state_quant: Measurement Group
state_value_1: 0 FFT
state_value_2: 1 Correlation
state_value_3: 2 Octave
state_value_4: 4 Order
state_value_5: 5 Time Histogram
def_value: False
group: Source

[Source Type]
datatype: Combo
combo_def_1: 0 Sine
combo_def_2: 1 Chirp
combo_def_3: 2 Noise
combo_def_4: 3 Arbitrary
state_quant: Measurement Group
state_value_1: 0 FFT
state_value_2: 1 Correlation
state_value_3: 2 Octave
state_value_4: 4 Order
state_value_5: 5 Time Histogram
group: Source

[Analyzer Configuration*]
datatype: Combo
combo_def_1: 0 Independent Channels
combo_def_2: 1 Dual Channels
group: Input

[Input Auto Offset*]
datatype: Boolean
group: Input

[Ch1 Input Mode*]
datatype: Combo
combo_def_1: 0 A (single-ended)
combo_def_2: 1 A-B (differential)
group: Input

[Ch1 Input Grounding*]
datatype: Combo
combo_def_1: 0 Float
combo_def_2: 1 Ground
group: Input

[Ch1 Input Coupling*] 
datatype: Combo
combo_def_1: 0 DC
combo_def_2: 1 AC
combo_def_3: 2 ICP
group: Input

[Ch1 Anti-Aliasing Filter*]
datatype: Boolean
group: Input

[Ch1 A-Weighting Filter*]
datatype: Boolean
group: Input

[Ch2 Input Mode*]
datatype: Combo
combo_def_1: 0 A (single-ended)
combo_def_2: 1 A-B (differential)
group: Input

[Ch2 Input Grounding*]
datatype: Combo
combo_def_1: 0 Float
combo_def_2: 1 Ground
group: Input

[Ch2 Input Coupling*] 
datatype: Combo
combo_def_1: 0 DC
combo_def_2: 1 AC
combo_def_3: 2 ICP
group: Input

[Ch2 Anti-Aliasing Filter*]
datatype: Boolean
group: Input

[Ch2 A-Weighting Filter*]
datatype: Boolean
group: Input

[Start New Measurement]
datatype: Boolean
group: Final Command
def_value: True