# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Stanford Delay Generator SRS 645

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Stanford_SRS645



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: True

# List of models supported by this driver
model_str_1: DG645



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: True 

# Bit mask for checking status event errors (default is 60, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 60

# SCPI string to be used when querying for instrument error messages
error_cmd: LERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: *CLS

# Final commands sent to the instrument when closing the driver
final: 


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
[Trigger]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: Ext. Rise
combo_def_3: Ext. Fall
combo_def_4: Single Ext. Rise
combo_def_5: Single Ext. Fall
combo_def_6: Single
combo_def_7: Line
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
set_cmd: TSRC

[Trig rate]
datatype: DOUBLE
unit: Hz
def_value: 1000
set_cmd: TRAT
state_quant: Trigger
state_value_1: Internal

[Trig level]
datatype: DOUBLE
unit: V
def_value: 1.0
set_cmd: TLVL
state_quant: Trigger
state_value_1: Ext. Rise
state_value_2: Ext. Fall
state_value_3: Single Ext. Rise
state_value_4: Single Ext. Fall

[Burst mode]
datatype: BOOLEAN
def_value: False
set_cmd: BURM

[Burst count]
datatype: DOUBLE
def_value: 5
set_cmd: BURC
state_quant: Burst mode
state_value_1: ON

[Burst period]
datatype: DOUBLE
unit: s
def_value: 1E-4
set_cmd: BURP
state_quant: Burst mode
state_value_1: ON

[Burst delay]
datatype: DOUBLE
unit: s
def_value: 0.0
set_cmd: BURD
state_quant: Burst mode
state_value_1: ON

[Trig]
datatype: BUTTON
label: Perform trig
set_cmd: *TRG
state_quant: Trigger
state_value_1: Single

[T0 - Amplitude]
datatype: DOUBLE
unit: V
def_value: 2.5
set_cmd: LAMP 0,<*>
get_cmd: LAMP?0
group: Pulse T0

[T0 - Offset]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: LOFF 0,<*>
get_cmd: LOFF?0
group: Pulse T0

[T0 - Polarity]
datatype: COMBO
def_value: Positive
combo_def_1: Negative
combo_def_2: Positive
cmd_def_1: 0
cmd_def_2: 1
set_cmd: LPOL 0,<*>
get_cmd: LPOL?0
group: Pulse T0

[AB - Start time]
datatype: DOUBLE
unit: s
def_value: 1E-6
group: Pulse AB
section: Pulse AB

[AB - Start reference]
datatype: COMBO
def_value: T0
combo_def_1: T0
combo_def_2: T1
combo_def_3: A
combo_def_4: B
combo_def_5: C
combo_def_6: D
combo_def_7: E
combo_def_8: F
combo_def_9: G
combo_def_10: H
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
group: Pulse AB
section: Pulse AB

[AB - Stop time]
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse AB
section: Pulse AB

[AB - Stop reference]
datatype: COMBO
def_value: A
combo_def_1: T0
combo_def_2: T1
combo_def_3: A
combo_def_4: B
combo_def_5: C
combo_def_6: D
combo_def_7: E
combo_def_8: F
combo_def_9: G
combo_def_10: H
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
group: Pulse AB
section: Pulse AB

[AB - Amplitude]
datatype: DOUBLE
unit: V
def_value: 2.5
set_cmd: LAMP 1,<*>
get_cmd: LAMP?1
group: Pulse AB
section: Pulse AB

[AB - Offset]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: LOFF 1,<*>
get_cmd: LOFF?1
group: Pulse AB
section: Pulse AB

[AB - Polarity]
datatype: COMBO
def_value: Positive
combo_def_1: Negative
combo_def_2: Positive
cmd_def_1: 0
cmd_def_2: 1
set_cmd: LPOL 1,<*>
get_cmd: LPOL?1
group: Pulse AB
section: Pulse AB

[CD - Start time]
datatype: DOUBLE
unit: s
def_value: 1E-6
group: Pulse CD
section: Pulse CD

[CD - Start reference]
datatype: COMBO
def_value: T0
combo_def_1: T0
combo_def_2: T1
combo_def_3: A
combo_def_4: B
combo_def_5: C
combo_def_6: D
combo_def_7: E
combo_def_8: F
combo_def_9: G
combo_def_10: H
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
group: Pulse CD
section: Pulse CD

[CD - Stop time]
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse CD
section: Pulse CD

[CD - Stop reference]
datatype: COMBO
def_value: C
combo_def_1: T0
combo_def_2: T1
combo_def_3: A
combo_def_4: B
combo_def_5: C
combo_def_6: D
combo_def_7: E
combo_def_8: F
combo_def_9: G
combo_def_10: H
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
group: Pulse CD
section: Pulse CD

[CD - Amplitude]
datatype: DOUBLE
unit: V
def_value: 2.5
set_cmd: LAMP 2,<*>
get_cmd: LAMP?2
group: Pulse CD
section: Pulse CD

[CD - Offset]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: LOFF 2,<*>
get_cmd: LOFF?2
group: Pulse CD
section: Pulse CD

[CD - Polarity]
datatype: COMBO
def_value: Positive
combo_def_1: Negative
combo_def_2: Positive
cmd_def_1: 0
cmd_def_2: 1
set_cmd: LPOL 2,<*>
get_cmd: LPOL?2
group: Pulse CD
section: Pulse CD

[EF - Start time]
datatype: DOUBLE
unit: s
def_value: 1E-6
group: Pulse EF
section: Pulse EF

[EF - Start reference]
datatype: COMBO
def_value: T0
combo_def_1: T0
combo_def_2: T1
combo_def_3: A
combo_def_4: B
combo_def_5: C
combo_def_6: D
combo_def_7: E
combo_def_8: F
combo_def_9: G
combo_def_10: H
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
group: Pulse EF
section: Pulse EF

[EF - Stop time]
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse EF
section: Pulse EF

[EF - Stop reference]
datatype: COMBO
def_value: E
combo_def_1: T0
combo_def_2: T1
combo_def_3: A
combo_def_4: B
combo_def_5: C
combo_def_6: D
combo_def_7: E
combo_def_8: F
combo_def_9: G
combo_def_10: H
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
group: Pulse EF
section: Pulse EF

[EF - Amplitude]
datatype: DOUBLE
unit: V
def_value: 2.5
set_cmd: LAMP 3,<*>
get_cmd: LAMP?3
group: Pulse EF
section: Pulse EF

[EF - Offset]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: LOFF 3,<*>
get_cmd: LOFF?3
group: Pulse EF
section: Pulse EF

[EF - Polarity]
datatype: COMBO
def_value: Positive
combo_def_1: Negative
combo_def_2: Positive
cmd_def_1: 0
cmd_def_2: 1
set_cmd: LPOL 3,<*>
get_cmd: LPOL?3
group: Pulse EF
section: Pulse EF

[GH - Start time]
datatype: DOUBLE
unit: s
def_value: 1E-6
group: Pulse GH
section: Pulse GH

[GH - Start reference]
datatype: COMBO
def_value: T0
combo_def_1: T0
combo_def_2: T1
combo_def_3: A
combo_def_4: B
combo_def_5: C
combo_def_6: D
combo_def_7: E
combo_def_8: F
combo_def_9: G
combo_def_10: H
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
group: Pulse GH
section: Pulse GH

[GH - Stop time]
datatype: DOUBLE
unit: s
def_value: 10E-9
group: Pulse GH
section: Pulse GH

[GH - Stop reference]
datatype: COMBO
def_value: G
combo_def_1: T0
combo_def_2: T1
combo_def_3: A
combo_def_4: B
combo_def_5: C
combo_def_6: D
combo_def_7: E
combo_def_8: F
combo_def_9: G
combo_def_10: H
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
group: Pulse GH
section: Pulse GH

[GH - Amplitude]
datatype: DOUBLE
unit: V
def_value: 2.5
set_cmd: LAMP 4,<*>
get_cmd: LAMP?4
group: Pulse GH
section: Pulse GH

[GH - Offset]
datatype: DOUBLE
unit: V
def_value: 0.0
set_cmd: LOFF 4,<*>
get_cmd: LOFF?4
group: Pulse GH
section: Pulse GH

[GH - Polarity]
datatype: COMBO
def_value: Positive
combo_def_1: Negative
combo_def_2: Positive
cmd_def_1: 0
cmd_def_2: 1
set_cmd: LPOL 4,<*>
get_cmd: LPOL?4
group: Pulse GH
section: Pulse GH
