# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Stanford Lock-in Amplifier SRS 844

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Stanford_SRS844



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: True

# List of models supported by this driver
model_str_1: SR844



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 2

# Default termination character
term_char: CR

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status event errors (default is 60, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 16

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: LOCL 1

# Final commands sent to the instrument when closing the driver
final: LOCL 0


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
[Reference source]
datatype: COMBO
def_value: Internal
combo_def_1: External
combo_def_2: Internal
cmd_def_1: 0
cmd_def_2: 1
set_cmd: FMOD
group: Reference and Phase

[Frequency]
datatype: DOUBLE
unit: Hz
def_value: 1000
set_cmd: FREQ
state_quant: Reference source
state_value_1: Internal
group: Reference and Phase
show_in_measurement_dlg: True

[Phase]
datatype: DOUBLE
unit: deg
def_value: 0.0
set_cmd: PHAS
group: Reference and Phase

[Sensitivity]
datatype: COMBO
def_value: 1 V/uA
combo_def_1: 100 nV/fA
combo_def_2: 300 nV/fA
combo_def_3: 1 uV/pA
combo_def_4: 3 uV/pA
combo_def_5: 10 uV/pA
combo_def_6: 30 uV/pA
combo_def_7: 100 uV/pA
combo_def_8: 300 uV/pA
combo_def_9: 1 mV/nA
combo_def_10: 3 mV/nA
combo_def_11: 10 mV/nA
combo_def_12: 30 mV/nA
combo_def_13: 100 mV/nA
combo_def_14: 300 mV/nA
combo_def_15: 1 V/uA
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 10
cmd_def_12: 11
cmd_def_13: 12
cmd_def_14: 13
cmd_def_15: 14
set_cmd: SENS
group: Gain and Time Constant
show_in_measurement_dlg: True

[Time constant]
datatype: COMBO
def_value: 100 ms
combo_def_1: 100 us
combo_def_2: 300 us
combo_def_3: 1 ms
combo_def_4: 3 ms
combo_def_5: 10 ms
combo_def_6: 30 ms
combo_def_7: 100 ms
combo_def_8: 300 ms
combo_def_9: 1 s
combo_def_10: 3 s
combo_def_11: 10 s
combo_def_12: 30 s
combo_def_13: 100 s
combo_def_14: 300 s
combo_def_15: 1 ks
combo_def_16: 3 ks
combo_def_17: 10 ks
combo_def_18: 30 ks
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
cmd_def_9: 8
cmd_def_10: 9
cmd_def_11: 10
cmd_def_12: 11
cmd_def_13: 12
cmd_def_14: 13
cmd_def_15: 14
cmd_def_16: 15
cmd_def_17: 16
cmd_def_18: 17
set_cmd: OFLT
group: Gain and Time Constant
show_in_measurement_dlg: True

[Filter slope]
datatype: COMBO
def_value: 12 dB/oct
combo_def_1: None
combo_def_2: 6 dB/oct
combo_def_3: 12 dB/oct
combo_def_4: 18 dB/oct
combo_def_5: 24 dB/oct
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
set_cmd: OFSL
group: Gain and Time Constant


[Value]
datatype: COMPLEX
unit: V
permission: READ
get_cmd: SNAP?1,2
group: Data
section: Data
show_in_measurement_dlg: True

[X]
datatype: DOUBLE
unit: V
permission: READ
get_cmd: OUTP?1
group: Data
section: Data

[Y]
datatype: DOUBLE
unit: V
permission: READ
get_cmd: OUTP?2
group: Data
section: Data

[R]
datatype: DOUBLE
unit: V
permission: READ
get_cmd: OUTP?3
group: Data
section: Data

[RdB]
datatype: DOUBLE
unit: dB
permission: READ
get_cmd: OUTP?4
group: Data
section: Data

[theta]
datatype: DOUBLE
unit: deg
permission: READ
get_cmd: OUTP?5
group: Data
section: Data
