# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: State Discriminator

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: State_Discriminator

# Flags for defining signal generator or signal analyzer functionality
signal_analyzer: True
signal_generator: True

# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = False


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
[Number of qubits]
datatype: COMBO
combo_def_1: One
combo_def_2: Two
combo_def_3: Three
combo_def_4: Four
combo_def_5: Five
combo_def_6: Six
combo_def_7: Seven
combo_def_8: Eight
combo_def_9: Nine
def_value: Two
group: Method
section: Training
show_in_measurement_dlg: True

[Number of states]
datatype: COMBO
def_value: Two
combo_def_1: Two
combo_def_2: Three
group: Method
section: Training
show_in_measurement_dlg: True

[Kernel]
datatype: COMBO
def_value: linear
combo_def_1: linear
combo_def_2: poly
combo_def_3: rbf
combo_def_4: sigmoid
group: Method
section: Training

[Degree]
datatype: DOUBLE
def_value: 3
state_quant: Kernel
state_value_1: poly
group: Method
section: Training

[Gamma]
datatype: DOUBLE
def_value: 0.22
state_quant: Kernel
state_value_1: poly
state_value_2: rbf
state_value_3: sigmoid
group: Method
section: Training

[Coef0]
datatype: DOUBLE
def_value: 0
state_quant: Kernel
state_value_1: poly
state_value_2: sigmoid
group: Method
section: Training

[C-parameter]
datatype: DOUBLE
def_value: 1.0
group: Method
section: Training

[Shrinking]
datatype: BOOLEAN
def_value: True
group: Method
section: Training

[Training source]
datatype: COMBO
def_value: Input traces
combo_def_1: Input traces
combo_def_2: Pointer states
group: Training
section: Training
show_in_measurement_dlg: True

[Perform training]
datatype: BOOLEAN
def_value: False
state_quant: Training source
state_value_1: Input traces
group: Training
section: Training
show_in_measurement_dlg: True

[Training type]
datatype: COMBO
def_value: All combinations
combo_def_1: Specific qubit
combo_def_2: All qubits at once
combo_def_3: All combinations
state_quant: Training source
state_value_1: Input traces
tooltip: For "All combinations", (Number of states)^(Number of qubits) training data sets are required.  For other options, (Number of states) training sets are required
group: Training
section: Training
show_in_measurement_dlg: True

[Training, qubit]
datatype: DOUBLE
state_quant: Training type
state_value_1: Specific qubit
def_value: 1
low_lim: 1
group: Training
section: Training
show_in_measurement_dlg: True

[Training, input state]
datatype: DOUBLE
def_value: 0
state_quant: Training source
state_value_1: Input traces
group: Training
section: Training
show_in_measurement_dlg: True

[Train all states at once]
datatype: BOOLEAN
group: Training
section: Training
tooltip: If checked, the input trace should contain interleaved data from all states
state_quant: Training source
state_value_1: Input traces
show_in_measurement_dlg: True

[Use median value]
datatype: BOOLEAN
def_value: True
tooltip: If checked, the median value of the dataset is used to train the SVM
state_quant: Training source
state_value_1: Input traces
group: Training
section: Training
show_in_measurement_dlg: True

[Pointer, QB1-S0]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB1-S1]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB1-S2]
datatype: COMPLEX
group: Pointer states
section: Training
state_quant: Number of states
state_value_1: Three

[Pointer, QB2-S0]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB2-S1]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB2-S2]
datatype: COMPLEX
group: Pointer states
section: Training
state_quant: Number of states
state_value_1: Three

[Pointer, QB3-S0]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB3-S1]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB3-S2]
datatype: COMPLEX
group: Pointer states
section: Training
state_quant: Number of states
state_value_1: Three

[Pointer, QB4-S0]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB4-S1]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB4-S2]
datatype: COMPLEX
group: Pointer states
section: Training
state_quant: Number of states
state_value_1: Three

[Pointer, QB5-S0]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB5-S1]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB5-S2]
datatype: COMPLEX
group: Pointer states
section: Training
state_quant: Number of states
state_value_1: Three

[Pointer, QB6-S0]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB6-S1]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB6-S2]
datatype: COMPLEX
group: Pointer states
section: Training
state_quant: Number of states
state_value_1: Three

[Pointer, QB7-S0]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB7-S1]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB7-S2]
datatype: COMPLEX
group: Pointer states
section: Training
state_quant: Number of states
state_value_1: Three

[Pointer, QB8-S0]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB8-S1]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB8-S2]
datatype: COMPLEX
group: Pointer states
section: Training
state_quant: Number of states
state_value_1: Three

[Pointer, QB9-S0]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB9-S1]
datatype: COMPLEX
group: Pointer states
section: Training

[Pointer, QB9-S2]
datatype: COMPLEX
group: Pointer states
section: Training
state_quant: Number of states
state_value_1: Three




[Input data, QB1]
datatype: VECTOR_COMPLEX
permission: WRITE
unit: V
group: Input
section: Data
show_in_measurement_dlg: True

[Input data, QB2]
datatype: VECTOR_COMPLEX
permission: WRITE
unit: V
group: Input
section: Data
show_in_measurement_dlg: True

[Input data, QB3]
datatype: VECTOR_COMPLEX
permission: WRITE
unit: V
group: Input
section: Data
show_in_measurement_dlg: True

[Input data, QB4]
datatype: VECTOR_COMPLEX
permission: WRITE
unit: V
group: Input
section: Data
show_in_measurement_dlg: True

[Input data, QB5]
datatype: VECTOR_COMPLEX
permission: WRITE
unit: V
group: Input
section: Data
show_in_measurement_dlg: True

[Input data, QB6]
datatype: VECTOR_COMPLEX
permission: WRITE
unit: V
group: Input
section: Data

[Input data, QB7]
datatype: VECTOR_COMPLEX
permission: WRITE
unit: V
group: Input
section: Data

[Input data, QB8]
datatype: VECTOR_COMPLEX
permission: WRITE
unit: V
group: Input
section: Data

[Input data, QB9]
datatype: VECTOR_COMPLEX
permission: WRITE
unit: V
group: Input
section: Data

[Average QB1 state]
datatype: DOUBLE
permission: READ
group: Output
section: Data
show_in_measurement_dlg: True

[Average QB2 state]
datatype: DOUBLE
permission: READ
group: Output
section: Data
show_in_measurement_dlg: True

[Average QB3 state]
datatype: DOUBLE
permission: READ
group: Output
section: Data
show_in_measurement_dlg: True

[Average QB4 state]
datatype: DOUBLE
permission: READ
group: Output
section: Data
show_in_measurement_dlg: True

[Average QB5 state]
datatype: DOUBLE
permission: READ
group: Output
section: Data
show_in_measurement_dlg: True

[Average QB6 state]
datatype: DOUBLE
permission: READ
group: Output
section: Data

[Average QB7 state]
datatype: DOUBLE
permission: READ
group: Output
section: Data

[Average QB8 state]
datatype: DOUBLE
permission: READ
group: Output
section: Data

[Average QB9 state]
datatype: DOUBLE
permission: READ
group: Output
section: Data

[Assignment fidelity QB1]
datatype: DOUBLE
permission: READ
group: Output
section: Data
show_in_measurement_dlg: True

[Assignment fidelity QB2]
datatype: DOUBLE
permission: READ
group: Output
section: Data
show_in_measurement_dlg: True

[Assignment fidelity QB3]
datatype: DOUBLE
permission: READ
group: Output
section: Data
show_in_measurement_dlg: True

[Assignment fidelity QB4]
datatype: DOUBLE
permission: READ
group: Output
section: Data
show_in_measurement_dlg: True

[Assignment fidelity QB5]
datatype: DOUBLE
permission: READ
group: Output
section: Data
show_in_measurement_dlg: True

[Assignment fidelity QB6]
datatype: DOUBLE
permission: READ
group: Output
section: Data

[Assignment fidelity QB7]
datatype: DOUBLE
permission: READ
group: Output
section: Data

[Assignment fidelity QB8]
datatype: DOUBLE
permission: READ
group: Output
section: Data

[Assignment fidelity QB9]
datatype: DOUBLE
permission: READ
group: Output
section: Data

[Average state vector]
datatype: VECTOR
permission: READ
x_name: State index
x_unit:
group: Output
section: Data
show_in_measurement_dlg: True

[QB1 state]
datatype: VECTOR
permission: READ
x_name: Repetition
x_unit:
group: Output
section: Data
show_in_measurement_dlg: True

[QB2 state]
datatype: VECTOR
permission: READ
x_name: Repetition
x_unit:
group: Output
section: Data
show_in_measurement_dlg: True

[QB3 state]
datatype: VECTOR
permission: READ
x_name: Repetition
x_unit:
group: Output
section: Data
show_in_measurement_dlg: True

[QB4 state]
datatype: VECTOR
permission: READ
x_name: Repetition
x_unit:
group: Output
section: Data
show_in_measurement_dlg: True

[QB5 state]
datatype: VECTOR
permission: READ
x_name: Repetition
x_unit:
group: Output
section: Data
show_in_measurement_dlg: True

[QB6 state]
datatype: VECTOR
permission: READ
x_name: Repetition
x_unit:
group: Output
section: Data

[QB7 state]
datatype: VECTOR
permission: READ
x_name: Repetition
x_unit:
group: Output
section: Data

[QB8 state]
datatype: VECTOR
permission: READ
x_name: Repetition
x_unit:
group: Output
section: Data

[QB9 state]
datatype: VECTOR
permission: READ
x_name: Repetition
x_unit:
group: Output
section: Data

[System state]
datatype: VECTOR
permission: READ
x_name: Repetition
x_unit:
group: Output
section: Data
show_in_measurement_dlg: True

