# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Tabor AWG

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Tabor_SE5082_AWG

# default interface and address
interface: TCPIP

# Define if the instrument can be hardware triggered
support_arm: False
support_hardware_loop: False


[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: SE5082

# Check instrument model id at startup (True or False). Default is False
check_model: True




# General VISA settings for the instrument.
[VISA settings]

timeout = 1.0

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

tcpip_specify_port: True
tcpip_port: 5025
term_char: LF


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
[Sample clock]
datatype: COMBO
def_value: Common
combo_def_1: Common
combo_def_2: Separate
cmd_def_1: ON
cmd_def_2: OFF
set_cmd: :INST:COUP:STAT
group: Clock
section: Clock

[Ch1 - Clock source]
label: Clock source
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
cmd_def_1: INT
cmd_def_2: EXT
set_cmd: :INST 1;:FREQ:RAST:SOUR
group: Clock
section: Clock

[Ch1 - Sampling rate]
label: Sampling rate
datatype: DOUBLE
unit: Hz
def_value: 1E9
set_cmd: :INST 1;:FREQ:RAST
group: Clock
section: Clock

[Ch2 - Clock source]
label: Clock source
def_value: Internal
datatype: COMBO
combo_def_1: Internal
combo_def_2: External
cmd_def_1: INT
cmd_def_2: EXT
set_cmd: :INST 2;:FREQ:RAST:SOUR
state_quant: Sample clock
state_value_1: Separate
group: Clock, Channel 2
section: Clock

[Ch2 - Sampling rate]
label: Sampling rate
datatype: DOUBLE
unit: Hz
def_value: 1E9
set_cmd: :INST 2;:FREQ:RAST
state_quant: Sample clock
state_value_1: Separate
group: Clock, Channel 2
section: Clock


[Reference]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
cmd_def_1: INT
cmd_def_2: EXT
set_cmd: :INST 1;:ROSC:SOUR
group: Reference
section: Clock

[Ref. frequency]
unit: Hz
datatype: COMBO
combo_def_1: 10 MHz
combo_def_2: 20 MHz
combo_def_3: 50 MHz
combo_def_4: 100 MHz
cmd_def_1: 10M
cmd_def_2: 20M
cmd_def_3: 50M
cmd_def_4: 100M
set_cmd: :INST 1;:ROSC:EXT:FREQ
state_quant: Reference
state_value_1: External
group: Reference
section: Clock


[Ch1 - Run mode]
label: Run mode
datatype: COMBO
def_value: Continuous
combo_def_1: Continuous
combo_def_2: Triggered
combo_def_3: Gated
group: Run mode
section: Run mode
show_in_measurement_dlg: True

[Ch1 - Trigger]
label: Trigger
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
cmd_def_1: TIM
cmd_def_2: EXT
set_cmd: :INST 1;:TRIG:SOUR
state_quant: Ch1 - Run mode
state_value_1: Triggered
group: Run mode
section: Run mode
show_in_measurement_dlg: True

[Ch1 - Trig interval]
label: Trig interval
datatype: DOUBLE
unit: s
def_value: 1E-3
state_quant: Ch1 - Trigger
state_value_1: Internal
set_cmd: :INST 1;:TRIG:TIM:TIME
group: Run mode
section: Run mode
show_in_measurement_dlg: True

[Ch2 - Run mode]
label: Run mode
datatype: COMBO
def_value: Continuous
combo_def_1: Continuous
combo_def_2: Triggered
combo_def_3: Gated
state_quant: Sample clock
state_value_1: Separate
group: Run mode, Channel 2
section: Run mode

[Ch2 - Trigger]
label: Trigger
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
cmd_def_1: TIM
cmd_def_2: EXT
set_cmd: :INST 2;:TRIG:SOUR
state_quant: Ch2 - Run mode
state_value_1: Triggered
group: Run mode, Channel 2
section: Run mode

[Ch2 - Trig interval]
label: Trig interval
datatype: DOUBLE
unit: s
def_value: 1E-3
state_quant: Ch2 - Trigger
state_value_1: Internal
set_cmd: :INST 2;:TRIG:TIM:TIME
group: Run mode, Channel 2
section: Run mode

[Trig level]
datatype: DOUBLE
unit: V
def_value: .5
set_cmd: :TRIG:LEV
group: Trig port
section: Run mode

[Trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
combo_def_3: Either
cmd_def_1: POS
cmd_def_2: NEG
cmd_def_3: EITH
set_cmd: :TRIG:SLOP
group: Trig port
section: Run mode

[Trig impedance]
datatype: COMBO
def_value: 50 Ohm
combo_def_1: 50 Ohm
combo_def_2: 10 kOhm
cmd_def_1: 50
cmd_def_2: 10K
set_cmd: :TRIG:INP:IMP
#set_cmd: :INST 1;:TRIG:INP:IMP <*>;:INST 2;:TRIG:INP:IMP <*>
#get_cmd: :TRIG:INP:IMP?
group: Trig port
section: Run mode


[Ch1 - Enabled]
label: Enabled
datatype: BOOLEAN
def_value: True
set_cmd: :INST 1;:OUTP
group: Channel 1
section: Output
show_in_measurement_dlg: True

[Ch1 - Mode]
label: Mode
datatype: COMBO
def_value: Function
combo_def_1: Function
combo_def_2: Arbitrary
cmd_def_1: FIX
cmd_def_2: USER
set_cmd: :INST 1;:FUNC:MODE
group: Channel 1
section: Output
show_in_measurement_dlg: True

[Ch1 - Function]
label: Function
datatype: COMBO
def_value: Sinusoid
combo_def_1: Sinusoid
combo_def_2: Triangle
combo_def_3: Square
combo_def_4: Ramp
combo_def_5: Sinc
combo_def_6: Gaussian
combo_def_7: Exponential
combo_def_8: Noise
combo_def_9: DC
cmd_def_1: SIN
cmd_def_2: TRI
cmd_def_3: SQU
cmd_def_4: RAMP
cmd_def_5: SINC
cmd_def_6: GAUS
cmd_def_7: EXP
cmd_def_8: NOIS
cmd_def_9: DC
set_cmd: :INST 1;:FUNC:SHAP
state_quant: Ch1 - Mode
state_value_1: Function
group: Channel 1
section: Output
show_in_measurement_dlg: True

[Ch1 - Frequency]
label: Frequency
datatype: DOUBLE
def_value: 1E6
low_lim: 0
high_lim: 2.5E9
unit: Hz
set_cmd: :INST 1;:FREQ
state_quant: Ch1 - Mode
state_value_1: Function
group: Channel 1
section: Output
show_in_measurement_dlg: True

[Ch1 - Duty cycle]
label: Duty cycle
datatype: DOUBLE
def_value: 50
low_lim: 0
high_lim: 99.99
unit: %
set_cmd: :INST 1;:SQU:DCYC
state_quant: Ch1 - Function
state_value_1: Square
group: Channel 1
section: Output

[Ch1 - Range]
label: Range
datatype: DOUBLE
def_value: 1.0
low_lim: 50E-3
high_lim: 2.0
unit: V
set_cmd: :INST 1;:VOLT
group: Channel 1
section: Output
show_in_measurement_dlg: True

[Ch1 - Offset]
label: Offset
datatype: DOUBLE
low_lim: -1
high_lim: 1
unit: V
set_cmd: :INST 1;:VOLT:OFFS
group: Channel 1
section: Output
show_in_measurement_dlg: True

[Ch1 - Sampling mode]
label: Sampling mode
datatype: COMBO
def_value: NRZ
combo_def_1: NRZ
combo_def_2: NRTZ
combo_def_3: RTZ
combo_def_4: RF
cmd_def_1: NRZ
cmd_def_2: NRTZ
cmd_def_3: RTZ
cmd_def_4: RF
set_cmd: :INST 1;:OUTP:SAMP:FORM
group: Channel 1
section: Output


[Ch2 - Enabled]
label: Enabled
datatype: BOOLEAN
def_value: True
set_cmd: :INST 2;:OUTP
group: Channel 2
section: Output
show_in_measurement_dlg: True

[Ch2 - Mode]
label: Mode
datatype: COMBO
def_value: Function
combo_def_1: Function
combo_def_2: Arbitrary
cmd_def_1: FIX
cmd_def_2: USER
set_cmd: :INST 2;:FUNC:MODE
group: Channel 2
section: Output
show_in_measurement_dlg: True

[Ch2 - Function]
label: Function
datatype: COMBO
def_value: Sinusoid
combo_def_1: Sinusoid
combo_def_2: Triangle
combo_def_3: Square
combo_def_4: Ramp
combo_def_5: Sinc
combo_def_6: Gaussian
combo_def_7: Exponential
combo_def_8: Noise
combo_def_9: DC
cmd_def_1: SIN
cmd_def_2: TRI
cmd_def_3: SQU
cmd_def_4: RAMP
cmd_def_5: SINC
cmd_def_6: GAUS
cmd_def_7: EXP
cmd_def_8: NOIS
cmd_def_9: DC
set_cmd: :INST 2;:FUNC:SHAP
state_quant: Ch2 - Mode
state_value_1: Function
group: Channel 2
section: Output
show_in_measurement_dlg: True

[Ch2 - Frequency]
label: Frequency
datatype: DOUBLE
def_value: 1E6
low_lim: 0
high_lim: 2.5E9
unit: Hz
set_cmd: :INST 2;:FREQ
state_quant: Ch2 - Mode
state_value_1: Function
group: Channel 2
section: Output
show_in_measurement_dlg: True

[Ch2 - Duty cycle]
label: Duty cycle
datatype: DOUBLE
def_value: 50
low_lim: 0
high_lim: 99.99
unit: %
set_cmd: :INST 2;:SQU:DCYC
state_quant: Ch2 - Function
state_value_1: Square
group: Channel 2
section: Output

[Ch2 - Range]
label: Range
datatype: DOUBLE
def_value: 1.0
low_lim: 50E-3
high_lim: 2.0
unit: V
set_cmd: :INST 2;:VOLT
group: Channel 2
section: Output
show_in_measurement_dlg: True

[Ch2 - Offset]
label: Offset
datatype: DOUBLE
low_lim: -1
high_lim: 1
unit: V
set_cmd: :INST 2;:VOLT:OFFS
group: Channel 2
section: Output
show_in_measurement_dlg: True

[Ch2 - Sampling mode]
label: Sampling mode
datatype: COMBO
def_value: NRZ
combo_def_1: NRZ
combo_def_2: NRTZ
combo_def_3: RTZ
combo_def_4: RF
cmd_def_1: NRZ
cmd_def_2: NRTZ
cmd_def_3: RTZ
cmd_def_4: RF
set_cmd: :INST 2;:OUTP:SAMP:FORM
group: Channel 2
section: Output



[Ch 1]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
section: Output
show_in_measurement_dlg: True
[Ch 1 - Marker 1]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
section: Output
show_in_measurement_dlg: True
[Ch 1 - Marker 2]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
section: Output
show_in_measurement_dlg: True

[Ch 2]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
section: Output
show_in_measurement_dlg: True
[Ch 2 - Marker 1]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
section: Output
show_in_measurement_dlg: True
[Ch 2 - Marker 2]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
section: Output
show_in_measurement_dlg: True

