# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Tektronix AWG

# The version string should be updated whenever changes are made to this config file
version: 1.2

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Tektronix_AWG

# default interface and address
interface: TCPIP

# Define if the instrument can be hardware triggered
support_arm: False
support_hardware_loop: True


[Model and options]
# The option section allow instruments with different options to use the same driver

# List of models supported by this driver
model_str_1: 5004
model_str_2: 5014
model_str_3: 7122

# Check instrument model id at startup (True or False). Default is False
check_model: True

# Valid model strings returned by the instrument. Default value = model_str
model_id_1: TEKTRONIX,AWG5004
model_id_2: TEKTRONIX,AWG5014
model_id_3: TEKTRONIX,AWG7122



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: True

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 5

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: :SYST:ERR?

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: 


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
[Reference]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
cmd_def_1: INT
cmd_def_2: EXT
set_cmd: :ROSC:SOUR

[Ext. frequency]
unit: Hz
datatype: DOUBLE
def_value: 10E6
set_cmd: :ROSC:FREQ
state_quant: Reference
state_value_1: External

[Sampling rate]
datatype: DOUBLE
unit: Hz
def_value: 1.2E9
set_cmd: :FREQ
show_in_measurement_dlg: True

[Run mode]
datatype: COMBO
def_value: Triggered
combo_def_1: Continuous
combo_def_2: Triggered
combo_def_3: Gated
combo_def_4: Sequence
cmd_def_1: CONT
cmd_def_2: TRIG
cmd_def_3: GAT
cmd_def_4: SEQ
set_cmd: :AWGC:RMOD
show_in_measurement_dlg: True

[Trigger]
datatype: COMBO
def_value: Internal
combo_def_1: Internal
combo_def_2: External
cmd_def_1: INT
cmd_def_2: EXT
set_cmd: :TRIG:SOUR
state_quant: Run mode
state_value_1: Triggered
show_in_measurement_dlg: True

[Trig interval]
datatype: DOUBLE
unit: s
def_value: 1E-3
state_quant: Trigger
state_value_1: Internal
set_cmd: :TRIG:TIM
show_in_measurement_dlg: True

[Trig level]
datatype: DOUBLE
unit: V
def_value: 0.5
state_quant: Trigger
state_value_1: External
set_cmd: :TRIG:LEV

[Trig slope]
datatype: COMBO
def_value: Positive
combo_def_1: Positive
combo_def_2: Negative
cmd_def_1: POS
cmd_def_2: NEG
state_quant: Trigger
state_value_1: External
set_cmd: :TRIG:SLOP

[Trig impedance]
datatype: COMBO
def_value: 1 kOhm
combo_def_1: 50 Ohm
combo_def_2: 1 kOhm
cmd_def_1: 50
cmd_def_2: 1000
state_quant: Trigger
state_value_1: External
set_cmd: :TRIG:IMP

[Send Trig]
datatype: BUTTON
state_quant: Run mode
state_value_1: Triggered
state_value_2: Sequence
set_cmd: *TRG

[Run]
datatype: BUTTON
tooltip: Set instrument to run mode
set_cmd: AWGC:RUN
show_in_measurement_dlg: True

[Ch1 - Range]
label: Range
datatype: DOUBLE
def_value: 1.0
low_lim: 0.02
high_lim: 4.5
unit: V
set_cmd: :SOUR1:VOLT
group: Channel 1
section: Channels
[Ch1 - Offset]
label: Offset
datatype: DOUBLE
unit: V
set_cmd: :SOUR1:VOLT:OFFS 
group: Channel 1
section: Channels
model_value_1: 5014
model_value_2: 5004
[Ch1 - Marker 1 High]
label: Marker 1 High
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: :SOUR1:MARK1:VOLT:HIGH
group: Channel 1
section: Channels
[Ch1 - Marker 1 Low]
label: Marker 1 Low
datatype: DOUBLE
unit: V
set_cmd: :SOUR1:MARK1:VOLT:LOW
group: Channel 1
section: Channels
[Ch1 - Marker 2 High]
label: Marker 2 High
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: :SOUR1:MARK2:VOLT:HIGH
group: Channel 1
section: Channels
[Ch1 - Marker 2 Low]
label: Marker 2 Low
datatype: DOUBLE
unit: V
set_cmd: :SOUR1:MARK2:VOLT:LOW
group: Channel 1
section: Channels

[Ch2 - Range]
label: Range
datatype: DOUBLE
def_value: 1.0
low_lim: 0.02
high_lim: 4.5
unit: V
set_cmd: :SOUR2:VOLT
group: Channel 2
section: Channels
[Ch2 - Offset]
label: Offset
datatype: DOUBLE
unit: V
set_cmd: :SOUR2:VOLT:OFFS 
group: Channel 2
section: Channels
model_value_1: 5014
model_value_2: 5004
[Ch2 - Marker 1 High]
label: Marker 1 High
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: :SOUR2:MARK1:VOLT:HIGH
group: Channel 2
section: Channels
[Ch2 - Marker 1 Low]
label: Marker 1 Low
datatype: DOUBLE
unit: V
set_cmd: :SOUR2:MARK1:VOLT:LOW
group: Channel 2
section: Channels
[Ch2 - Marker 2 High]
label: Marker 2 High
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: :SOUR2:MARK2:VOLT:HIGH
group: Channel 2
section: Channels
[Ch2 - Marker 2 Low]
label: Marker 2 Low
datatype: DOUBLE
unit: V
set_cmd: :SOUR2:MARK2:VOLT:LOW
group: Channel 2
section: Channels

[Ch3 - Range]
label: Range
datatype: DOUBLE
def_value: 1.0
low_lim: 0.02
high_lim: 4.5
unit: V
set_cmd: :SOUR3:VOLT
group: Channel 3
section: Channels
model_value_1: 5014
model_value_2: 5004
[Ch3 - Offset]
label: Offset
datatype: DOUBLE
unit: V
set_cmd: :SOUR3:VOLT:OFFS 
group: Channel 3
section: Channels
model_value_1: 5014
model_value_2: 5004
[Ch3 - Marker 1 High]
label: Marker 1 High
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: :SOUR3:MARK1:VOLT:HIGH
group: Channel 3
section: Channels
model_value_1: 5014
model_value_2: 5004
[Ch3 - Marker 1 Low]
label: Marker 1 Low
datatype: DOUBLE
unit: V
set_cmd: :SOUR3:MARK1:VOLT:LOW
group: Channel 3
section: Channels
model_value_1: 5014
model_value_2: 5004
[Ch3 - Marker 2 High]
label: Marker 2 High
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: :SOUR3:MARK2:VOLT:HIGH
group: Channel 3
section: Channels
model_value_1: 5014
model_value_2: 5004
[Ch3 - Marker 2 Low]
label: Marker 2 Low
datatype: DOUBLE
unit: V
set_cmd: :SOUR3:MARK2:VOLT:LOW
group: Channel 3
section: Channels
model_value_1: 5014
model_value_2: 5004

[Ch4 - Range]
label: Range
datatype: DOUBLE
def_value: 1.0
low_lim: 0.02
high_lim: 4.5
unit: V
set_cmd: :SOUR4:VOLT
group: Channel 4
section: Channels
model_value_1: 5014
model_value_2: 5004
[Ch4 - Offset]
label: Offset
datatype: DOUBLE
unit: V
set_cmd: :SOUR4:VOLT:OFFS 
group: Channel 4
section: Channels
model_value_1: 5014
model_value_2: 5004
[Ch4 - Marker 1 High]
label: Marker 1 High
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: :SOUR4:MARK1:VOLT:HIGH
group: Channel 4
section: Channels
model_value_1: 5014
model_value_2: 5004
[Ch4 - Marker 1 Low]
label: Marker 1 Low
datatype: DOUBLE
unit: V
set_cmd: :SOUR4:MARK1:VOLT:LOW
group: Channel 4
section: Channels
model_value_1: 5014
model_value_2: 5004
[Ch4 - Marker 2 High]
label: Marker 2 High
datatype: DOUBLE
def_value: 1.0
unit: V
set_cmd: :SOUR4:MARK2:VOLT:HIGH
group: Channel 4
section: Channels
model_value_1: 5014
model_value_2: 5004
[Ch4 - Marker 2 Low]
label: Marker 2 Low
datatype: DOUBLE
unit: V
set_cmd: :SOUR4:MARK2:VOLT:LOW
group: Channel 4
section: Channels
model_value_1: 5014
model_value_2: 5004


[Ch 1]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
show_in_measurement_dlg: True
[Ch 1 - Marker 1]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
show_in_measurement_dlg: True
[Ch 1 - Marker 2]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
show_in_measurement_dlg: True

[Ch 2]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
show_in_measurement_dlg: True
[Ch 2 - Marker 1]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
show_in_measurement_dlg: True
[Ch 2 - Marker 2]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
show_in_measurement_dlg: True

[Ch 3]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
model_value_1: 5014
model_value_2: 5004
show_in_measurement_dlg: True
[Ch 3 - Marker 1]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
model_value_1: 5014
model_value_2: 5004
show_in_measurement_dlg: True
[Ch 3 - Marker 2]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
model_value_1: 5014
model_value_2: 5004
show_in_measurement_dlg: True

[Ch 4]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
model_value_1: 5014
model_value_2: 5004
show_in_measurement_dlg: True
[Ch 4 - Marker 1]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
model_value_1: 5014
model_value_2: 5004
show_in_measurement_dlg: True
[Ch 4 - Marker 2]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Output
model_value_1: 5014
model_value_2: 5004
show_in_measurement_dlg: True
