# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Timer

# The version string should be updated whenever changes are made to this config file
version: 1.0

interface: None

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Timer

# Define that the driver is a Signal Generator
# signal_generator: True

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
[Timer]
datatype: DOUBLE
unit: s
permission: BOTH
def_value: 0
tooltip: Wait until time reaches set point. Set to zero to reset timer.

[Clock]
datatype: DOUBLE
unit: s
permission: READ
tooltip: Time elapsed since resetting the timer.

