# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: UserInput

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: UserInput

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
[floatValue]
datatype: DOUBLE
label: Float
permission: READ
tooltip: Used as read-event.

[waitForUser]
datatype: DOUBLE
label: Wait
tooltip: Used as set-event. When used in a sequence, the measurement will not continue until the user confirmed a message box. The setpoint value of the sequence will be saved.
permission: WRITE
