# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Waveform demodulation

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Waveform_demodulate

# Define that this driver is a signal generator without hardware communication 
signal_generator: True


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
[Response]
x_name: Time
x_unit: s
datatype: VECTOR_COMPLEX
permission: READ
group: Response
show_in_measurement_dlg: True

[Raw Signal]
datatype: VECTOR
permission: WRITE
group: Input
show_in_measurement_dlg: True

[Sample Rate]
datatype: DOUBLE
def_value: 50e9
group: Response
show_in_measurement_dlg: True

[Modulation Freq]
datatype: DOUBLE
def_value: 8e9
group: Response
show_in_measurement_dlg: True