# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Yokogawa 7651 DC Source

# The version string should be updated whenever changes are made to this config file
version: 1.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Yokogawa_7651



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False



# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa = True

# Reset the interface (not the instrument) at startup (True or False).  Default is False
reset: False

# Time (in seconds) before the timing out while waiting for an instrument response. Default is 5
timeout: 5

# Query instrument errors (True or False).  If True, every command sent to the device will
# be followed by an error query.  This is useful when testing new setups, but may degrade
# performance by slowing down the instrument communication. 
query_instr_errors: False 

# Bit mask for checking status byte errors (default is 255, include all errors)
# The bits signal the following errors:
# 0: Operation
# 1: Request control
# 2: Query error
# 3: Device error
# 4: Execution error
# 5: Command error
# 6: User request
# 7: Power on
error_bit_mask: 255

# SCPI string to be used when querying for instrument error messages
error_cmd: 

# Initialization commands are sent to the instrument when starting the driver
# *RST will reset the device, *CLS clears the interface
init: 

# Final commands sent to the instrument when closing the driver
final: 


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
[Function]
datatype: COMBO
def_value: Voltage
combo_def_1: Voltage
combo_def_2: Current
cmd_def_1: 1
cmd_def_2: 5
set_cmd: F<*> E

[Range (V)]
datatype: COMBO
def_value: 10 V
combo_def_1: 30 V
combo_def_2: 10 V
combo_def_3: 1 V
combo_def_4: 100 mV
combo_def_5: 10 mV
cmd_def_1: 6
cmd_def_2: 5
cmd_def_3: 4
cmd_def_4: 3
cmd_def_5: 2
set_cmd: R<*> E
state_quant: Function
state_value_1: Voltage

[Range (I)]
datatype: COMBO
def_value: 1 mA
combo_def_1: 100 mA
combo_def_2: 10 mA
combo_def_3: 1 mA
cmd_def_1: 6
cmd_def_2: 5
cmd_def_3: 4
set_cmd: R<*> E
state_quant: Function
state_value_1: Current

[Output]
datatype: BOOLEAN
def_value: False
set_cmd: O<*> E

[Voltage]
datatype: DOUBLE
unit: V
set_cmd: S<*> E
sweep_cmd: M1 PI<st> SW<st> PRS S<*> PRE RU2
stop_cmd: RU0
get_cmd: H0 OD
state_quant: Function
state_value_1: Voltage

[Current]
datatype: DOUBLE
unit: A
set_cmd: S<*> E
sweep_cmd: M1 PI<st> SW<st> PRS S<*> PRE RU2
stop_cmd: RU0
get_cmd: H0 OD
state_quant: Function
state_value_1: Current

