# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Z-Crosstalk Compensation

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Z-Crosstalk_Compensation

# Define that this driver is a signal generator without hardware communication
signal_generator: True


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
[Type of Control Knob]
datatype: COMBO
def_value: Current
combo_def_1: Current
combo_def_2: Voltage
group: Setting
section: Setting


[Number of Z-Control Lines]
datatype: COMBO
def_value: 3
combo_def_1: 2
combo_def_2: 3
group: Setting
section: Setting


[M11]
datatype: double
def_value: 1
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
group: Crosstalk Matrix
section: Setting

[M12]
datatype: double
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
group: Crosstalk Matrix
section: Setting

[M13]
datatype: double
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
group: Crosstalk Matrix
section: Setting

[M21]
datatype: double
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
group: Crosstalk Matrix
section: Setting

[M22]
datatype: double
def_value: 1
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
group: Crosstalk Matrix
section: Setting

[M23]
datatype: double
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
group: Crosstalk Matrix
section: Setting

[M31]
datatype: double
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
group: Crosstalk Matrix
section: Setting

[M32]
datatype: double
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
group: Crosstalk Matrix
section: Setting

[M33]
datatype: double
def_value: 1
state_quant: Number of Z-Control Lines
state_value_1: 3
group: Crosstalk Matrix
section: Setting




[Minv11]
datatype: double
def_value: 1
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
group: Crosstalk Matrix (inverse)
section: Setting

[Minv12]
datatype: double
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
group: Crosstalk Matrix (inverse)
section: Setting

[Minv13]
datatype: double
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
group: Crosstalk Matrix (inverse)
section: Setting

[Minv21]
datatype: double
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
group: Crosstalk Matrix (inverse)
section: Setting

[Minv22]
datatype: double
def_value: 1
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
group: Crosstalk Matrix (inverse)
section: Setting

[Minv23]
datatype: double
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
group: Crosstalk Matrix (inverse)
section: Setting

[Minv31]
datatype: double
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
group: Crosstalk Matrix (inverse)
section: Setting

[Minv32]
datatype: double
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
group: Crosstalk Matrix (inverse)
section: Setting

[Minv33]
datatype: double
def_value: 1
state_quant: Number of Z-Control Lines
state_value_1: 3
group: Crosstalk Matrix (inverse)
section: Setting

[Flux Bias 1]
datatype: double
def_value: 0
unit: Phi0
permission: WRITE
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
group: Input
section: Output

[Flux Bias 2]
datatype: double
def_value: 0
unit: Phi0
permission: WRITE
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
group: Input
section: Output

[Flux Bias 3]
datatype: double
unit: Phi0
permission: WRITE
def_value: 0
state_quant: Number of Z-Control Lines
state_value_1: 3
group: Input
section: Output


[Control Knob 1]
datatype: double
def_value: 0
permission: BOTH
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
group: Output
section: Output

[Control Knob 2]
datatype: double
def_value: 0
permission: BOTH
state_quant: Number of Z-Control Lines
state_value_1: 2
state_value_2: 3
group: Output
section: Output

[Control Knob 3]
datatype: double
def_value: 0
permission: BOTH
state_quant: Number of Z-Control Lines
state_value_1: 3
group: Output
section: Output

[Do Conversion]
datatype: BUTTON
group: Output
section: Output