# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Zurich Instruments UHF

# The version string should be updated whenever changes are made to this config file
version: 1.1

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Zurich Instruments UHF



[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: UHF

check_option: false
option_str_1: MOD


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
#######################################################################
### Signal Inputs #####################################################
#######################################################################

[SigIn1AC]
label: Input 1 AC Coupling
datatype: BOOLEAN
group: Signal Input 1
section: Signal Input
get_cmd: /%s/sigins/0/ac

[SigIn1Range]
label: Input 1 Range
datatype: DOUBLE
unit: V
group: Signal Input 1
section: Signal Input
get_cmd: /%s/sigins/0/range

[SigIn2AC]
label: Input 2 AC Coupling
datatype: BOOLEAN
group: Signal Input 2
section: Signal Input
get_cmd: /%s/sigins/1/ac

[SigIn2Range]
label: Input 2 Range
datatype: DOUBLE
unit: V
group: Signal Input 2
section: Signal Input
get_cmd: /%s/sigins/1/range

#######################################################################
### Oscillators #######################################################
#######################################################################

[Oscillator1Frequency]
label: Oscillator 1 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 1
section: Oscillator
get_cmd: /%s/oscs/0/freq

[Oscillator2Frequency]
label: Oscillator 2 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 2
section: Oscillator
get_cmd: /%s/oscs/1/freq

[Oscillator3Frequency]
label: Oscillator 3 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 3
section: Oscillator
get_cmd: /%s/oscs/2/freq

[Oscillator4Frequency]
label: Oscillator 4 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 4
section: Oscillator
get_cmd: /%s/oscs/3/freq

[Oscillator5Frequency]
label: Oscillator 5 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 5
section: Oscillator
get_cmd: /%s/oscs/4/freq

[Oscillator6Frequency]
label: Oscillator 6 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 6
section: Oscillator
get_cmd: /%s/oscs/5/freq

[Oscillator7Frequency]
label: Oscillator 7 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 7
section: Oscillator
get_cmd: /%s/oscs/6/freq

[Oscillator8Frequency]
label: Oscillator 8 Frequency
datatype: DOUBLE
unit: Hz
group: Oscillator 8
section: Oscillator
get_cmd: /%s/oscs/7/freq


#######################################################################
### Signal Outputs ####################################################
#######################################################################

[SigOut1On]
label: Signal Out 1 On
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/on

[SigOut1Offset]
label: Signal Out 1 Offset
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/offset

[Out1SigOut1On]
label: Output 1 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/0

[Out1SigOut1Amp]
label: Amplitude 1 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/0

[Out2SigOut1On]
label: Output 2 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/1

[Out2SigOut1Amp]
label: Amplitude 2 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/1

[Out3SigOut1On]
label: Output 3 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/2

[Out3SigOut1Amp]
label: Amplitude 3 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/2

[Out4SigOut1On]
label: Output 4 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/3

[Out4SigOut1Amp]
label: Amplitude 4 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/3

[Out5SigOut1On]
label: Output 5 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/4

[Out5SigOut1Amp]
label: Amplitude 5 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/4

[Out6SigOut1On]
label: Output 6 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/5

[Out6SigOut1Amp]
label: Amplitude 6 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/5

[Out7SigOut1On]
label: Output 7 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/6

[Out7SigOut1Amp]
label: Amplitude 7 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/6

[Out8SigOut1On]
label: Output 8 to Signal Out 1
datatype: BOOLEAN
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/enables/7

[Out8SigOut1Amp]
label: Amplitude 8 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 1
section: Signal Output
get_cmd: /%s/sigouts/0/amplitudes/7

[SigOut2On]
label: Signal Out 2 On
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/on

[SigOut2Offset]
label: Signal Out 2 Offset
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/offset

[Out1SigOut2On]
label: Output 1 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/0

[Out1SigOut2Amp]
label: Amplitude 1 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/0

[Out2SigOut2On]
label: Output 2 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/1

[Out2SigOut2Amp]
label: Amplitude 2 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/1

[Out3SigOut2On]
label: Output 3 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/2

[Out3SigOut2Amp]
label: Amplitude 3 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/2

[Out4SigOut2On]
label: Output 4 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/3

[Out4SigOut2Amp]
label: Amplitude 4 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/3

[Out5SigOut2On]
label: Output 5 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/4

[Out5SigOut2Amp]
label: Amplitude 5 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/4

[Out6SigOut2On]
label: Output 6 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/5

[Out6SigOut2Amp]
label: Amplitude 6 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/5

[Out7SigOut2On]
label: Output 7 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/6

[Out7SigOut2Amp]
label: Amplitude 7 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/6

[Out8SigOut2On]
label: Output 8 to Signal Out 2
datatype: BOOLEAN
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/enables/7

[Out8SigOut2Amp]
label: Amplitude 8 (Vpk)
datatype: DOUBLE
unit: V
sweep_cmd: ***REPEAT SET***
group: Signal Output 2
section: Signal Output
get_cmd: /%s/sigouts/1/amplitudes/7


#######################################################################
### Demodulator read-out channels #####################################
#######################################################################

[Demod1On]
label: Demodulator 1 Enabled
datatype: BOOLEAN
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/enable

[Demod1X]
label: Demodulator 1 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[Demod1Y]
label: Demodulator 1 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[Demod1R]
label: Demodulator 1 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[Demod1phi]
label: Demodulator 1 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[Demod2On]
label: Demodulator 2 Enabled
datatype: BOOLEAN
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/enable

[Demod2X]
label: Demodulator 2 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[Demod2Y]
label: Demodulator 2 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[Demod2R]
label: Demodulator 2 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[Demod2phi]
label: Demodulator 2 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[Demod3On]
label: Demodulator 3 Enabled
datatype: BOOLEAN
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/enable

[Demod3X]
label: Demodulator 3 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[Demod3Y]
label: Demodulator 3 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[Demod3R]
label: Demodulator 3 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[Demod3phi]
label: Demodulator 3 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[Demod4On]
label: Demodulator 4 Enabled
datatype: BOOLEAN
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/enable

[Demod4X]
label: Demodulator 4 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[Demod4Y]
label: Demodulator 4 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[Demod4R]
label: Demodulator 4 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[Demod4phi]
label: Demodulator 4 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[Demod5On]
label: Demodulator 5 Enabled
datatype: BOOLEAN
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/enable

[Demod5X]
label: Demodulator 5 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[Demod5Y]
label: Demodulator 5 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[Demod5R]
label: Demodulator 5 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[Demod5phi]
label: Demodulator 5 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[Demod6On]
label: Demodulator 6 Enabled
datatype: BOOLEAN
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/enable

[Demod6X]
label: Demodulator 6 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[Demod6Y]
label: Demodulator 6 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[Demod6R]
label: Demodulator 6 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[Demod6phi]
label: Demodulator 6 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[Demod7On]
label: Demodulator 7 Enabled
datatype: BOOLEAN
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/enable

[Demod7X]
label: Demodulator 7 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[Demod7Y]
label: Demodulator 7 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[Demod7R]
label: Demodulator 7 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[Demod7phi]
label: Demodulator 7 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[Demod8On]
label: Demodulator 8 Enabled
datatype: BOOLEAN
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/enable

[Demod8X]
label: Demodulator 8 X
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True

[Demod8Y]
label: Demodulator 8 Y
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True

[Demod8R]
label: Demodulator 8 R
datatype: DOUBLE
unit: V
permission: READ
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True

[Demod8phi]
label: Demodulator 8 Phi
datatype: DOUBLE
unit: deg
permission: READ
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True



#######################################################################
### Demodulator settings ##############################################
#######################################################################

[Demod1Osc]
label: Demodulator 1 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/oscselect

[Demod1RefPhase]
label: Demodulator 1 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/phaseshift

[Demod1TC]
label: Demodulator 1 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 1
section: Demodulator
get_cmd: /%s/demods/0/timeconstant

[Demod2Osc]
label: Demodulator 2 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/oscselect

[Demod2RefPhase]
label: Demodulator 2 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/phaseshift

[Demod2TC]
label: Demodulator 2 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 2
section: Demodulator
get_cmd: /%s/demods/1/timeconstant

[Demod3Osc]
label: Demodulator 3 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/oscselect

[Demod3RefPhase]
label: Demodulator 3 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/phaseshift

[Demod3TC]
label: Demodulator 3 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 3
section: Demodulator
get_cmd: /%s/demods/2/timeconstant

[Demod4Osc]
label: Demodulator 4 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/oscselect

[Demod4RefPhase]
label: Demodulator 4 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/phaseshift

[Demod4TC]
label: Demodulator 4 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 4
section: Demodulator
get_cmd: /%s/demods/3/timeconstant

[Demod5Osc]
label: Demodulator 5 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/oscselect

[Demod5RefPhase]
label: Demodulator 5 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/phaseshift

[Demod5TC]
label: Demodulator 5 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 5
section: Demodulator
get_cmd: /%s/demods/4/timeconstant

[Demod6Osc]
label: Demodulator 6 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/oscselect

[Demod6RefPhase]
label: Demodulator 6 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/phaseshift

[Demod6TC]
label: Demodulator 6 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 6
section: Demodulator
get_cmd: /%s/demods/5/timeconstant

[Demod7Osc]
label: Demodulator 7 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/oscselect

[Demod7RefPhase]
label: Demodulator 7 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/phaseshift

[Demod7TC]
label: Demodulator 7 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 7
section: Demodulator
get_cmd: /%s/demods/6/timeconstant

[Demod8Osc]
label: Demodulator 8 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/oscselect

[Demod8RefPhase]
label: Demodulator 8 Reference Phase
datatype: DOUBLE
unit: deg
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/phaseshift

[Demod8TC]
label: Demodulator 8 Time Constant
datatype: DOUBLE
unit: s
group: Demodulator 8
section: Demodulator
get_cmd: /%s/demods/7/timeconstant


#######################################################################
### Trace channels ####################################################
#######################################################################

[TraceLength]
label: Trace Length
datatype: DOUBLE
unit: s
section: Trace

[TraceStep]
label: Trace Step
tooltip: If enabled, during the trace the channel defined in TraceStepChannel will be set to TraceStepSetpointA after TraceStepDelayA and then to TraceStepSetpointB after TraceStepDelayB.
datatype: BOOLEAN
def_value: False
group: Trace Step
section: Trace

[TraceStepChannel]
label: Trace Step Channel
tooltip: If enabled, during the trace the channel defined in TraceStepChannel will be set to TraceStepSetpointA after TraceStepDelayA and then to TraceStepSetpointB after TraceStepDelayB.
datatype: COMBO
combo_def_1: Oscillator 1 Frequency
combo_def_2: Oscillator 2 Frequency
combo_def_3: Oscillator 3 Frequency
combo_def_4: Oscillator 4 Frequency
combo_def_5: Oscillator 5 Frequency
combo_def_6: Oscillator 6 Frequency
combo_def_7: Oscillator 7 Frequency
combo_def_8: Oscillator 8 Frequency
combo_def_9: Output 1 Amplitude 1
combo_def_10: Output 1 Amplitude 2
combo_def_11: Output 1 Amplitude 3
combo_def_12: Output 1 Amplitude 4
combo_def_13: Output 1 Amplitude 5
combo_def_14: Output 1 Amplitude 6
combo_def_15: Output 1 Amplitude 7
combo_def_16: Output 1 Amplitude 8
combo_def_17: Output 2 Amplitude 1
combo_def_18: Output 2 Amplitude 2
combo_def_19: Output 2 Amplitude 3
combo_def_20: Output 2 Amplitude 4
combo_def_21: Output 2 Amplitude 5
combo_def_22: Output 2 Amplitude 6
combo_def_23: Output 2 Amplitude 7
combo_def_24: Output 2 Amplitude 8
cmd_def_1: /%s/oscs/0/freq
cmd_def_2: /%s/oscs/1/freq
cmd_def_3: /%s/oscs/2/freq
cmd_def_4: /%s/oscs/3/freq
cmd_def_5: /%s/oscs/4/freq
cmd_def_6: /%s/oscs/5/freq
cmd_def_7: /%s/oscs/6/freq
cmd_def_8: /%s/oscs/7/freq
cmd_def_9: /%s/sigouts/0/amplitudes/0
cmd_def_10: /%s/sigouts/0/amplitudes/1
cmd_def_11: /%s/sigouts/0/amplitudes/2
cmd_def_12: /%s/sigouts/0/amplitudes/3
cmd_def_13: /%s/sigouts/0/amplitudes/4
cmd_def_14: /%s/sigouts/0/amplitudes/5
cmd_def_15: /%s/sigouts/0/amplitudes/6
cmd_def_16: /%s/sigouts/0/amplitudes/7
cmd_def_17: /%s/sigouts/1/amplitudes/0
cmd_def_18: /%s/sigouts/1/amplitudes/1
cmd_def_19: /%s/sigouts/1/amplitudes/2
cmd_def_20: /%s/sigouts/1/amplitudes/3
cmd_def_21: /%s/sigouts/1/amplitudes/4
cmd_def_22: /%s/sigouts/1/amplitudes/5
cmd_def_23: /%s/sigouts/1/amplitudes/6
cmd_def_24: /%s/sigouts/1/amplitudes/7
state_quant: TraceStep
state_value_1: True
group: Trace Step
section: Trace

[TraceStepSetpointA]
label: Trace Step Setpoint A
tooltip: If enabled, during the trace the channel defined in TraceStepChannel will be set to TraceStepSetpointA after TraceStepDelayA and then to TraceStepSetpointB after TraceStepDelayB.
datatype: DOUBLE
state_quant: TraceStep
state_value_1: True
group: Trace Step
section: Trace

[TraceStepDelayA]
label: Trace Step Delay A
tooltip: If enabled, during the trace the channel defined in TraceStepChannel will be set to TraceStepSetpointA after TraceStepDelayA and then to TraceStepSetpointB after TraceStepDelayB.
datatype: DOUBLE
unit: s
state_quant: TraceStep
state_value_1: True
group: Trace Step
section: Trace

[TraceStepSetpointB]
label: Trace Step Setpoint B
tooltip: If enabled, during the trace the channel defined in TraceStepChannel will be set to TraceStepSetpointA after TraceStepDelayA and then to TraceStepSetpointB after TraceStepDelayB.
datatype: DOUBLE
state_quant: TraceStep
state_value_1: True
group: Trace Step
section: Trace

[TraceStepDelayB]
label: Trace Step Delay B
tooltip: If enabled, during the trace the channel defined in TraceStepChannel will be set to TraceStepSetpointA after TraceStepDelayA and then to TraceStepSetpointB after TraceStepDelayB.
datatype: DOUBLE
unit: s
state_quant: TraceStep
state_value_1: True
group: Trace Step
section: Trace

[Demod1SampleRate]
label: Demodulator 1 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 1
section: Trace
get_cmd: /%s/demods/0/rate

[TraceDemod1X]
label: Demodulator 1 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 1
section: Trace
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod1Y]
label: Demodulator 1 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 1
section: Trace
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod1R]
label: Demodulator 1 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 1
section: Trace
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod1phi]
label: Demodulator 1 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 1
section: Trace
get_cmd: /%s/demods/0/sample
state_quant: Demod1On
state_value_1: True
show_in_measurement_dlg: True

[Demod2SampleRate]
label: Demodulator 2 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 2
section: Trace
get_cmd: /%s/demods/1/rate

[TraceDemod2X]
label: Demodulator 2 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 2
section: Trace
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod2Y]
label: Demodulator 2 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 2
section: Trace
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod2R]
label: Demodulator 2 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 2
section: Trace
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod2phi]
label: Demodulator 2 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 2
section: Trace
get_cmd: /%s/demods/1/sample
state_quant: Demod2On
state_value_1: True
show_in_measurement_dlg: True

[Demod3SampleRate]
label: Demodulator 3 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 3
section: Trace
get_cmd: /%s/demods/2/rate

[TraceDemod3X]
label: Demodulator 3 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 3
section: Trace
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod3Y]
label: Demodulator 3 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 3
section: Trace
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod3R]
label: Demodulator 3 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 3
section: Trace
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod3phi]
label: Demodulator 3 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 3
section: Trace
get_cmd: /%s/demods/2/sample
state_quant: Demod3On
state_value_1: True
show_in_measurement_dlg: True

[Demod4SampleRate]
label: Demodulator 4 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 4
section: Trace
get_cmd: /%s/demods/3/rate

[TraceDemod4X]
label: Demodulator 4 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 4
section: Trace
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod4Y]
label: Demodulator 4 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 4
section: Trace
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod4R]
label: Demodulator 4 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 4
section: Trace
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod4phi]
label: Demodulator 4 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 4
section: Trace
get_cmd: /%s/demods/3/sample
state_quant: Demod4On
state_value_1: True
show_in_measurement_dlg: True

[Demod5SampleRate]
label: Demodulator 5 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 5
section: Trace
get_cmd: /%s/demods/4/rate

[TraceDemod5X]
label: Demodulator 5 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 5
section: Trace
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod5Y]
label: Demodulator 5 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 5
section: Trace
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod5R]
label: Demodulator 5 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 5
section: Trace
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod5phi]
label: Demodulator 5 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 5
section: Trace
get_cmd: /%s/demods/4/sample
state_quant: Demod5On
state_value_1: True
show_in_measurement_dlg: True

[Demod6SampleRate]
label: Demodulator 6 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 6
section: Trace
get_cmd: /%s/demods/5/rate

[TraceDemod6X]
label: Demodulator 6 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 6
section: Trace
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod6Y]
label: Demodulator 6 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 6
section: Trace
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod6R]
label: Demodulator 6 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 6
section: Trace
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod6phi]
label: Demodulator 6 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 6
section: Trace
get_cmd: /%s/demods/5/sample
state_quant: Demod6On
state_value_1: True
show_in_measurement_dlg: True

[Demod7SampleRate]
label: Demodulator 7 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 7
section: Trace
get_cmd: /%s/demods/6/rate

[TraceDemod7X]
label: Demodulator 7 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 7
section: Trace
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod7Y]
label: Demodulator 7 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 7
section: Trace
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod7R]
label: Demodulator 7 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 7
section: Trace
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod7phi]
label: Demodulator 7 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 7
section: Trace
get_cmd: /%s/demods/6/sample
state_quant: Demod7On
state_value_1: True
show_in_measurement_dlg: True

[Demod8SampleRate]
label: Demodulator 8 Sample Rate
datatype: DOUBLE
unit: Sa/s
group: Trace Demodulator 8
section: Trace
get_cmd: /%s/demods/7/rate

[TraceDemod8X]
label: Demodulator 8 X
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 8
section: Trace
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod8Y]
label: Demodulator 8 Y
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 8
section: Trace
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod8R]
label: Demodulator 8 R
datatype: VECTOR
unit: V
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 8
section: Trace
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True

[TraceDemod8phi]
label: Demodulator 8 Phi
datatype: VECTOR
x_name: Time
x_unit: s
permission: READ
group: Trace Demodulator 8
section: Trace
get_cmd: /%s/demods/7/sample
state_quant: Demod8On
state_value_1: True
show_in_measurement_dlg: True


#######################################################################
### Modulators ########################################################
#######################################################################

[Mod1On]
label: Modulator 1 Enable
datatype: BOOLEAN
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/enable
option_value_1: MOD

[Mod1Mode]
label: Modulator 1 Mode
datatype: COMBO
combo_def_1: AM
combo_def_2: FM
combo_def_3: Manual
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/mode
option_value_1: MOD

[Mod1SB1Mode]
label: Modulator 1 Sideband 1 Mode
datatype: COMBO
combo_def_1: Off
combo_def_2: C+M
combo_def_3: C-M
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/sidebands/0/mode
option_value_1: MOD
state_quant: Mod1Mode
state_value_1: Manual

[Mod1SB2Mode]
label: Modulator 1 Sideband 2 Mode
datatype: COMBO
combo_def_1: Off
combo_def_2: C+M
combo_def_3: C-M
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/sidebands/1/mode
option_value_1: MOD
state_quant: Mod1Mode
state_value_1: Manual

[Mod1Osc]
label: Modulator 1 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/carrier/oscselect
option_value_1: MOD

[Mod1SB1Osc]
label: Modulator 1 Sideband 1 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/sidebands/0/oscselect
option_value_1: MOD

[Mod1SB2Osc]
label: Modulator 1 Sideband 2 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Modulator 1
section: Modulators
get_cmd: /%s/mods/0/sidebands/1/oscselect
option_value_1: MOD
state_quant: Mod1Mode
state_value_1: Manual

[Mod1Phase]
label: Modulator 1 Phase
datatype: DOUBLE
unit: deg
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/carrier/phaseshift
option_value_1: MOD

[Mod1SB1Phase]
label: Modulator 1 Sideband 1 Phase
datatype: DOUBLE
unit: deg
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/sidebands/0/phaseshift
option_value_1: MOD

[Mod1SB2Phase]
label: Modulator 1 Sideband 2 Phase
datatype: DOUBLE
unit: deg
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/sidebands/1/phaseshift
option_value_1: MOD
state_quant: Mod1Mode
state_value_1: Manual

[Mod1TC]
label: Modulator 1 Time Constant
datatype: DOUBLE
unit: s
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/carrier/timeconstant
option_value_1: MOD

[Mod1SB1TC]
label: Modulator 1 Sideband 1 Time Constant
datatype: DOUBLE
unit: s
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/sidebands/0/timeconstant
option_value_1: MOD

[Mod1SB2TC]
label: Modulator 1 Sideband 2 Time Constant
datatype: DOUBLE
unit: s
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/sidebands/1/timeconstant
option_value_1: MOD
state_quant: Mod1Mode
state_value_1: Manual

[Mod1OutAmp]
label: Modulator 1 Output Amp
datatype: DOUBLE
unit: V
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/carrier/amplitude
option_value_1: MOD

[Mod1SB1OutAmp]
label: Modulator 1 Sideband 1 Output Amp
datatype: DOUBLE
unit: V
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/sidebands/0/amplitude
option_value_1: MOD

[Mod1SB2OutAmp]
label: Modulator 1 Sideband 2 Output Amp
datatype: DOUBLE
unit: V
group: Modulator 1
section: Modulator
get_cmd: /%s/mods/0/sidebands/1/amplitude
option_value_1: MOD
state_quant: Mod1Mode
state_value_1: Manual

[Mod2On]
label: Modulator 2 Enable
datatype: BOOLEAN
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/enable
option_value_1: MOD

[Mod2Mode]
label: Modulator 2 Mode
datatype: COMBO
combo_def_1: AM
combo_def_2: FM
combo_def_3: Manual
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/mode
option_value_1: MOD

[Mod2SB1Mode]
label: Modulator 2 Sideband 1 Mode
datatype: COMBO
combo_def_1: Off
combo_def_2: C+M
combo_def_3: C-M
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/sidebands/0/mode
option_value_1: MOD
state_quant: Mod2Mode
state_value_1: Manual

[Mod2SB2Mode]
label: Modulator 2 Sideband 2 Mode
datatype: COMBO
combo_def_1: Off
combo_def_2: C+M
combo_def_3: C-M
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/sidebands/1/mode
option_value_1: MOD
state_quant: Mod2Mode
state_value_1: Manual

[Mod2Osc]
label: Modulator 2 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/carrier/oscselect
option_value_1: MOD

[Mod2SB1Osc]
label: Modulator 2 Sideband 1 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/sidebands/0/oscselect
option_value_1: MOD

[Mod2SB2Osc]
label: Modulator 2 Sideband 2 Oscillator
datatype: COMBO
combo_def_1: Oscillator 1
combo_def_2: Oscillator 2
combo_def_3: Oscillator 3
combo_def_4: Oscillator 4
combo_def_5: Oscillator 5
combo_def_6: Oscillator 6
combo_def_7: Oscillator 7
combo_def_8: Oscillator 8
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 3
cmd_def_5: 4
cmd_def_6: 5
cmd_def_7: 6
cmd_def_8: 7
group: Modulator 2
section: Modulators
get_cmd: /%s/mods/1/sidebands/1/oscselect
option_value_1: MOD
state_quant: Mod2Mode
state_value_1: Manual

[Mod2Phase]
label: Modulator 2 Phase
datatype: DOUBLE
unit: deg
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/carrier/phaseshift
option_value_1: MOD

[Mod2SB1Phase]
label: Modulator 2 Sideband 1 Phase
datatype: DOUBLE
unit: deg
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/sidebands/0/phaseshift
option_value_1: MOD

[Mod2SB2Phase]
label: Modulator 2 Sideband 2 Phase
datatype: DOUBLE
unit: deg
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/sidebands/1/phaseshift
option_value_1: MOD
state_quant: Mod2Mode
state_value_1: Manual

[Mod2TC]
label: Modulator 2 Time Constant
datatype: DOUBLE
unit: s
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/carrier/timeconstant
option_value_1: MOD

[Mod2SB1TC]
label: Modulator 2 Sideband 1 Time Constant
datatype: DOUBLE
unit: s
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/sidebands/0/timeconstant
option_value_1: MOD

[Mod2SB2TC]
label: Modulator 2 Sideband 2 Time Constant
datatype: DOUBLE
unit: s
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/sidebands/1/timeconstant
option_value_1: MOD
state_quant: Mod2Mode
state_value_1: Manual

[Mod2OutAmp]
label: Modulator 2 Output Amp
datatype: DOUBLE
unit: V
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/carrier/amplitude
option_value_1: MOD

[Mod2SB1OutAmp]
label: Modulator 2 Sideband 1 Output Amp
datatype: DOUBLE
unit: V
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/sidebands/0/amplitude
option_value_1: MOD

[Mod2SB2OutAmp]
label: Modulator 2 Sideband 2 Output Amp
datatype: DOUBLE
unit: V
group: Modulator 2
section: Modulator
get_cmd: /%s/mods/1/sidebands/1/amplitude
option_value_1: MOD
state_quant: Mod2Mode
state_value_1: Manual
