# Instrument driver configuration file.

[General settings]

# The name is shown in all the configuration windows
name: Zurich Instruments HDAWG

# The version string should be updated whenever changes are made to this config file
version: 1.0

# Name of folder containing the code defining a custom driver. Do not define this item
# or leave it blank for any standard driver based on the built-in VISA interface.
driver_path: Zurich_Instruments_HDAWG


interface: Other
address: <autodetect>

[Model and options]
# The option section allow instruments with different options to use the same driver

# Check instrument model id at startup (True or False). Default is False
check_model: False

# List of models supported by this driver
model_str_1: HDAWG

check_option: false


# General VISA settings for the instrument.
[VISA settings]

# Enable or disable communication over the VISA protocol (True or False)
# If False, the driver will not perform any operations (unless there is a custom driver).
use_visa: False

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
#######################################################################
### Sequence ##########################################################
#######################################################################

[Channel grouping]
datatype: COMBO
combo_def_1: MDS
combo_def_2: 4 x 2
combo_def_3: 2 x 4
combo_def_4: 1 x 8
cmd_def_1: -1
cmd_def_2: 0
cmd_def_3: 1
cmd_def_4: 2
def_value: 1 x 8
group: Sequencer
section: Setup
get_cmd: /system/awg/channelgrouping

[Run mode, group 1]
datatype: COMBO
combo_def_1: Internal trigger
combo_def_2: External trigger
def_value: Internal trigger
tooltip: For external trigger, use Trigger 1 defined below to trigger the AWG
group: Sequencer
section: Setup

[Trig period, group 1]
datatype: DOUBLE
def_value: 100E-6
low_lim: 100E-9
unit: s
state_quant: Run mode, group 1
state_value_1: Internal trigger
group: Sequencer
section: Setup

[Buffer length, group 1]
datatype: DOUBLE
def_value: 100E-6
low_lim: 100E-9
unit: s
state_quant: Run mode, group 1
state_value_1: External trigger
tooltip: Must be longer than the longest waveform, but shorter than the trig period
group: Sequencer
section: Setup

[Sampling rate, group 1]
datatype: COMBO
combo_def_1: 2.4 GHz
combo_def_2: 1.2 GHz
combo_def_3: 600 MHz
combo_def_4: 300 MHz
combo_def_5: 150 MHz
combo_def_6: 75 MHz
combo_def_7: 37.5 MHz
combo_def_8: 18.75 MHz
combo_def_9: 9.37 MHz
combo_def_10: 4.68 MHz
combo_def_11: 2.34 MHz
combo_def_12: 1.17 MHz
combo_def_13: 585.93 kHz
combo_def_14: 292.96 kHz
group: Clock
section: Setup
tooltip: Sampling rate for channels 1-2, 1-4, or 1-8
get_cmd: /awgs/0/time

[Sampling rate, group 2]
datatype: COMBO
combo_def_1: 2.4 GHz
combo_def_2: 1.2 GHz
combo_def_3: 600 MHz
combo_def_4: 300 MHz
combo_def_5: 150 MHz
combo_def_6: 75 MHz
combo_def_7: 37.5 MHz
combo_def_8: 18.75 MHz
combo_def_9: 9.37 MHz
combo_def_10: 4.68 MHz
combo_def_11: 2.34 MHz
combo_def_12: 1.17 MHz
combo_def_13: 585.93 kHz
combo_def_14: 292.96 kHz
group: Clock
section: Setup
state_quant: Channel grouping
state_value_1: 4 x 2
tooltip: Sampling rate for channels 3-4
get_cmd: /awgs/1/time

[Sampling rate, group 3]
datatype: COMBO
combo_def_1: 2.4 GHz
combo_def_2: 1.2 GHz
combo_def_3: 600 MHz
combo_def_4: 300 MHz
combo_def_5: 150 MHz
combo_def_6: 75 MHz
combo_def_7: 37.5 MHz
combo_def_8: 18.75 MHz
combo_def_9: 9.37 MHz
combo_def_10: 4.68 MHz
combo_def_11: 2.34 MHz
combo_def_12: 1.17 MHz
combo_def_13: 585.93 kHz
combo_def_14: 292.96 kHz
group: Clock
section: Setup
state_quant: Channel grouping
state_value_1: 4 x 2
state_value_2: 2 x 4
tooltip: Sampling rate for channels 5-6 or 5-8
get_cmd: /awgs/2/time

[Sampling rate, group 4]
datatype: COMBO
combo_def_1: 2.4 GHz
combo_def_2: 1.2 GHz
combo_def_3: 600 MHz
combo_def_4: 300 MHz
combo_def_5: 150 MHz
combo_def_6: 75 MHz
combo_def_7: 37.5 MHz
combo_def_8: 18.75 MHz
combo_def_9: 9.37 MHz
combo_def_10: 4.68 MHz
combo_def_11: 2.34 MHz
combo_def_12: 1.17 MHz
combo_def_13: 585.93 kHz
combo_def_14: 292.96 kHz
group: Clock
section: Setup
state_quant: Channel grouping
state_value_1: 4 x 2
tooltip: Sampling rate for channels 7-8
get_cmd: /awgs/3/time

[Reference clock]
datatype: COMBO
combo_def_1: Internal
combo_def_2: External
group: Clock
section: Setup
get_cmd: /system/clocks/referenceclock/source


[Group 1 - Trigger 1]
label: Trigger 1
datatype: COMBO
combo_def_1: Trigger in 1
combo_def_2: Trigger in 2
combo_def_3: Trigger in 3
combo_def_4: Trigger in 4
combo_def_5: Trigger in 5
combo_def_6: Trigger in 6
combo_def_7: Trigger in 7
combo_def_8: Trigger in 8
group: Triggers, group 1
tooltip: Trigger for the AWG when "Run mode" is set to "External trigger"
section: Setup
get_cmd: /awgs/0/auxtriggers/0/channel

[Group 1 - Slope trigger 1]
label: Slope trigger 1
datatype: COMBO
combo_def_1: Level
combo_def_2: Rise
combo_def_3: Fall
combo_def_4: Both
group: Triggers, group 1
section: Setup
get_cmd: /awgs/0/auxtriggers/0/slope

[Group 1 - Trigger 2]
label: Trigger 2
datatype: COMBO
combo_def_1: Trigger in 1
combo_def_2: Trigger in 2
combo_def_3: Trigger in 3
combo_def_4: Trigger in 4
combo_def_5: Trigger in 5
combo_def_6: Trigger in 6
combo_def_7: Trigger in 7
combo_def_8: Trigger in 8
group: Triggers, group 1
section: Setup
get_cmd: /awgs/0/auxtriggers/1/channel

[Group 1 - Slope trigger 2]
label: Slope trigger 2
datatype: COMBO
combo_def_1: Level
combo_def_2: Rise
combo_def_3: Fall
combo_def_4: Both
group: Triggers, group 1
section: Setup
get_cmd: /awgs/0/auxtriggers/1/slope

[Group 2 - Trigger 1]
label: Trigger 1
datatype: COMBO
combo_def_1: Trigger in 1
combo_def_2: Trigger in 2
combo_def_3: Trigger in 3
combo_def_4: Trigger in 4
combo_def_5: Trigger in 5
combo_def_6: Trigger in 6
combo_def_7: Trigger in 7
combo_def_8: Trigger in 8
group: Triggers, group 2
section: Setup
tooltip: Trigger for the AWG when "Run mode" is set to "External trigger"
state_quant: Channel grouping
state_value_1: 4 x 2
get_cmd: /awgs/1/auxtriggers/0/channel

[Group 2 - Slope trigger 1]
label: Slope trigger 1
datatype: COMBO
combo_def_1: Rise
combo_def_2: Fall
combo_def_3: Both
combo_def_4: Level
group: Triggers, group 2
section: Setup
state_quant: Channel grouping
state_value_1: 4 x 2
get_cmd: /awgs/1/auxtriggers/0/slope

[Group 2 - Trigger 2]
label: Trigger 2
datatype: COMBO
combo_def_1: Trigger in 1
combo_def_2: Trigger in 2
combo_def_3: Trigger in 3
combo_def_4: Trigger in 4
combo_def_5: Trigger in 5
combo_def_6: Trigger in 6
combo_def_7: Trigger in 7
combo_def_8: Trigger in 8
group: Triggers, group 2
section: Setup
state_quant: Channel grouping
state_value_1: 4 x 2
get_cmd: /awgs/1/auxtriggers/1/channel

[Group 2 - Slope trigger 2]
label: Slope trigger 2
datatype: COMBO
combo_def_1: Rise
combo_def_2: Fall
combo_def_3: Both
combo_def_4: Level
group: Triggers, group 2
section: Setup
state_quant: Channel grouping
state_value_1: 4 x 2
get_cmd: /awgs/1/auxtriggers/1/slope

[Group 3 - Trigger 1]
label: Trigger 1
datatype: COMBO
combo_def_1: Trigger in 1
combo_def_2: Trigger in 2
combo_def_3: Trigger in 3
combo_def_4: Trigger in 4
combo_def_5: Trigger in 5
combo_def_6: Trigger in 6
combo_def_7: Trigger in 7
combo_def_8: Trigger in 8
group: Triggers, group 3
section: Setup
tooltip: Trigger for the AWG when "Run mode" is set to "External trigger"
state_quant: Channel grouping
state_value_1: 4 x 2
state_value_2: 2 x 4
get_cmd: /awgs/2/auxtriggers/0/channel

[Group 3 - Slope trigger 1]
label: Slope trigger 1
datatype: COMBO
combo_def_1: Rise
combo_def_2: Fall
combo_def_3: Both
combo_def_4: Level
group: Triggers, group 3
section: Setup
state_quant: Channel grouping
state_value_1: 4 x 2
state_value_2: 2 x 4
get_cmd: /awgs/2/auxtriggers/0/slope

[Group 3 - Trigger 2]
label: Trigger 2
datatype: COMBO
combo_def_1: Trigger in 1
combo_def_2: Trigger in 2
combo_def_3: Trigger in 3
combo_def_4: Trigger in 4
combo_def_5: Trigger in 5
combo_def_6: Trigger in 6
combo_def_7: Trigger in 7
combo_def_8: Trigger in 8
group: Triggers, group 3
section: Setup
state_quant: Channel grouping
state_value_1: 4 x 2
state_value_2: 2 x 4
get_cmd: /awgs/2/auxtriggers/1/channel

[Group 3 - Slope trigger 2]
label: Slope trigger 2
datatype: COMBO
combo_def_1: Rise
combo_def_2: Fall
combo_def_3: Both
combo_def_4: Level
group: Triggers, group 3
section: Setup
state_quant: Channel grouping
state_value_1: 4 x 2
state_value_2: 2 x 4
get_cmd: /awgs/2/auxtriggers/1/slope

[Group 4 - Trigger 1]
label: Trigger 1
datatype: COMBO
combo_def_1: Trigger in 1
combo_def_2: Trigger in 2
combo_def_3: Trigger in 3
combo_def_4: Trigger in 4
combo_def_5: Trigger in 5
combo_def_6: Trigger in 6
combo_def_7: Trigger in 7
combo_def_8: Trigger in 8
group: Triggers, group 4
section: Setup
tooltip: Trigger for the AWG when "Run mode" is set to "External trigger"
state_quant: Channel grouping
state_value_1: 4 x 2
get_cmd: /awgs/3/auxtriggers/0/channel

[Group 4 - Slope trigger 1]
label: Slope trigger 1
datatype: COMBO
combo_def_1: Rise
combo_def_2: Fall
combo_def_3: Both
combo_def_4: Level
group: Triggers, group 4
section: Setup
state_quant: Channel grouping
state_value_1: 4 x 2
get_cmd: /awgs/3/auxtriggers/0/slope

[Group 4 - Trigger 2]
label: Trigger 2
datatype: COMBO
combo_def_1: Trigger in 1
combo_def_2: Trigger in 2
combo_def_3: Trigger in 3
combo_def_4: Trigger in 4
combo_def_5: Trigger in 5
combo_def_6: Trigger in 6
combo_def_7: Trigger in 7
combo_def_8: Trigger in 8
group: Triggers, group 4
section: Setup
state_quant: Channel grouping
state_value_1: 4 x 2
get_cmd: /awgs/3/auxtriggers/1/channel

[Group 4 - Slope trigger 2]
label: Slope trigger 2
datatype: COMBO
combo_def_1: Rise
combo_def_2: Fall
combo_def_3: Both
combo_def_4: Level
group: Triggers, group 4
section: Setup
state_quant: Channel grouping
state_value_1: 4 x 2
get_cmd: /awgs/3/auxtriggers/1/slope


#######################################################################
### Triggers #####################################################
#######################################################################



[Trigger 1 - Input level]
label: Input level
datatype: DOUBLE
def_value: 1
unit: V
group: Trigger 1
section: Triggers
get_cmd: /triggers/in/0/level

[Trigger 1 - Impedence]
label: Impedence
datatype: COMBO
combo_def_1: 1 kOhm
combo_def_2: 50 Ohm
def_value: 1 kOhm
group: Trigger 1
section: Triggers
get_cmd: /triggers/in/0/imp50

[Trigger 2 - Input level]
label: Input level
datatype: DOUBLE
def_value: 1
unit: V
group: Trigger 2
section: Triggers
get_cmd: /triggers/in/1/level

[Trigger 2 - Impedence]
label: Impedence
datatype: COMBO
combo_def_1: 1 kOhm
combo_def_2: 50 Ohm
def_value: 1 kOhm
group: Trigger 2
section: Triggers
get_cmd: /triggers/in/1/imp50

[Trigger 3 - Input level]
label: Input level
datatype: DOUBLE
def_value: 1
unit: V
group: Trigger 3
section: Triggers
get_cmd: /triggers/in/2/level

[Trigger 3 - Impedence]
label: Impedence
datatype: COMBO
combo_def_1: 1 kOhm
combo_def_2: 50 Ohm
def_value: 1 kOhm
group: Trigger 3
section: Triggers
get_cmd: /triggers/in/2/imp50

[Trigger 4 - Input level]
label: Input level
datatype: DOUBLE
def_value: 1
unit: V
group: Trigger 4
section: Triggers
get_cmd: /triggers/in/3/level

[Trigger 4 - Impedence]
label: Impedence
datatype: COMBO
combo_def_1: 1 kOhm
combo_def_2: 50 Ohm
def_value: 1 kOhm
group: Trigger 4
section: Triggers
get_cmd: /triggers/in/3/imp50

[Trigger 5 - Input level]
label: Input level
datatype: DOUBLE
def_value: 1
unit: V
group: Trigger 5
section: Triggers
get_cmd: /triggers/in/4/level

[Trigger 5 - Impedence]
label: Impedence
datatype: COMBO
combo_def_1: 1 kOhm
combo_def_2: 50 Ohm
def_value: 1 kOhm
group: Trigger 5
section: Triggers
get_cmd: /triggers/in/4/imp50

[Trigger 6 - Input level]
label: Input level
datatype: DOUBLE
def_value: 1
unit: V
group: Trigger 6
section: Triggers
get_cmd: /triggers/in/5/level

[Trigger 6 - Impedence]
label: Impedence
datatype: COMBO
combo_def_1: 1 kOhm
combo_def_2: 50 Ohm
def_value: 1 kOhm
group: Trigger 6
section: Triggers
get_cmd: /triggers/in/5/imp50

[Trigger 7 - Input level]
label: Input level
datatype: DOUBLE
def_value: 1
unit: V
group: Trigger 7
section: Triggers
get_cmd: /triggers/in/6/level

[Trigger 7 - Impedence]
label: Impedence
datatype: COMBO
combo_def_1: 1 kOhm
combo_def_2: 50 Ohm
def_value: 1 kOhm
group: Trigger 7
section: Triggers
get_cmd: /triggers/in/6/imp50

[Trigger 8 - Input level]
label: Input level
datatype: DOUBLE
def_value: 1
unit: V
group: Trigger 8
section: Triggers
get_cmd: /triggers/in/7/level

[Trigger 8 - Impedence]
label: Impedence
datatype: COMBO
combo_def_1: 1 kOhm
combo_def_2: 50 Ohm
def_value: 1 kOhm
group: Trigger 8
section: Triggers
get_cmd: /triggers/in/7/imp50



#######################################################################
### Oscillators #####################################################
#######################################################################

[Oscillator frequency 1]
label: Oscillator 1
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/0/freq

[Oscillator frequency 2]
label: Oscillator 2
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/1/freq

[Oscillator frequency 3]
label: Oscillator 3
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/2/freq

[Oscillator frequency 4]
label: Oscillator 4
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/3/freq

[Oscillator frequency 5]
label: Oscillator 5
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/4/freq

[Oscillator frequency 6]
label: Oscillator 6
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/5/freq

[Oscillator frequency 7]
label: Oscillator 7
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/6/freq

[Oscillator frequency 8]
label: Oscillator 8
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/7/freq

[Oscillator frequency 9]
label: Oscillator 9
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/8/freq

[Oscillator frequency 10]
label: Oscillator 10
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/9/freq

[Oscillator frequency 11]
label: Oscillator 11
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/10/freq

[Oscillator frequency 12]
label: Oscillator 12
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/11/freq

[Oscillator frequency 13]
label: Oscillator 13
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/12/freq

[Oscillator frequency 14]
label: Oscillator 14
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/13/freq

[Oscillator frequency 15]
label: Oscillator 15
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/14/freq

[Oscillator frequency 16]
label: Oscillator 16
datatype: DOUBLE
def_value: 10E6
unit: Hz
group: Oscillator frequencies
section: Oscillators
get_cmd: /oscs/15/freq

#######################################################################
### Sine generators ###################################################
#######################################################################

[Sine 1 - Oscillator]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
def_value: 1
group: Sine generator 1
section: Sine generators
get_cmd: /sines/0/oscselect

[Sine 1 - Harmonic]
label: Harmonic
datatype: DOUBLE
def_value: 1
low_lim: 1
group: Sine generator 1
section: Sine generators
get_cmd: /sines/0/harmonic

[Sine 1 - Phase]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0
group: Sine generator 1
section: Sine generators
get_cmd: /sines/0/phaseshift


[Sine 2 - Oscillator]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
def_value: 1
group: Sine generator 2
section: Sine generators
get_cmd: /sines/1/oscselect

[Sine 2 - Harmonic]
label: Harmonic
datatype: DOUBLE
def_value: 1
low_lim: 1
group: Sine generator 2
section: Sine generators
get_cmd: /sines/1/harmonic

[Sine 2 - Phase]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0
group: Sine generator 2
section: Sine generators
get_cmd: /sines/1/phaseshift


[Sine 3 - Oscillator]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
def_value: 1
group: Sine generator 3
section: Sine generators
get_cmd: /sines/2/oscselect

[Sine 3 - Harmonic]
label: Harmonic
datatype: DOUBLE
def_value: 1
low_lim: 1
group: Sine generator 3
section: Sine generators
get_cmd: /sines/2/harmonic

[Sine 3 - Phase]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0
group: Sine generator 3
section: Sine generators
get_cmd: /sines/2/phaseshift


[Sine 4 - Oscillator]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
def_value: 1
group: Sine generator 4
section: Sine generators
get_cmd: /sines/3/oscselect

[Sine 4 - Harmonic]
label: Harmonic
datatype: DOUBLE
def_value: 1
low_lim: 1
group: Sine generator 4
section: Sine generators
get_cmd: /sines/3/harmonic

[Sine 4 - Phase]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0
group: Sine generator 4
section: Sine generators
get_cmd: /sines/3/phaseshift


[Sine 5 - Oscillator]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
def_value: 1
group: Sine generator 5
section: Sine generators
get_cmd: /sines/4/oscselect

[Sine 5 - Harmonic]
label: Harmonic
datatype: DOUBLE
def_value: 1
low_lim: 1
group: Sine generator 5
section: Sine generators
get_cmd: /sines/4/harmonic

[Sine 5 - Phase]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0
group: Sine generator 5
section: Sine generators
get_cmd: /sines/4/phaseshift


[Sine 6 - Oscillator]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
def_value: 1
group: Sine generator 6
section: Sine generators
get_cmd: /sines/5/oscselect

[Sine 6 - Harmonic]
label: Harmonic
datatype: DOUBLE
def_value: 1
low_lim: 1
group: Sine generator 6
section: Sine generators
get_cmd: /sines/5/harmonic

[Sine 6 - Phase]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0
group: Sine generator 6
section: Sine generators
get_cmd: /sines/5/phaseshift


[Sine 7 - Oscillator]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
def_value: 1
group: Sine generator 7
section: Sine generators
get_cmd: /sines/6/oscselect

[Sine 7 - Harmonic]
label: Harmonic
datatype: DOUBLE
def_value: 1
low_lim: 1
group: Sine generator 7
section: Sine generators
get_cmd: /sines/6/harmonic

[Sine 7 - Phase]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0
group: Sine generator 7
section: Sine generators
get_cmd: /sines/6/phaseshift


[Sine 8 - Oscillator]
label: Oscillator
datatype: COMBO
combo_def_1: 1
combo_def_2: 2
combo_def_3: 3
combo_def_4: 4
combo_def_5: 5
combo_def_6: 6
combo_def_7: 7
combo_def_8: 8
combo_def_9: 9
combo_def_10: 10
combo_def_11: 11
combo_def_12: 12
combo_def_13: 13
combo_def_14: 14
combo_def_15: 15
combo_def_16: 16
def_value: 1
group: Sine generator 8
section: Sine generators
get_cmd: /sines/7/oscselect

[Sine 8 - Harmonic]
label: Harmonic
datatype: DOUBLE
def_value: 1
low_lim: 1
group: Sine generator 8
section: Sine generators
get_cmd: /sines/7/harmonic

[Sine 8 - Phase]
label: Phase
datatype: DOUBLE
unit: deg
def_value: 0
group: Sine generator 8
section: Sine generators
get_cmd: /sines/7/phaseshift


#######################################################################
### Waveform generators ###############################################
#######################################################################

[AWG 1 - Amplitude scaling]
label: Amplitude scaling
datatype: DOUBLE
def_value: 1
group: AWG 1
section: AWG
low_lim: -1
high_lim: 1
get_cmd: /awgs/0/outputs/0/amplitude

[AWG 1 - Hold last value]
label: Hold last value
datatype: BOOLEAN
def_value: 0
group: AWG 1
section: AWG
get_cmd: /awgs/0/outputs/0/hold

[AWG 1 - Modulation]
label: Modulation
datatype: COMBO
combo_def_1: Off
combo_def_2: Sine 1
combo_def_3: Sine 2
combo_def_4: Advanced
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 5
def_value: Off
group: AWG 1
section: AWG
get_cmd: /awgs/0/outputs/0/modulation/mode


[AWG 2 - Amplitude scaling]
label: Amplitude scaling
datatype: DOUBLE
def_value: 1
group: AWG 2
section: AWG
low_lim: -1
high_lim: 1
get_cmd: /awgs/0/outputs/1/amplitude

[AWG 2 - Hold last value]
label: Hold last value
datatype: BOOLEAN
def_value: 0
group: AWG 2
section: AWG
get_cmd: /awgs/0/outputs/1/hold

[AWG 2 - Modulation]
label: Modulation
datatype: COMBO
combo_def_1: Off
combo_def_2: Sine 1
combo_def_3: Sine 2
combo_def_4: Advanced
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 5
def_value: Off
group: AWG 2
section: AWG
get_cmd: /awgs/0/outputs/1/modulation/mode


[AWG 3 - Amplitude scaling]
label: Amplitude scaling
datatype: DOUBLE
def_value: 1
group: AWG 3
section: AWG
low_lim: -1
high_lim: 1
get_cmd: /awgs/1/outputs/0/amplitude

[AWG 3 - Hold last value]
label: Hold last value
datatype: BOOLEAN
def_value: 0
group: AWG 3
section: AWG
get_cmd: /awgs/1/outputs/0/hold

[AWG 3 - Modulation]
label: Modulation
datatype: COMBO
combo_def_1: Off
combo_def_2: Sine 3
combo_def_3: Sine 4
combo_def_4: Advanced
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 5
def_value: Off
group: AWG 3
section: AWG
get_cmd: /awgs/1/outputs/0/modulation/mode


[AWG 4 - Amplitude scaling]
label: Amplitude scaling
datatype: DOUBLE
def_value: 1
group: AWG 4
section: AWG
low_lim: -1
high_lim: 1
get_cmd: /awgs/1/outputs/1/amplitude

[AWG 4 - Hold last value]
label: Hold last value
datatype: BOOLEAN
def_value: 0
group: AWG 4
section: AWG
get_cmd: /awgs/1/outputs/1/hold

[AWG 4 - Modulation]
label: Modulation
datatype: COMBO
combo_def_1: Off
combo_def_2: Sine 3
combo_def_3: Sine 4
combo_def_4: Advanced
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 5
def_value: Off
group: AWG 4
section: AWG
get_cmd: /awgs/1/outputs/1/modulation/mode


[AWG 5 - Amplitude scaling]
label: Amplitude scaling
datatype: DOUBLE
def_value: 1
group: AWG 5
section: AWG
low_lim: -1
high_lim: 1
get_cmd: /awgs/2/outputs/0/amplitude

[AWG 5 - Hold last value]
label: Hold last value
datatype: BOOLEAN
def_value: 0
group: AWG 5
section: AWG
get_cmd: /awgs/2/outputs/0/hold

[AWG 5 - Modulation]
label: Modulation
datatype: COMBO
combo_def_1: Off
combo_def_2: Sine 5
combo_def_3: Sine 6
combo_def_4: Advanced
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 5
def_value: Off
group: AWG 5
section: AWG
get_cmd: /awgs/2/outputs/0/modulation/mode


[AWG 6 - Amplitude scaling]
label: Amplitude scaling
datatype: DOUBLE
def_value: 1
group: AWG 6
section: AWG
low_lim: -1
high_lim: 1
get_cmd: /awgs/2/outputs/1/amplitude

[AWG 6 - Hold last value]
label: Hold last value
datatype: BOOLEAN
def_value: 0
group: AWG 6
section: AWG
get_cmd: /awgs/2/outputs/1/hold

[AWG 6 - Modulation]
label: Modulation
datatype: COMBO
combo_def_1: Off
combo_def_2: Sine 5
combo_def_3: Sine 6
combo_def_4: Advanced
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 5
def_value: Off
group: AWG 6
section: AWG
get_cmd: /awgs/2/outputs/1/modulation/mode


[AWG 7 - Amplitude scaling]
label: Amplitude scaling
datatype: DOUBLE
def_value: 1
group: AWG 7
section: AWG
low_lim: -1
high_lim: 1
get_cmd: /awgs/3/outputs/0/amplitude

[AWG 7 - Hold last value]
label: Hold last value
datatype: BOOLEAN
def_value: 0
group: AWG 7
section: AWG
get_cmd: /awgs/3/outputs/0/hold

[AWG 7 - Modulation]
label: Modulation
datatype: COMBO
combo_def_1: Off
combo_def_2: Sine 7
combo_def_3: Sine 8
combo_def_4: Advanced
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 5
def_value: Off
group: AWG 7
section: AWG
get_cmd: /awgs/3/outputs/0/modulation/mode


[AWG 8 - Amplitude scaling]
label: Amplitude scaling
datatype: DOUBLE
def_value: 1
group: AWG 8
section: AWG
low_lim: -1
high_lim: 1
get_cmd: /awgs/3/outputs/1/amplitude

[AWG 8 - Hold last value]
label: Hold last value
datatype: BOOLEAN
def_value: 0
group: AWG 8
section: AWG
get_cmd: /awgs/3/outputs/1/hold

[AWG 8 - Modulation]
label: Modulation
datatype: COMBO
combo_def_1: Off
combo_def_2: Sine 7
combo_def_3: Sine 8
combo_def_4: Advanced
cmd_def_1: 0
cmd_def_2: 1
cmd_def_3: 2
cmd_def_4: 5
def_value: Off
group: AWG 8
section: AWG
get_cmd: /awgs/3/outputs/1/modulation/mode


#######################################################################
### Outputs ###########################################################
#######################################################################

[Ch1 - Enable AWG 1]
label: Enable AWG 1
datatype: BOOLEAN
def_value: 1
group: Output 1
section: Output 1-2

[Ch1 - Enable AWG 2]
label: Enable AWG 2
datatype: BOOLEAN
def_value: 0
group: Output 1
section: Output 1-2

[Ch1 - Enable Sine 1]
label: Enable Sine 1
datatype: BOOLEAN
def_value: 0
group: Output 1
section: Output 1-2
get_cmd: /sines/0/enables/0

[Ch1 - Amplitude Sine 1]
label: Amplitude Sine 1
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch1 - Enable Sine 1
state_value_1: 1
group: Output 1
section: Output 1-2
get_cmd: /sines/0/amplitudes/0

[Ch1 - Enable Sine 2]
label: Enable Sine 2
datatype: BOOLEAN
def_value: 0
group: Output 1
section: Output 1-2
get_cmd: /sines/1/enables/0

[Ch1 - Amplitude Sine 2]
label: Amplitude Sine 2
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch1 - Enable Sine 2
state_value_1: 1
group: Output 1
section: Output 1-2
get_cmd: /sines/1/amplitudes/0

[Ch1 - Direct output]
label: Direct output
datatype: BOOLEAN
def_value: 0
group: Output 1
section: Output 1-2
get_cmd: /sigouts/0/direct

[Ch1 - Range]
label: Range
datatype: COMBO
combo_def_1: 5 V
combo_def_2: 4 V
combo_def_3: 3 V
combo_def_4: 2 V
combo_def_5: 1 V
combo_def_6: 800 mV
combo_def_7: 600 mV
combo_def_8: 400 mV
combo_def_9: 200 mV
cmd_def_1: 5.0
cmd_def_2: 4.0
cmd_def_3: 3.0
cmd_def_4: 2.0
cmd_def_5: 1.0
cmd_def_6: 0.8
cmd_def_7: 0.6
cmd_def_8: 0.4
cmd_def_9: 0.2
def_value: 1 V
state_quant: Ch1 - Direct output
state_value_1: 0
group: Output 1
section: Output 1-2
get_cmd: /sigouts/0/range

[Ch1 - Filter]
label: Filter
datatype: BOOLEAN
def_value: 0
state_quant: Ch1 - Direct output
state_value_1: 0
group: Output 1
section: Output 1-2
get_cmd: /sigouts/0/filter

[Ch1 - Offset]
label: Offset
datatype: DOUBLE
unit: V
def_value: 0.0
group: Output 1
section: Output 1-2
get_cmd: /sigouts/0/offset

[Ch1 - Delay]
label: Delay
datatype: DOUBLE
unit: s
def_value: 0.0
group: Output 1
section: Output 1-2
get_cmd: /sigouts/0/delay

[Ch1 - Output]
label: Output
datatype: BOOLEAN
def_value: 0
group: Output 1
section: Output 1-2
get_cmd: /sigouts/0/on

[Ch2 - Enable AWG 1]
label: Enable AWG 1
datatype: BOOLEAN
def_value: 0
group: Output 2
section: Output 1-2

[Ch2 - Enable AWG 2]
label: Enable AWG 2
datatype: BOOLEAN
def_value: 1
group: Output 2
section: Output 1-2

[Ch2 - Enable Sine 1]
label: Enable Sine 1
datatype: BOOLEAN
def_value: 0
group: Output 2
section: Output 1-2
get_cmd: /sines/0/enables/1

[Ch2 - Amplitude Sine 1]
label: Amplitude Sine 1
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch2 - Enable Sine 1
state_value_1: 1
group: Output 2
section: Output 1-2
get_cmd: /sines/0/amplitudes/1

[Ch2 - Enable Sine 2]
label: Enable Sine 2
datatype: BOOLEAN
def_value: 0
group: Output 2
section: Output 1-2
get_cmd: /sines/1/enables/1

[Ch2 - Amplitude Sine 2]
label: Amplitude Sine 2
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch2 - Enable Sine 2
state_value_1: 1
group: Output 2
section: Output 1-2
get_cmd: /sines/1/amplitudes/1

[Ch2 - Direct output]
label: Direct output
datatype: BOOLEAN
def_value: 0
group: Output 2
section: Output 1-2
get_cmd: /sigouts/1/direct

[Ch2 - Range]
label: Range
datatype: COMBO
combo_def_1: 5 V
combo_def_2: 4 V
combo_def_3: 3 V
combo_def_4: 2 V
combo_def_5: 1 V
combo_def_6: 800 mV
combo_def_7: 600 mV
combo_def_8: 400 mV
combo_def_9: 200 mV
cmd_def_1: 5.0
cmd_def_2: 4.0
cmd_def_3: 3.0
cmd_def_4: 2.0
cmd_def_5: 1.0
cmd_def_6: 0.8
cmd_def_7: 0.6
cmd_def_8: 0.4
cmd_def_9: 0.2
def_value: 1 V
state_quant: Ch2 - Direct output
state_value_1: 0
group: Output 2
section: Output 1-2
get_cmd: /sigouts/1/range

[Ch2 - Filter]
label: Filter
datatype: BOOLEAN
def_value: 0
state_quant: Ch2 - Direct output
state_value_1: 0
group: Output 2
section: Output 1-2
get_cmd: /sigouts/1/filter

[Ch2 - Offset]
label: Offset
datatype: DOUBLE
unit: V
def_value: 0.0
group: Output 2
section: Output 1-2
get_cmd: /sigouts/1/offset

[Ch2 - Delay]
label: Delay
datatype: DOUBLE
unit: s
def_value: 0.0
group: Output 2
section: Output 1-2
get_cmd: /sigouts/1/delay

[Ch2 - Output]
label: Output
datatype: BOOLEAN
def_value: 0
group: Output 2
section: Output 1-2
get_cmd: /sigouts/1/on






[Ch3 - Enable AWG 3]
label: Enable AWG 3
datatype: BOOLEAN
def_value: 1
group: Output 3
section: Output 3-4

[Ch3 - Enable AWG 4]
label: Enable AWG 4
datatype: BOOLEAN
def_value: 0
group: Output 3
section: Output 3-4

[Ch3 - Enable Sine 3]
label: Enable Sine 3
datatype: BOOLEAN
def_value: 0
group: Output 3
section: Output 3-4
get_cmd: /sines/2/enables/0

[Ch3 - Amplitude Sine 3]
label: Amplitude Sine 3
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch3 - Enable Sine 3
state_value_1: 1
group: Output 3
section: Output 3-4
get_cmd: /sines/2/amplitudes/0

[Ch3 - Enable Sine 4]
label: Enable Sine 4
datatype: BOOLEAN
def_value: 0
group: Output 3
section: Output 3-4
get_cmd: /sines/3/enables/0

[Ch3 - Amplitude Sine 4]
label: Amplitude Sine 4
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch3 - Enable Sine 4
state_value_1: 1
group: Output 3
section: Output 3-4
get_cmd: /sines/3/amplitudes/0

[Ch3 - Direct output]
label: Direct output
datatype: BOOLEAN
def_value: 0
group: Output 3
section: Output 3-4
get_cmd: /sigouts/2/direct

[Ch3 - Range]
label: Range
datatype: COMBO
combo_def_1: 5 V
combo_def_2: 4 V
combo_def_3: 3 V
combo_def_4: 2 V
combo_def_5: 1 V
combo_def_6: 800 mV
combo_def_7: 600 mV
combo_def_8: 400 mV
combo_def_9: 200 mV
cmd_def_1: 5.0
cmd_def_2: 4.0
cmd_def_3: 3.0
cmd_def_4: 2.0
cmd_def_5: 1.0
cmd_def_6: 0.8
cmd_def_7: 0.6
cmd_def_8: 0.4
cmd_def_9: 0.2
def_value: 1 V
state_quant: Ch3 - Direct output
state_value_1: 0
group: Output 3
section: Output 3-4
get_cmd: /sigouts/2/range

[Ch3 - Filter]
label: Filter
datatype: BOOLEAN
def_value: 0
state_quant: Ch3 - Direct output
state_value_1: 0
group: Output 3
section: Output 3-4
get_cmd: /sigouts/2/filter

[Ch3 - Offset]
label: Offset
datatype: DOUBLE
unit: V
def_value: 0.0
group: Output 3
section: Output 3-4
get_cmd: /sigouts/2/offset

[Ch3 - Delay]
label: Delay
datatype: DOUBLE
unit: s
def_value: 0.0
group: Output 3
section: Output 3-4
get_cmd: /sigouts/2/delay

[Ch3 - Output]
label: Output
datatype: BOOLEAN
def_value: 0
group: Output 3
section: Output 3-4
get_cmd: /sigouts/2/on


[Ch4 - Enable AWG 3]
label: Enable AWG 3
datatype: BOOLEAN
def_value: 0
group: Output 4
section: Output 3-4

[Ch4 - Enable AWG 4]
label: Enable AWG 4
datatype: BOOLEAN
def_value: 1
group: Output 4
section: Output 3-4

[Ch4 - Enable Sine 3]
label: Enable Sine 3
datatype: BOOLEAN
def_value: 0
group: Output 4
section: Output 3-4
get_cmd: /sines/2/enables/1

[Ch4 - Amplitude Sine 3]
label: Amplitude Sine 3
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch4 - Enable Sine 3
state_value_1: 1
group: Output 4
section: Output 3-4
get_cmd: /sines/2/amplitudes/1

[Ch4 - Enable Sine 4]
label: Enable Sine 4
datatype: BOOLEAN
def_value: 0
group: Output 4
section: Output 3-4
get_cmd: /sines/3/enables/1

[Ch4 - Amplitude Sine 4]
label: Amplitude Sine 4
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch4 - Enable Sine 4
state_value_1: 1
group: Output 4
section: Output 3-4
get_cmd: /sines/3/amplitudes/1

[Ch4 - Direct output]
label: Direct output
datatype: BOOLEAN
def_value: 0
group: Output 4
section: Output 3-4
get_cmd: /sigouts/3/direct

[Ch4 - Range]
label: Range
datatype: COMBO
combo_def_1: 5 V
combo_def_2: 4 V
combo_def_3: 3 V
combo_def_4: 2 V
combo_def_5: 1 V
combo_def_6: 800 mV
combo_def_7: 600 mV
combo_def_8: 400 mV
combo_def_9: 200 mV
cmd_def_1: 5.0
cmd_def_2: 4.0
cmd_def_3: 3.0
cmd_def_4: 2.0
cmd_def_5: 1.0
cmd_def_6: 0.8
cmd_def_7: 0.6
cmd_def_8: 0.4
cmd_def_9: 0.2
def_value: 1 V
state_quant: Ch4 - Direct output
state_value_1: 0
group: Output 4
section: Output 3-4
get_cmd: /sigouts/3/range

[Ch4 - Filter]
label: Filter
datatype: BOOLEAN
def_value: 0
state_quant: Ch4 - Direct output
state_value_1: 0
group: Output 4
section: Output 3-4
get_cmd: /sigouts/3/filter

[Ch4 - Offset]
label: Offset
datatype: DOUBLE
unit: V
def_value: 0.0
group: Output 4
section: Output 3-4
get_cmd: /sigouts/3/offset

[Ch4 - Delay]
label: Delay
datatype: DOUBLE
unit: s
def_value: 0.0
group: Output 4
section: Output 3-4
get_cmd: /sigouts/3/delay

[Ch4 - Output]
label: Output
datatype: BOOLEAN
def_value: 0
group: Output 4
section: Output 3-4
get_cmd: /sigouts/3/on






[Ch5 - Enable AWG 5]
label: Enable AWG 5
datatype: BOOLEAN
def_value: 1
group: Output 5
section: Output 5-6

[Ch5 - Enable AWG 6]
label: Enable AWG 6
datatype: BOOLEAN
def_value: 0
group: Output 5
section: Output 5-6

[Ch5 - Enable Sine 5]
label: Enable Sine 5
datatype: BOOLEAN
def_value: 0
group: Output 5
section: Output 5-6
get_cmd: /sines/4/enables/0

[Ch5 - Amplitude Sine 5]
label: Amplitude Sine 5
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch5 - Enable Sine 5
state_value_1: 1
group: Output 5
section: Output 5-6
get_cmd: /sines/4/amplitudes/0

[Ch5 - Enable Sine 6]
label: Enable Sine 6
datatype: BOOLEAN
def_value: 0
group: Output 5
section: Output 5-6
get_cmd: /sines/5/enables/0

[Ch5 - Amplitude Sine 6]
label: Amplitude Sine 6
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch5 - Enable Sine 6
state_value_1: 1
group: Output 5
section: Output 5-6
get_cmd: /sines/5/amplitudes/0

[Ch5 - Direct output]
label: Direct output
datatype: BOOLEAN
def_value: 0
group: Output 5
section: Output 5-6
get_cmd: /sigouts/4/direct

[Ch5 - Range]
label: Range
datatype: COMBO
combo_def_1: 5 V
combo_def_2: 4 V
combo_def_3: 3 V
combo_def_4: 2 V
combo_def_5: 1 V
combo_def_6: 800 mV
combo_def_7: 600 mV
combo_def_8: 400 mV
combo_def_9: 200 mV
cmd_def_1: 5.0
cmd_def_2: 4.0
cmd_def_3: 3.0
cmd_def_4: 2.0
cmd_def_5: 1.0
cmd_def_6: 0.8
cmd_def_7: 0.6
cmd_def_8: 0.4
cmd_def_9: 0.2
def_value: 1 V
state_quant: Ch5 - Direct output
state_value_1: 0
group: Output 5
section: Output 5-6
get_cmd: /sigouts/4/range

[Ch5 - Filter]
label: Filter
datatype: BOOLEAN
def_value: 0
state_quant: Ch5 - Direct output
state_value_1: 0
group: Output 5
section: Output 5-6
get_cmd: /sigouts/4/filter

[Ch5 - Offset]
label: Offset
datatype: DOUBLE
unit: V
def_value: 0.0
group: Output 5
section: Output 5-6
get_cmd: /sigouts/4/offset

[Ch5 - Delay]
label: Delay
datatype: DOUBLE
unit: s
def_value: 0.0
group: Output 5
section: Output 5-6
get_cmd: /sigouts/4/delay

[Ch5 - Output]
label: Output
datatype: BOOLEAN
def_value: 0
group: Output 5
section: Output 5-6
get_cmd: /sigouts/4/on

[Ch6 - Enable AWG 5]
label: Enable AWG 5
datatype: BOOLEAN
def_value: 0
group: Output 6
section: Output 5-6

[Ch6 - Enable AWG 6]
label: Enable AWG 6
datatype: BOOLEAN
def_value: 1
group: Output 6
section: Output 5-6

[Ch6 - Enable Sine 5]
label: Enable Sine 5
datatype: BOOLEAN
def_value: 0
group: Output 6
section: Output 5-6
get_cmd: /sines/4/enables/1

[Ch6 - Amplitude Sine 5]
label: Amplitude Sine 5
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch6 - Enable Sine 5
state_value_1: 1
group: Output 6
section: Output 5-6
get_cmd: /sines/4/amplitudes/1

[Ch6 - Enable Sine 6]
label: Enable Sine 6
datatype: BOOLEAN
def_value: 0
group: Output 6
section: Output 5-6
get_cmd: /sines/5/enables/1

[Ch6 - Amplitude Sine 6]
label: Amplitude Sine 6
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch6 - Enable Sine 6
state_value_1: 1
group: Output 6
section: Output 5-6
get_cmd: /sines/5/amplitudes/1

[Ch6 - Direct output]
label: Direct output
datatype: BOOLEAN
def_value: 0
group: Output 6
section: Output 5-6
get_cmd: /sigouts/5/direct

[Ch6 - Range]
label: Range
datatype: COMBO
combo_def_1: 5 V
combo_def_2: 4 V
combo_def_3: 3 V
combo_def_4: 2 V
combo_def_5: 1 V
combo_def_6: 800 mV
combo_def_7: 600 mV
combo_def_8: 400 mV
combo_def_9: 200 mV
cmd_def_1: 5.0
cmd_def_2: 4.0
cmd_def_3: 3.0
cmd_def_4: 2.0
cmd_def_5: 1.0
cmd_def_6: 0.8
cmd_def_7: 0.6
cmd_def_8: 0.4
cmd_def_9: 0.2
def_value: 1 V
state_quant: Ch6 - Direct output
state_value_1: 0
group: Output 6
section: Output 5-6
get_cmd: /sigouts/5/range

[Ch6 - Filter]
label: Filter
datatype: BOOLEAN
def_value: 0
state_quant: Ch6 - Direct output
state_value_1: 0
group: Output 6
section: Output 5-6
get_cmd: /sigouts/5/filter

[Ch6 - Offset]
label: Offset
datatype: DOUBLE
unit: V
def_value: 0.0
group: Output 6
section: Output 5-6
get_cmd: /sigouts/5/offset

[Ch6 - Delay]
label: Delay
datatype: DOUBLE
unit: s
def_value: 0.0
group: Output 6
section: Output 5-6
get_cmd: /sigouts/5/delay

[Ch6 - Output]
label: Output
datatype: BOOLEAN
def_value: 0
group: Output 6
section: Output 5-6
get_cmd: /sigouts/5/on






[Ch7 - Enable AWG 7]
label: Enable AWG 7
datatype: BOOLEAN
def_value: 1
group: Output 7
section: Output 7-8

[Ch7 - Enable AWG 8]
label: Enable AWG 8
datatype: BOOLEAN
def_value: 0
group: Output 7
section: Output 7-8

[Ch7 - Enable Sine 7]
label: Enable Sine 7
datatype: BOOLEAN
def_value: 0
group: Output 7
section: Output 7-8
get_cmd: /sines/6/enables/0

[Ch7 - Amplitude Sine 7]
label: Amplitude Sine 7
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch7 - Enable Sine 7
state_value_1: 1
group: Output 7
section: Output 7-8
get_cmd: /sines/6/amplitudes/0

[Ch7 - Enable Sine 8]
label: Enable Sine 8
datatype: BOOLEAN
def_value: 0
group: Output 7
section: Output 7-8
get_cmd: /sines/7/enables/0

[Ch7 - Amplitude Sine 8]
label: Amplitude Sine 8
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch7 - Enable Sine 8
state_value_1: 1
group: Output 7
section: Output 7-8
get_cmd: /sines/7/amplitudes/0

[Ch7 - Direct output]
label: Direct output
datatype: BOOLEAN
def_value: 0
group: Output 7
section: Output 7-8
get_cmd: /sigouts/6/direct

[Ch7 - Range]
label: Range
datatype: COMBO
combo_def_1: 5 V
combo_def_2: 4 V
combo_def_3: 3 V
combo_def_4: 2 V
combo_def_5: 1 V
combo_def_6: 800 mV
combo_def_7: 600 mV
combo_def_8: 400 mV
combo_def_9: 200 mV
cmd_def_1: 5.0
cmd_def_2: 4.0
cmd_def_3: 3.0
cmd_def_4: 2.0
cmd_def_5: 1.0
cmd_def_6: 0.8
cmd_def_7: 0.6
cmd_def_8: 0.4
cmd_def_9: 0.2
def_value: 1 V
state_quant: Ch7 - Direct output
state_value_1: 0
group: Output 7
section: Output 7-8
get_cmd: /sigouts/6/range

[Ch7 - Filter]
label: Filter
datatype: BOOLEAN
def_value: 0
state_quant: Ch7 - Direct output
state_value_1: 0
group: Output 7
section: Output 7-8
get_cmd: /sigouts/6/filter

[Ch7 - Offset]
label: Offset
datatype: DOUBLE
unit: V
def_value: 0.0
group: Output 7
section: Output 7-8
get_cmd: /sigouts/6/offset

[Ch7 - Delay]
label: Delay
datatype: DOUBLE
unit: s
def_value: 0.0
group: Output 7
section: Output 7-8
get_cmd: /sigouts/6/delay

[Ch7 - Output]
label: Output
datatype: BOOLEAN
def_value: 0
group: Output 7
section: Output 7-8
get_cmd: /sigouts/6/on


[Ch8 - Enable AWG 7]
label: Enable AWG 7
datatype: BOOLEAN
def_value: 0
group: Output 8
section: Output 7-8

[Ch8 - Enable AWG 8]
label: Enable AWG 8
datatype: BOOLEAN
def_value: 1
group: Output 8
section: Output 7-8

[Ch8 - Enable Sine 7]
label: Enable Sine 7
datatype: BOOLEAN
def_value: 0
group: Output 8
section: Output 7-8
get_cmd: /sines/6/enables/1

[Ch8 - Amplitude Sine 7]
label: Amplitude Sine 7
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch8 - Enable Sine 7
state_value_1: 1
group: Output 8
section: Output 7-8
get_cmd: /sines/6/amplitudes/1

[Ch8 - Enable Sine 8]
label: Enable Sine 8
datatype: BOOLEAN
def_value: 0
group: Output 8
section: Output 7-8
get_cmd: /sines/7/enables/1

[Ch8 - Amplitude Sine 8]
label: Amplitude Sine 8
datatype: DOUBLE
unit: V
def_value: 1.0
state_quant: Ch8 - Enable Sine 8
state_value_1: 1
group: Output 8
section: Output 7-8
get_cmd: /sines/7/amplitudes/1

[Ch8 - Direct output]
label: Direct output
datatype: BOOLEAN
def_value: 0
group: Output 8
section: Output 7-8
get_cmd: /sigouts/7/direct

[Ch8 - Range]
label: Range
datatype: COMBO
combo_def_1: 5 V
combo_def_2: 4 V
combo_def_3: 3 V
combo_def_4: 2 V
combo_def_5: 1 V
combo_def_6: 800 mV
combo_def_7: 600 mV
combo_def_8: 400 mV
combo_def_9: 200 mV
cmd_def_1: 5.0
cmd_def_2: 4.0
cmd_def_3: 3.0
cmd_def_4: 2.0
cmd_def_5: 1.0
cmd_def_6: 0.8
cmd_def_7: 0.6
cmd_def_8: 0.4
cmd_def_9: 0.2
def_value: 1 V
state_quant: Ch8 - Direct output
state_value_1: 0
group: Output 8
section: Output 7-8
get_cmd: /sigouts/7/range

[Ch8 - Filter]
label: Filter
datatype: BOOLEAN
def_value: 0
state_quant: Ch8 - Direct output
state_value_1: 0
group: Output 8
section: Output 7-8
get_cmd: /sigouts/7/filter

[Ch8 - Offset]
label: Offset
datatype: DOUBLE
unit: V
def_value: 0.0
group: Output 8
section: Output 7-8
get_cmd: /sigouts/7/offset

[Ch8 - Delay]
label: Delay
datatype: DOUBLE
unit: s
def_value: 0.0
group: Output 8
section: Output 7-8
get_cmd: /sigouts/7/delay

[Ch8 - Output]
label: Output
datatype: BOOLEAN
def_value: 0
group: Output 8
section: Output 7-8
get_cmd: /sigouts/7/on


#######################################################################
### Waveforms##########################################################
#######################################################################



[AWG1 - Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
show_in_measurement_dlg: True

[AWG2 - Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
show_in_measurement_dlg: True

[AWG3 - Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
show_in_measurement_dlg: True

[AWG4 - Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
show_in_measurement_dlg: True

[AWG5 - Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
show_in_measurement_dlg: True

[AWG6 - Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
show_in_measurement_dlg: True

[AWG7 - Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
show_in_measurement_dlg: True

[AWG8 - Waveform]
datatype: VECTOR
permission: WRITE
unit: V
x_name: Time
x_unit: s
group: Waveforms
section: Waveforms
show_in_measurement_dlg: True